---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title WM_Battery_v1_EN
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 35
set font_italic no
set font_family Arial
set font_bold no
set experiment_path "C:\\Users\\fabio\\OneDrive\\Área de Trabalho\\OpenWMB_EN_Windows"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define inline_script BS_Update_TriaNumber
	set description "Executes Python code"
	set _run "var.TrialNumber = var.TrialNumber + 1"
	set _prepare ""

define sketchpad BT_Fixation_Cross1
	set duration 1995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad BT_Fixation_Cross2
	set duration "[Delay]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define inline_script BT_Init_Var
	set description "Executes Python code"
	___run__
	var.Task_Name = "Binding Task"
	
	var.BindingRawScore = 0
	var.Hits = 0
	var.Omissions = 0
	var.FalseAlarms = 0
	var.ResponsesGiven = 0
	var.NNonResponses = 0
	var.counter = 0
	var.mismatch_8s_accuracy = 0
	var.match_8s_accuracy = 0
	var.mismatch_1s_accuracy = 0
	var.match_1s_accuracy = 0
	var.eightsec_accuracy = 0
	var.onesec_accuracy = 0
	var.total_mismatch_8s_rt = 0
	var.total_match_8s_rt = 0
	var.total_mismatch_1s_rt = 0
	var.total_match_1s_rt = 0
	var.counter_mismatch_8s_rt = 0
	var.counter_match_8s_rt = 0
	var.counter_mismatch_1s_rt = 0
	var.counter_match_1s_rt = 0
	var.mismatch_8s_avg_rt = 0
	var.match_8s_avg_rt = 0
	var.mismatch_1s_avg_rt = 0
	var.match_1s_avg_rt = 0
	
	
	var.TrialNumber = 0
	__end__
	set _prepare ""

define sketchpad BT_Probe_1
	set duration 4995
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineTwoPosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineTwoPosX]" x2="[BTLineThreePosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineThreePosX]" x2="[BTLineFourPosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineFourPosX]" y1="[BTLineOnePosY]" y2="[BTLineFourPosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineFourPosX]" y1="[BTLineFourPosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineTwoPosX]" y1="[BTLineThreePosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineTwoPosX]" x2="[BTLineOnePosX]" y1="[BTLineThreePosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineOnePosX]" y1="[BTLineThreePosY]" y2="[BTLineTwoPosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineOnePosX]" y1="[BTLineOnePosY]" y2="[BTLineTwoPosY]" z_index=0
	draw image center=1 file="[Probe]" scale="[BTScale]" show_if=always x=0 y=0 z_index=0

define inline_script BT_ScriptCalculateQuinetteScore
	set description "Executes Python code"
	___run__
	##Calculates the Accuracy Score used by Quinette et al. 2006
	if var.ResponsesGiven != 0:
	    var.QuinetteAccuracyScore = (var.Hits - (var.FalseAlarms + var.Omissions)) / var.ResponsesGiven
	else:
	    var.QuinetteAccuracyScore = 0
	##Calculates the Processing Score used by Quinette et al. 2006
	var.QuinetteProcessingScore = (var.Hits - var.NNonResponses)/var.counter
	
	##Calculates the number of trials in which the participant got a ##correct answer in the trials with 8s interval between probe and ##target.
	var.eightsec_accuracy = var.mismatch_8s_accuracy + var.match_8s_accuracy
	
	##Calculates the number of trials in which the participant got a ##correct answer in the trials with 1s interval between probe and ##target.
	var.onesec_accuracy = var.mismatch_1s_accuracy + var.match_1s_accuracy
	
	##Calculates the RTs of the participants in each condition (match_8s, mismatch_8s, match_1s e mismatch_1s)
	if var.counter_mismatch_8s_rt != 0:
	    var.mismatch_8s_avg_rt = var.total_mismatch_8s_rt/ var.counter_mismatch_8s_rt
	else:
	    var.mismatch_8s_avg_rt = 0
	
	if var.counter_match_8s_rt != 0:
	    var.match_8s_avg_rt = var.total_match_8s_rt/ var.counter_match_8s_rt
	else:
	    var.match_8s_avg_rt = 0
	
	if var.counter_mismatch_1s_rt != 0:
	    var.mismatch_1s_avg_rt = var.total_mismatch_1s_rt/ var.counter_mismatch_1s_rt
	else:
	    var.mismatch_1s_avg_rt = 0
	
	if var.counter_match_1s_rt != 0:
	    var.match_1s_avg_rt = var.total_match_1s_rt/ var.counter_match_1s_rt
	else: 
	    var.match_1s_avg_rt = 0
	__end__
	set _prepare ""

define inline_script BT_Script_Score_Biding_Task
	set description "Executes Python code"
	___run__
	##Calculates the Raw Score and the variable Hits (used to ##calculate the accuracy score of Quinette).
	if var.correct == 1:
	    var.BindingRawScore = var.BindingRawScore + 1
	    var.Hits = var.Hits + 1
	
	##Calculates the variables Omissions, FalseAlarms and ##ResponsesGiven (used to calculate the accuracy score of ##Quinette).
	if var.response == 'None' and var.correct_response == 1:
	    var.Omissions = var.Omissions + 1
	
	if var.correct_response == 2 and var.response == 1:
	    var.FalseAlarms = var.FalseAlarms + 1
	
	if var.response != 'None':
	    var.ResponsesGiven = var.ResponsesGiven + 1
	
	##Calculates the variables counter and NNonResponses (used to calculate the processing score of Quinette)
	if var.response == 'None':
	    var.NNonResponses = var.NNonResponses + 1
	
	var.counter = var.counter + 1
	
	
	##calculates the raw scores for every condition (match_8s, mismatch_8s, match_1s e mismatch_1s).
	if var.Delay == 7995 and var.correct_response == 2 and var.correct == 1:
	    var.mismatch_8s_accuracy = var.mismatch_8s_accuracy + 1
	
	if var.Delay == 7995 and var.correct_response == 1 and var.correct == 1:
	    var.match_8s_accuracy = var.match_8s_accuracy + 1
	    
	if var.Delay == 995 and var.correct_response == 2 and var.correct == 1:
	    var.mismatch_1s_accuracy = var.mismatch_1s_accuracy + 1
	
	if var.Delay == 995 and var.correct_response == 1 and var.correct == 1:
	    var.match_1s_accuracy = var.match_1s_accuracy + 1
	    
	##Estimates of the necessary parameters to calculate the RT for every condition (match_8s, mismatch_8s, match_1s e mismatch_1s).
	if var.Delay == 7995 and var.correct_response == 2:
	    var.total_mismatch_8s_rt = var.total_mismatch_8s_rt + var.response_time
	    var.counter_mismatch_8s_rt = var.counter_mismatch_8s_rt + 1 
	
	if var.Delay == 7995 and var.correct_response == 1:
	    var.total_match_8s_rt = var.total_match_8s_rt + var.response_time
	    var.counter_match_8s_rt = var.counter_match_8s_rt + 1
	    
	if var.Delay == 995 and var.correct_response == 2:
	    var.total_mismatch_1s_rt = var.total_mismatch_1s_rt + var.response_time
	    var.counter_mismatch_1s_rt = var.counter_mismatch_1s_rt + 1
	
	if var.Delay == 995 and var.correct_response == 1:
	    var.total_match_1s_rt = var.total_match_1s_rt + var.response_time
	    var.counter_match_1s_rt = var.counter_match_1s_rt + 1
	__end__
	set _prepare ""

define sketchpad BT_Target_1
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineTwoPosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineTwoPosX]" x2="[BTLineThreePosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineThreePosX]" x2="[BTLineFourPosX]" y1="[BTLineOnePosY]" y2="[BTLineOnePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineFourPosX]" y1="[BTLineOnePosY]" y2="[BTLineFourPosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineFourPosX]" y1="[BTLineFourPosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineFourPosX]" x2="[BTLineTwoPosX]" y1="[BTLineThreePosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineTwoPosX]" x2="[BTLineOnePosX]" y1="[BTLineThreePosY]" y2="[BTLineThreePosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineOnePosX]" y1="[BTLineThreePosY]" y2="[BTLineTwoPosY]" z_index=0
	draw line color=white penwidth=5 show_if=always x1="[BTLineOnePosX]" x2="[BTLineOnePosX]" y1="[BTLineOnePosY]" y2="[BTLineTwoPosY]" z_index=0
	draw image center=1 file="[Target]" scale="[BTScale]" show_if=always x=0 y=0 z_index=0

define loop BT_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 4
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 Probe "PracticeEightSecProbe1.png"
	setcycle 0 Target "PracticeEightSecTarget1.png"
	setcycle 0 Delay 7995
	setcycle 0 correct_response 1
	setcycle 1 Probe "PracticeOneSecNProbe1.png"
	setcycle 1 Target "PracticeOneSecNTarget1.png"
	setcycle 1 Delay 995
	setcycle 1 correct_response 2
	setcycle 2 Probe "PracticeEightSecNProbe1.png"
	setcycle 2 Target "PracticeEightSecNTarget1.png"
	setcycle 2 Delay 7995
	setcycle 2 correct_response 2
	setcycle 3 Probe "PracticeOneSecProbe1.png"
	setcycle 3 Target "PracticeOneSecTarget1.png"
	setcycle 3 Delay 995
	setcycle 3 correct_response 1
	run BT_trial_sequence

define sequence BT_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run BT_reset_feedback always
	run BT_block_loop always
	run BT_ScriptCalculateQuinetteScore always
	run BT_practice_feedback_1 "[BindingRawScore] != 1"
	run BT_practice_feedback_2 "[BindingRawScore] = 1"
	run logger always

define loop BT_experimental_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 Probe "EightSecNProbe1.png"
	setcycle 0 Target "EightSecNTarget1.png"
	setcycle 0 Delay 7995
	setcycle 0 correct_response 2
	setcycle 1 Probe "EightSecNProbe2.png"
	setcycle 1 Target "EightSecNTarget2.png"
	setcycle 1 Delay 7995
	setcycle 1 correct_response 2
	setcycle 2 Probe "EightSecNProbe3.png"
	setcycle 2 Target "EightSecNTarget3.png"
	setcycle 2 Delay 7995
	setcycle 2 correct_response 2
	setcycle 3 Probe "EightSecNProbe4.png"
	setcycle 3 Target "EightSecNTarget4.png"
	setcycle 3 Delay 7995
	setcycle 3 correct_response 2
	setcycle 4 Probe "EightSecProbe1.png"
	setcycle 4 Target "EightSecTarget1.png"
	setcycle 4 Delay 7995
	setcycle 4 correct_response 1
	setcycle 5 Probe "EightSecProbe2.png"
	setcycle 5 Target "EightSecTarget2.png"
	setcycle 5 Delay 7995
	setcycle 5 correct_response 1
	setcycle 6 Probe "EightSecProbe3.png"
	setcycle 6 Target "EightSecTarget3.png"
	setcycle 6 Delay 7995
	setcycle 6 correct_response 1
	setcycle 7 Probe "EightSecProbe4.png"
	setcycle 7 Target "EightSecTarget4.png"
	setcycle 7 Delay 7995
	setcycle 7 correct_response 1
	setcycle 8 Probe "OneSecNProbe1.png"
	setcycle 8 Target "OneSecNTarget1.png"
	setcycle 8 Delay 995
	setcycle 8 correct_response 2
	setcycle 9 Probe "OneSecNProbe2.png"
	setcycle 9 Target "OneSecNTarget2.png"
	setcycle 9 Delay 995
	setcycle 9 correct_response 2
	setcycle 10 Probe "OneSecNProbe3.png"
	setcycle 10 Target "OneSecNTarget3.png"
	setcycle 10 Delay 995
	setcycle 10 correct_response 2
	setcycle 11 Probe "OneSecNProbe4.png"
	setcycle 11 Target "OneSecNTarget4.png"
	setcycle 11 Delay 995
	setcycle 11 correct_response 2
	setcycle 12 Probe "OneSecProbe1.png"
	setcycle 12 Target "OneSecTarget1.png"
	setcycle 12 Delay 995
	setcycle 12 correct_response 1
	setcycle 13 Probe "OneSecProbe2.png"
	setcycle 13 Target "OneSecTarget2.png"
	setcycle 13 Delay 995
	setcycle 13 correct_response 1
	setcycle 14 Probe "OneSecProbe3.png"
	setcycle 14 Target "OneSecTarget3.png"
	setcycle 14 Delay 995
	setcycle 14 correct_response 1
	setcycle 15 Probe "OneSecProbe4.png"
	setcycle 15 Target "OneSecTarget4.png"
	setcycle 15 Delay 995
	setcycle 15 correct_response 1
	run BT_trial_sequence

define sequence BT_experimental_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run BT_reset_feedback2 always
	run BT_experimental_block_loop always
	run BT_ScriptCalculateQuinetteScore always
	run BT_experimental_feedback_1 "[BindingRawScore] != 1"
	run BT_experimental_feedback_2 "[BindingRawScore] = 1"
	run logger always

define feedback BT_experimental_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />Your answer was correct in [BindingRawScore] trials.<br /><br />Press any key to finish the task.<br />" x=0 y=0 z_index=0

define feedback BT_experimental_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />Your answer was correct in [BindingRawScore] trial.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define loop BT_experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run BT_experimental_block_sequence

define sketchpad BT_instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />Four colored UPPER CASE letters (e.g., letter ‘L’ colored in blue) will be displayed in the center of a grid. Additionally, four crosses with matching colors will be presented in different cells. This grid will be displayed for 5 seconds.<br /><br />During those 5 seconds you will have to mentally bind the 4 colored letters with the location of the crosses with matching colors.<br /><br />When the grid with colored letters and crosses disappears a fixation dot will appear on the screen. The fixation dot will be displayed for 1 second in half of the trials and for 8 seconds in the other half. You must maintain the bindings between the colored letters and the location of the corresponding crosses for as long as the fixation dot is presented.<br /><br />At last, a grid with a single LOWER CASE white letter (e.g., letter ‘l’) will be displayed. This letter will be the same as one of the four letters that were presented in the grid with colored letters and crosses. You will have 4 seconds to determine if the white letter is in the same location as the cross that had the same color of the corresponding letter (e.g., blue) in the first grid. <br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad BT_instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="If you think that the LOWER CASE white letter (presented in the second grid of the trial) is displayed in the same location as the cross that had a matching color in the first grid, you should press the key ‘1’. Otherwise, you should press the key '2'. <br /><br />In the next slide, we present two schemes with examples of trials in which you should press the key '1' and the key '2'.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad BT_instructions3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Esquema.png" scale="[BindingImgSize]" show_if=always x=0 y="[BindingImgPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Press any key to continue." x=0 y=256 z_index=0

define sketchpad BT_instructions4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="First, you will complete four practice trials to get aquatinted with the task.<br /><br />Press any key to start the practice trials." x=0 y=0 z_index=0

define keyboard_response BT_keyboard_response
	set timeout 4000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define feedback BT_practice_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />Your answer was correct in [BindingRawScore] trials.<br /><br />You will know begin the experimental trials.<br /><br />Press any key to start the next block.<br />" x=0 y=0 z_index=0

define feedback BT_practice_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />Your answer was correct in [BindingRawScore] trial.<br /><br />You will know begin the experimental trials.<br /><br />Press any key to start the next block.<br />" x=0 y=0 z_index=0

define loop BT_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run BT_block_sequence

define reset_feedback BT_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback BT_reset_feedback2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence BT_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run BS_Update_TriaNumber always
	run BT_Fixation_Cross1 always
	run BT_Probe_1 always
	run BT_Fixation_Cross2 always
	run BT_Target_1 always
	run BT_keyboard_response always
	run BT_Script_Score_Biding_Task always
	run logger always

define inline_script DadosSociodemograficos1
	set description "Executes Python code"
	___run__
	##Python form with the first questions of the socio-demographic ##questionnaire:
	##1 - Age;
	##2 - Gender;
	##3 - Nationality;
	##4 - Is the participant enrolled in the university (Yes/No);
	##5 - Academic qualifications of participants enrolled in ##universities (only applicable to participants that answered 'Yes' ##to question 4).
	
	def FormSocioDemograficos_validator():
	
	    return var.age != u'' and var.nationality != u''and var.gender != u'no' and var.AttendUniv != u'no'
	
	TituloForm = Label(text=u'<b>Please, answer the following questions:</b>', center=True)
	QuestaoIdade = Label(text=u'1 - Age:',center=False)
	TextInputIdade = TextInput(stub=u'...', var=u'age',return_accepts=True)
	QuestaoGenero = Label(text=u'2 - Gender:',center=False)
	Checkbox_Masculino = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	Checkbox_Feminino = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	Checkbox_Outro = Checkbox(text=u'Other', group=u'gender', var=u'gender')
	QuestaoNacionalidade = Label(text=u'3 - Nationality:',center=False)
	TextInputNacionalidade = TextInput(stub=u'...', var=u'nationality',return_accepts=False)
	QuestaoEnsinoSuperior = Label(text=u'4 - Are you currently enrolled in a university?',center=False)
	Checkbox_EnsinoSuperiorSim = Checkbox(text=u'Yes', 
	group=u'AttendUniv', var=u'AttendUniv')
	Checkbox_EnsinoSuperiorNao = Checkbox(text=u'No', group=u'AttendUniv', var=u'AttendUniv')
	QuestaoHabEstudante = Label(text=u'5 - If you answered "Yes" in the last question, please let us know the degree you are pursuing:',center=False)
	Checkbox_HabEstudanteLic = Checkbox(text=u'Bachelor\'s', group=u'HabStudent', var=u'HabStudent')
	Checkbox_HabEstudanteMes = Checkbox(text=u'Master\'s', group=u'HabStudent', var=u'HabStudent')
	Checkbox_HabEstudantePhD = Checkbox(text=u'PhD', group=u'HabStudent', var=u'HabStudent')
	Checkbox_HabEstudanteOutro = Checkbox(text=u'Other Cycle', group=u'HabStudent', var=u'HabStudent')
	button_ok = Button(text=u'Press this button when\nyou answered all questions')
	
	FormSocioDemograficos = Form(validator=FormSocioDemograficos_validator,rows=[1,0.5,1,1,1,1,1,1], cols=[1,1,1,1,1,1,1,1],margins=(0,0,0,0),spacing=0)
	FormSocioDemograficos.set_widget(TituloForm, (0,0), colspan=8)
	FormSocioDemograficos.set_widget(QuestaoIdade, (0,1),colspan=2)
	FormSocioDemograficos.set_widget(TextInputIdade, (2,1))
	FormSocioDemograficos.set_widget(QuestaoGenero, (0,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_Masculino, (2,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_Feminino, (4,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_Outro, (6,2),colspan=2)
	FormSocioDemograficos.set_widget(QuestaoNacionalidade, (0,3),colspan=3)
	FormSocioDemograficos.set_widget(TextInputNacionalidade, (3,3),colspan=3)
	FormSocioDemograficos.set_widget(QuestaoEnsinoSuperior, (0,4),colspan=4)
	FormSocioDemograficos.set_widget(Checkbox_EnsinoSuperiorSim, (4,4),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_EnsinoSuperiorNao, (6,4),colspan=2)
	FormSocioDemograficos.set_widget(QuestaoHabEstudante, (0,5),colspan=8)
	FormSocioDemograficos.set_widget(Checkbox_HabEstudanteLic, (0,6),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_HabEstudanteMes, (3,6),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_HabEstudantePhD, (5,6),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_HabEstudanteOutro, (0,7),colspan=4)
	FormSocioDemograficos.set_widget(button_ok, (4, 7),colspan=4)
	
	FormSocioDemograficos._exec()
	__end__
	set _prepare ""

define inline_script DadosSociodemograficos2
	set description "Executes Python code"
	___run__
	##Python form with the first questions of the socio-demographic ##questionnaire:
	##6 - Academic qualifications of participants not enrolled in ##universities (only applicable to participants that answered 'No' ##to question 4).
	##7 - Previous diagonses of psychological or sleep condition, or a ##cognitive deficit (Yes/No)
	##8 - List of Previous diagonses of psychological or sleep condition, ##or a cognitive deficit (Yes/No)
	
	def FormSocioDemograficos_validator():
	
	    return var.PreviousDiseases != u'no'
	
	TituloForm = Label(text=u'<b>Please, answer the following questions:</b>', center=True)
	QuestaoHabNaoEstudante = Label(text=u'6 - If you have "No" in the last question, please let us know the degree you are pursuing:',center=False)
	Checkbox_HabNaoEstudanteObg = Checkbox(text=u'High School', group=u'HabNonStudent', var=u'HabNonStudent')
	Checkbox_HabNaoEstudanteLic = Checkbox(text=u'Bachelor\'s', group=u'HabNonStudent', var=u'HabNonStudent')
	Checkbox_HabNaoEstudanteMes = Checkbox(text=u'Master\'s', group=u'HabNonStudent', var=u'HabNonStudent')
	Checkbox_HabNaoEstudantePhD = Checkbox(text=u'PhD', group=u'HabNonStudent', var=u'HabNonStudent')
	Checkbox_HabNaoEstudanteOutro = Checkbox(text=u'No option applies', group=u'HabNonStudent', var=u'HabNonStudent')
	QuestaoDoencasAnteriores = Label(text=u'8 - Have you ever been diagnosed with a psychological or sleep condition, or a cognitive deficit?',center=False)
	Checkbox_DoencasAnterioresSim = Checkbox(text=u'Yes', 
	group=u'PreviousDiseases', var=u'PreviousDiseases')
	Checkbox_DoencasAnterioresNao = Checkbox(text=u'No', group=u'PreviousDiseases', var=u'PreviousDiseases')
	QuestaoListaDoencasAnteriores = Label(text=u'9 - If you answered "Yes" in the last question, please state your previous diagnoses:',center=False)
	TextInputListaDoencasAnteriores = TextInput(stub=u'...', var=u'PreviousDiseasesList',return_accepts=False)
	button_ok = Button(text=u'Press this button when\nyou have answered all questions')
	
	FormSocioDemograficos = Form(validator=FormSocioDemograficos_validator,rows=[1,1,1,1,1,1,1,1,1], cols=[1,1,1,1,1,1,1,1],margins=(0,0,0,0),spacing=0)
	FormSocioDemograficos.set_widget(TituloForm, (0,0), colspan=8)
	FormSocioDemograficos.set_widget(QuestaoHabNaoEstudante, (0,1),colspan=8)
	FormSocioDemograficos.set_widget(Checkbox_HabNaoEstudanteObg, (0,2),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_HabNaoEstudanteLic, (3,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_HabNaoEstudanteMes, (5,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_HabNaoEstudantePhD, (0,3),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_HabNaoEstudanteOutro, (3,3),colspan=5)
	FormSocioDemograficos.set_widget(QuestaoDoencasAnteriores, (0,4),colspan=8)
	FormSocioDemograficos.set_widget(Checkbox_DoencasAnterioresSim, (0,5),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_DoencasAnterioresNao, (3,5),colspan=3)
	FormSocioDemograficos.set_widget(QuestaoListaDoencasAnteriores, (0,6),colspan=8)
	FormSocioDemograficos.set_widget(TextInputListaDoencasAnteriores, (0,7),colspan=8)
	FormSocioDemograficos.set_widget(button_ok, (4, 8),colspan=4)
	FormSocioDemograficos._exec()
	__end__
	set _prepare ""

define inline_script FontandImgSizes
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the variable that ensures that the task have the same ratio ##aspect in screens with different sizes (reference width: 1024).
	var.size_reference = var.width/1024
	
	#Sets font sizes.
	var.FontSize20OpenSes = 20*var.size_reference
	var.FontSize25OpenSes = 25*var.size_reference
	var.FontSize28OpenSes = 28*var.size_reference
	var.FontSize30OpenSes = 30*var.size_reference
	var.FontSize35OpenSes = 35*var.size_reference
	var.FontSize45OpenSes = 45*var.size_reference
	var.FontSize60OpenSes = 60*var.size_reference
	var.FontSize25Python = 25*var.size_reference
	var.FontSize30Python = 30*var.size_reference
	var.FontSize45Python = 45*var.size_reference
	var.FontSize55Python = 55*var.size_reference
	var.FontSize80Python = 80*var.size_reference
	
	##Sets the position of the statment "the next sequence will start ##in" in the preparation canvas of the multimodal span.
	var.PrepareScreenPosX1 = -25*var.size_reference
	var.PrepareScreenPosX2 = 25*var.size_reference
	var.PrepareScreenPosY = 25*var.size_reference
	
	##Sets the penwidth of the rectangle that pops up every time the ##participant selects a cell of the grid in the multimodal span.
	var.MSPenwidth = 10*var.size_reference
	
	##Sets the position and size of the schemes displayed in the instructions of the n-back task.
	var.NBackImgSize = 1*var.size_reference
	var.NbackImgPos1 = -192*var.size_reference
	var.NbackImgPos2 = 128*var.size_reference
	
	##Sets the position and size of the schemes displayed in the instructions of the binding task.
	var.BindingImgSize = 0.48*var.size_reference
	var.BindingImgPosY = -32*var.size_reference
	var.BTLineOnePosX = 384*var.size_reference
	var.BTLineTwoPosX = 64*var.size_reference
	var.BTLineThreePosX = -320*var.size_reference
	var.BTLineFourPosX = -384*var.size_reference
	var.BTLineOnePosY = -288*var.size_reference
	var.BTLineTwoPosY = 256*var.size_reference
	var.BTLineThreePosY = 288*var.size_reference
	var.BTLineFourPosY = -256*var.size_reference
	var.BTScale = 0.95*var.size_reference
	
	##Sets the positions of the text boxes that provide feedback int the ##Updating Task.
	var.NSLineOnePosy = -76.8*var.size_reference
	var.NSLineTwoPosX = -329.6*var.size_reference
	var.NSLineTwoPosY = 84*var.size_reference
	var.NSLineThreePosX = -164.8*var.size_reference
	var.NSLineFourPosX = 164.8*var.size_reference
	var.NSLineFivePosX = 329.6*var.size_reference
	var.NSLineSixPosX = 252.2*var.size_reference
	var.NSLineSevenPosX = 412*var.size_reference
	var.NSLineThreePosY = 168*var.size_reference
	var.NSLineFourPosY = 291.33*var.size_reference
	var.NSLineEightPosX = -343.33*var.size_reference
	var.NSLineNinePosX = -206.01*var.size_reference
	var.NSLineTenPosX = -66.678*var.size_reference
	var.NSLineElevenPosX = 66.678*var.size_reference
	var.NSLineTwelvePosX = 206.01*var.size_reference
	var.NSLineThirteenPosX = 343.33*var.size_reference
	var.NSLineFourteenPosX = 274.667*var.size_reference
	var.NSLineFifteenPosX = 412*var.size_reference
	var.NSLineSixteenPosX = -353.143*var.size_reference
	var.NSLineSeventeenPosX = -235.429*var.size_reference
	var.NSLineEightteenPosX = -117.714*var.size_reference
	var.NSLineNineteenPosX = 117.714*var.size_reference
	var.NSLineTwentyPosX = 235.429*var.size_reference
	var.NSLineTwentyOnePosX = 353.143*var.size_reference
	var.NSLineTwentyTwoPosX = 294.286*var.size_reference
	var.NSLineTwentyThreePosX = -360.5*var.size_reference
	var.NSLineTwentyFourPosX = -257.5*var.size_reference
	var.NSLineTwentyFivePosX = -154.5*var.size_reference
	var.NSLineTwentySixPosX = -51.5*var.size_reference
	var.NSLineTwentySevenPosX = 51.5*var.size_reference
	var.NSLineTwentyEightPosX = 154.5*var.size_reference
	var.NSLineTwentyNinePosX = 257.5*var.size_reference
	var.NSLineThirtyPosX = 360.5*var.size_reference
	var.NSLineThirtyOnePosX = 211*var.size_reference
	var.NSLineThirtyTwoPosX = 304*var.size_reference
	var.NSLineThirtyThreePosX = 314*var.size_reference
	var.NSLineThirtyFourPosX = 407*var.size_reference
	var.NSLineThirtyFivePosX = -366.222*var.size_reference
	var.NSLineThirtySixPosX = -274.667*var.size_reference
	var.NSLineThirtySevenPosX = -183.111*var.size_reference
	var.NSLineThirtyEightPosX = -91.556*var.size_reference
	var.NSLineThirtyNinePosX = 91.556*var.size_reference
	var.NSLineFortyPosX = 183.111*var.size_reference
	var.NSLineFortyOnePosX = 274.667*var.size_reference
	var.NSLineFortyTwoPosX = 366.222*var.size_reference
	var.NSLineFortyThreePosX = 238.889*var.size_reference
	var.NSLineFortyFourPosX = 315.444*var.size_reference
	var.NSLineFortyFivePosX = 325.444*var.size_reference
	var.NSLineFortySixPosX = 407*var.size_reference
	var.NSLineFortySevenPosX = -370.8*var.size_reference
	var.NSLineFortyEightPosX = -288.4*var.size_reference
	var.NSLineFortyNinePosX = -206*var.size_reference
	var.NSLineFifthyPosX = -123.6*var.size_reference
	var.NSLineFifthyOnePosX = -41.2*var.size_reference
	var.NSLineFifthyTwoPosX = 41.2*var.size_reference
	var.NSLineFifthyThreePosX = 123.6*var.size_reference
	var.NSLineFifthyFourPosX = 206*var.size_reference
	var.NSLineFifthyFivePosX = 288.4*var.size_reference
	var.NSLineFifthySixPosX = 370.8*var.size_reference
	var.NSLineFifthySevenPosX = 252.2*var.size_reference
	var.NSLineFifthyEightPosX = 324.6*var.size_reference
	var.NSLineFifthyNinePosX = 334.6*var.size_reference
	var.NSLineSixtyPosX = 407*var.size_reference
	var.NSLineSixtyOnePosX = -374.545*var.size_reference
	var.NSLineSixtyTwoPosX = -299.636*var.size_reference
	var.NSLineSixtyThreePosX = -224.727*var.size_reference
	var.NSLineSixtyFourPosX = -149.818*var.size_reference
	var.NSLineSixtyFivePosX = -74.909*var.size_reference
	var.NSLineSixtySixPosX = 74.909*var.size_reference
	var.NSLineSixtySevenPosX = 149.818*var.size_reference
	var.NSLineSixtyEightPosX = 224.727*var.size_reference
	var.NSLineSixtyNinePosX = 299.636*var.size_reference
	var.NSLineSeventyPosX = 374.545*var.size_reference
	var.NSLineSeventyOnePosX = 267.182*var.size_reference
	var.NSLineSeventyTwoPosX = 332.091*var.size_reference
	var.NSLineSeventyThreePosX = 342.091*var.size_reference
	var.NSLineSeventyFourPosX = 407*var.size_reference
	var.NSMargin1 = 50*var.size_reference
	var.NSMargin2 = 100*var.size_reference
	var.NSSpacing1 = 10*var.size_reference
	
	##Sets the positions of the text boxes that provide feedback int the ##Updating Task.
	var.LSLineOnePosY = -76.8*var.size_reference
	var.LSLineTwoPosY = 84*var.size_reference
	var.LSLineThreePosY = 28*var.size_reference
	var.LSLineFourPosY = 139*var.size_reference
	var.LSLineFivePosY = 291.33*var.size_reference
	var.LSLineOnePosX = -155*var.size_reference
	var.LSLineTwoPosX = 103*var.size_reference
	var.LSLineThreePosX = 28*var.size_reference
	var.LSLineFourPosX = 178*var.size_reference
	var.LSMargin1 = 50*var.size_reference
	var.LSMargin2 = 100*var.size_reference
	var.LSSpacing1 = 27*var.size_reference
	
	#Sets the positions of the text boxes of the Updating Task.
	var.MULineOnePosX = -79.9*var.size_reference
	var.MULineTwoPosX = 79.9*var.size_reference
	var.MULineThreePosX = -412*var.size_reference
	var.MULineFourPosX = -252.2*var.size_reference
	var.MULineOnePosY = -91.8*var.size_reference
	var.MUTextPosY1 = -132*var.size_reference
	var.MUTextPosY2 = 116*var.size_reference
	var.MUTextPosY3 = 268*var.size_reference
	
	##Sets variables that adjust the size of the fixation dots to the ##size of the screen in which they are displayed.
	if var.width <= 512 or var.height <= 384:
	    var.fixDot = 'small-open'
	else:
	    var.fixDot = 'medium-open'
	__end__

define inline_script GenCountIni
	set description "Executes Python code"
	___run__
	import math, statistics
	
	##Sets the variable that will be use do counterbalance the working ##memory tasks (we used a latin square designs to counterbalance the ##tasks (7 possible condtions).
	var.CB_ref = var.subject_nr
	while var.CB_ref > 6:
	    var.CB_ref = var.CB_ref - 6
	frac,whole = math.modf(var.CB_ref/6)
	var.CB_ref = frac
	
	GenCounter = 0
	
	
	##Sets the variable that will be use do counterbalance the processing ##tasks (2 possible condtions).
	var.CB_ref_process = var.subject_nr
	while var.CB_ref_process > 2:
	    var.CB_ref_process = var.CB_ref_process - 2
	frac,whole = math.modf(var.CB_ref_process/2)
	var.CB_ref_process = frac
	
	
	GenCounterProcess = 0
	
	#var.RP_part_process_time = 11785
	#var.OP_part_process_time = 11046
	#var.SP_part_process_time = 10115
	#var.round_RP_part_time = 11.79
	#var.round_OP_part_time = 11.05
	#var.round_SP_part_time = 10.11
	__end__
	set _prepare ""

define inline_script GenCounterBalancing
	set description "Executes Python code"
	___run__
	##Sets the order in which the working memory tasks will be presented ##to each participant.
	##The WM tasks may be presented in 7 different orders to the ##participants. We used a latin square design to counterbalance the ##tasks (7 possible condtions).
	##The order of the task is determined by the participant's ID.
	##Our algorithm subtracts 7 units to the subjects ID until this ##number is <= 7. 
	##The resulting number is divided by 7. The decimal part (e.g., ##5/7= 0.7142857142857143) sets the order of the tasks.
	##Ordem 1: UT,BT,OS,NB,MS,SS.
	##Ordem 2: BT,OS,NB,MS,SS,UT.
	##Ordem 3: OS,NB,MS,SS,UT,BT. 
	##Ordem 4: NB,MS,SS,UT,BT,OS.
	##Ordem 5: MS,SS,UT,BT,OS,NB.
	##Ordem 6: SS,UT,BT,OS,NB,MS.
	
	from datamatrix import DataMatrix
	
	if var.CB_ref == 0.16666666666666666:
	    if GenCounter == 0:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'
	if var.CB_ref == 0.3333333333333333:
	    if GenCounter == 0:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	if var.CB_ref == 0.5:
	    if GenCounter == 0:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	if var.CB_ref == 0.6666666666666666:
	    if GenCounter == 0:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	if var.CB_ref == 0.8333333333333334:
	    if GenCounter == 0:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	if var.CB_ref == 0.0:
	    if GenCounter == 0:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_span_loop'].dm.w = '1'
	        else:
	            items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 1:
	        if var.selUT == "Yes":
	            items['WMU_loop'].dm.w = '1'
	        else:
	            items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'	
	    if GenCounter == 2:
	        items['WMU_loop'].dm.w = '0'
	        if var.selBT == "Yes":
	            items['binding_loop'].dm.w = '1'
	        else :
	            items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 3:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        if var.selOS == "Yes":
	            items['operation_span_loop'].dm.w = '1'
	        else:
	            items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 4:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        if var.selNB == "Yes":
	            items['n_back_loop'].dm.w = '1'
	        else:
	            items['n_back_loop'].dm.w = '0'
	        items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
	    if GenCounter == 5:
	        items['WMU_loop'].dm.w = '0'
	        items['binding_loop'].dm.w = '0'
	        items['operation_span_loop'].dm.w = '0'
	        items['n_back_loop'].dm.w = '0'
	        if var.selMS == "Yes":
	            items['multimodal_loop'].dm.w = '1'
	        else:
	            items['multimodal_loop'].dm.w = '0'
	        items['symetry_span_loop'].dm.w = '0'
			
	GenCounter = GenCounter + 1
	__end__
	set _prepare ""

define feedback GoogbyeMessage
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize45OpenSes]" html=yes show_if=always text="You completed all tasks!<br /><br />Thank you so much for participanting!" x=0 y=0 z_index=0

define sketchpad InitialMessage
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Greetings!<br /><br />Throughout this session you will complete several cognitive tasks. These tasks measure some functional aspects of working memory -  simultaneous storage and processing of information, updating of mental representations, and the capacity to bind multiple features of the stimuli.<br /><br />Some instructions will be provided at the beginning of each task. The instructions will brief you about the goals of each task, and the keys you will have to press to complete each task. Read the instructions carefully. If you have any questions do not hesitate to call the technician that is applying the battery. He/she will answer your questions. <br /><br />First, you will need to fill out a brief sociodemographic questionnaire.<br /> <br />Press any key to continue!" x=0 y=0 z_index=0

define sketchpad InitialMessage_SemQuest
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Greetings!<br /><br />Throughout this session you will complete several cognitive tasks. These tasks measure some functional aspects of working memory -  simultaneous storage and processing of information, updating of mental representations, and the capacity to bind multiple features of the stimuli.<br /><br />Some instructions will be provided at the beginning of each task. The instructions will brief you about the goals of each task, and the keys you will have to press to complete each task. Read the instructions carefully. If you have any questions do not hesitate to call the technician that is applying the battery. He/she will answer your questions. <br /> <br />Press any key to continue!" x=0 y=0 z_index=0

define inline_script MS_Ini_Task_Name
	set description "Executes Python code"
	___run__
	var.Task_Name = "Multimodal Span"
	__end__
	set _prepare ""

define inline_script MS_Update_TriaNumber
	set description "Executes Python code"
	set _run "var.TrialNumber = var.TrialNumber + 1"
	set _prepare ""

define inline_script MS_experimental_Ini_Var_Calc_Multimodal_Span
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initializes the variables that will score the Multimodal Span and the variables that will keep track of the number of errors.
	##When the variable keep_track_errors reaches 2, the task will temrinate.
	var.keep_track_errors = 0
	var.keep_track_seq_lenght = 3
	
	var.MultimodalSpanScore = 0
	__end__

define inline_script MS_experimental_Script_Collect_responses
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	click_counter = 0
	
	##Tracks mouse
	while click_counter < var.sequence_size:
		button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
		click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
		var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
		if click_counter == 1:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[0], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[0])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 2:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[1], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[1])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 3:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[2], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[2])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 4:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[3], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[3])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 5:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[4], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[4])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 6:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[5], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[5])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 7:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[6], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[6])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 8:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[7], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[7])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
			
	# Set mouse-tracking variables for logging
		var.initiation_time_task=initiation_time
		var.timestamps_task=timestamps
		var.xpos_task=xpos
		var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
		selected_stimulus_display = Canvas()
		i2 = (int(button_clicked[1:len(button_clicked)])-1)
		selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=False, penwidth=var.MSPenwidth)
		save_selected_x = var.x_coord[i2]
		save_selected_y = var.y_coord[i2]	
		var.unpressed_buttons.remove(button_clicked)
		for i in var.unpressed_buttons:
			i2 = (int(i[1:len(var.unpressed_buttons)])-1)
			selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
		selected_stimulus_display.show()
		var.unpressed_buttons.insert(i2,button_clicked)
	
		##Creates object that will process and store the key storkes of the participant.
		my_keyboard = Keyboard(keylist=['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])
		start_time = clock.time()
		var.key, end_time = my_keyboard.get_key()
		var.key = var.key.lower()
		var.response_time_keyboard = end_time - start_time
		var.List_keys_pressed.append(var.key)
		my_keyboard.flush()
		
		##Stores RT mouse + RT keyboard.
		var.rt_mouse_plus_key = var.response_time_keyboard + response_time
	
		##displays the letter that the participant chose in the grid.
		selected_stimulus_display['a'] = Text(var.key, x = (save_selected_x + (var.width*0.125)), y = (save_selected_y + (var.height*0.125)), color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
		selected_stimulus_display.show()
		clock.sleep(495)
		
		##Displays an empty grid.
		canv.show()
	#	clock.sleep(500)
	
		my_mouse = Mouse()
		my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_Multimodal = end - start
	
	var.average_response_time_Multimodal = (var.response_time_Multimodal/var.sequence_size)
	__end__
	___prepare__
	from PyMT_response import MT_response
	import time
	
	##variables that will store the buttons that the participant pressed and ##the buttons that the participants did not pressed. 
	var.pressed_buttons = []
	var.clean_pressed_buttons = []
	var.unpressed_buttons = ['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16']
	
	##Creates two list that hold the x and y coordinates of the buttons.
	var.x_coord = []
	var.y_coord = []
	for i in range(0,16):
	    x,y = var.var.xy_coord.pop(0)
	    var.x_coord.append(x)
	    var.y_coord.append(y)
	
	## Draws a grid with 16 cells. The cells will be placed in the same ##poitions as the ones drawed by rhe object canvon inline ##Script_Gen_Stimuli)
	stimulus_display = Canvas()
	stimulus_display['b1'] = Rect(x=(var.x_coord[0]),y=(var.y_coord[0]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b2'] = Rect(x=(var.x_coord[1]),y=(var.y_coord[1]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b3'] = Rect(x=(var.x_coord[2]),y=(var.y_coord[2]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b4'] = Rect(x=(var.x_coord[3]),y=(var.y_coord[3]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b5'] = Rect(x=(var.x_coord[4]),y=(var.y_coord[4]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b6'] = Rect(x=(var.x_coord[5]),y=(var.y_coord[5]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b7'] = Rect(x=(var.x_coord[6]),y=(var.y_coord[6]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b8'] = Rect(x=(var.x_coord[7]),y=(var.y_coord[7]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b9'] = Rect(x=(var.x_coord[8]),y=(var.y_coord[8]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b10'] = Rect(x=(var.x_coord[9]),y=(var.y_coord[9]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b11'] = Rect(x=(var.x_coord[10]),y=(var.y_coord[10]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b12'] = Rect(x=(var.x_coord[11]),y=(var.y_coord[11]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b13'] = Rect(x=(var.x_coord[12]),y=(var.y_coord[12]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b14'] = Rect(x=(var.x_coord[13]),y=(var.y_coord[13]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b15'] = Rect(x=(var.x_coord[14]),y=(var.y_coord[14]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b16'] = Rect(x=(var.x_coord[15]),y=(var.y_coord[15]),w=(var.width*0.25),h=(var.height*0.25))
	                                                
	                                                
	###############################################################################################################################################################
	##Prepare MT_response
	##Perfoms a Do Hit Test to the mouse responses.
	##Chooses which spaces can be chosen as valid responses - the prgogram ##will only process mouse clicks insde the 16 cells of the grid.
	mouse_tracking = MT_response(self.experiment, buttons=['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16'],canvas=stimulus_display)
	__end__

define inline_script MS_experimental_Script_Define_Weights
	set description "Executes Python code"
	___run__
	##Creates a DataMatrix with the information regarding sequence lenghts of the trainning block (first attempt/number of errors of the block = 0).
	from datamatrix import DataMatrix
	
	items['MS_experimental_block_loop'].dm = DataMatrix(length=9)
	
	items['MS_experimental_block_loop'].dm.sequence_size = ['3','4','5','6','7','8','9','10','11']
	
	items['MS_experimental_block_loop'].dm.w = ['1','1','1','1','1','1','1','1','1']
	
	var.TrialNumber = 0
	__end__
	set _prepare ""

define inline_script MS_experimental_Script_Gen_Stimuli
	set description "Executes Python code"
	___run__
	##Generates the sequences.
	for i in range(0,len(canv_letter)):
	    canv.show()
	    clock.sleep(995)
	    canv_letter[i].show()
	    clock.sleep(995)
	    canv_letter[i].clear
	    if i == (len(canv_letter)-1):
	        canv.show()
	        clock.sleep(995)
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that creates the canvas with letters
	def create_canvas_with_letters():
	    var.SeqList = []
	    for i in range(0,var.sequence_size):
	        var.c = Canvas()
	        ####Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	        var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	        ##Draws the textboxes.
	        for x, y in var.xy_coord:
	            var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	
	###########################################################################################Chooses the letter and position that will be displayed in the grid.
	
	        ##Letters that can be displayed in the canvas.
	        alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	
	        ##Chooses the next letter letter that will be displayed.
	        var.letter = random.choice(alphabet_list)
	        ##ensures that the letter has not yet been presented in the sequence.
	        while var.letter in var.List_Multimodal_Letter:
	            var.letter = random.choice(alphabet_list)
	        ##Determines the cell in which the letter will be displayed in the grid.
	        var.letter_pos = random.choice(var.xy_coord)
	        for i in range(0,len(var.xy_coord)):
	            index_xy_coord = var.xy_coord[i]
	            ##Stores the name of the button that the participant must press with the mouse.
	            if index_xy_coord == var.letter_pos:
	                var.correct_button = 'b' + str(i+1)
	        ##ensures that the letter is displyed in a grid that has not yet been used in the sequence.
	        while var.letter_pos in var.List_Multimodal_Pos:
	            var.letter_pos = random.choice(var.xy_coord)
	            for i in range(0,len(var.xy_coord)):
	                index_xy_coord = var.xy_coord[i]
	                if index_xy_coord == var.letter_pos:
	                    var.correct_button = 'b' + str(i+1)            
	        var.letter_pos = [var.letter_pos]
	        x,y = var.letter_pos.pop(0)
	        var.c.text(var.letter, x=(x+var.width*0.125), y=y+var.height*0.125, color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
	    
	        ##Stores information (letter and position) of the stimuli presented in the sequence.
	        var.List_Multimodal_Letter.append(var.letter)
	        var.letter_pos = tuple([x,y])
	        var.List_Multimodal_Pos.append(var.letter_pos)
	        var.List_Multimodal_button.append(var.correct_button)
	
	        var.SeqList.append(var.c)
	    return var.SeqList,var.List_Multimodal_Letter,var.List_Multimodal_Pos, var.List_Multimodal_button
	
	
	##Creates a copy of the variables generated by the function create_canvas_with_letters
	var.create_canvas_with_letters = create_canvas_with_letters()
	canv_letter = var.create_canvas_with_letters[0]
	var.List_Multimodal_Letter = var.create_canvas_with_letters[1]
	var.List_Multimodal_Pos = var.create_canvas_with_letters[2]
	var.List_Multimodal_button = var.create_canvas_with_letters[3] 
	__end__

define inline_script MS_experimental_Script_keep_track_errors
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Reinitializes the number of error of the participant is able to replicate a given sequence lenght (e.g., 4).
	if var.sequence_size != var.keep_track_seq_lenght:
	    var.keep_track_errors = 0
	    
	##Inititalizes the sequence that will state the lenght of the next sequence.
	var.sequence_size_feedback = 0
	
	##Initializes the variables that will store information regarding the button (e.g., 'b1') pressed with the mouse, the letter taht was displayed, the position of the grid in which it was displayed, and the key pressed by the participant.
	var.List_Multimodal_button = []
	var.List_Multimodal_Letter = []
	var.List_Multimodal_Pos = []
	var.List_keys_pressed = []
	__end__

define inline_script MS_experimental_Script_prepare_screen
	set description "Executes Python code"
	___run__
	##Creates the text 'next sequence will begin in' screen.
	var.prep_screen.text('The next sequence will begin in ', center = True,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.text('3',x=var.PrepareScreenPosX1,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	var.prep_screen.text('2',x=0,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	var.prep_screen.text('1',x=var.PrepareScreenPosX2,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	__end__
	___prepare__
	##Creates the canvas that will diplay the 'next sequence will begin in' screen.
	def draw_prepare_creen():
	    prep_screen = Canvas()
	    return prep_screen
	
	var.prep_screen = draw_prepare_creen()
	__end__

define inline_script MS_experimental_Script_score_Multimodal
	set description "Executes Python code"
	___run__
	var.calculate_score = 0
	
	##verifies if the participant has replicated the sequence.
	for i in range(0,(var.sequence_size)):
	    if responses.correct[i] == 1 and var.List_Multimodal_Letter[i] == var.List_keys_pressed[i]:
	#        print("var.List_keys_pressed: ", var.List_keys_pressed[i])                         
	#        print("var.List_Multimodal_Letter: ", var.List_Multimodal_Letter[i])
	#        print("Correto!!")
	        var.calculate_score = var.calculate_score + 1
	#        print("var.calculate_score: ", var.calculate_score)
	#        print("var.List_keys_pressed: ", var.List_keys_pressed[i])                         
	#        print("var.List_Multimodal_Letter: ", var.List_Multimodal_Letter[i])
	#        print("Incorrect!")
	
	########################################################################################Scores the present trial.
	if (var.calculate_score/var.sequence_size) == 1:
		var.correct_response = 1
	    
	else:
		var.correct_response = 0
	
	
	if var.correct_response == 1:
		var.keep_track_errors = 0
	elif var.correct_response == 0:
		var.keep_track_errors = var.keep_track_errors + 1 
	
	var.keep_track_seq_lenght = var.sequence_size
	
	if var.correct_response == 1 and var.sequence_size == 3:
		var.MultimodalSpanScore = 3
	elif var.correct_response == 1 and var.sequence_size != 3:
		var.MultimodalSpanScore = var.var.MultimodalSpanScore + 1
	
	##Provides feedback to the participant
	if var.correct_response == 1:
		var.sequence_size_feedback = var.sequence_size + 1
	else: 
		var.sequence_size_feedback = var.sequence_size
	__end__
	set _prepare ""

define loop MS_experimental_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "=var.keep_track_errors == 2"
	setcycle 0 empty_column ""
	weight w
	run MS_experimental_trial_sequence

define sequence MS_experimental_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run MS_experimental_reset_feedback always
	run MS_experimental_Ini_Var_Calc_Multimodal_Span always
	run MS_experimental_Script_Define_Weights always
	run MS_experimental_block_loop always

define feedback MS_experimental_feedback_end_prac_success_1_tent_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />You completed all experimental trials.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define feedback MS_experimental_feedback_insuccess_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were not able to recall the last sequence!<br /><br />You will have another chance to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define feedback MS_experimental_feedback_success
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />In the next trial you will have to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define sketchpad MS_experimental_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop MS_experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run MS_experimental_block_sequence

define inline_script MS_experimental_repeat_Script_Collect_responses
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	click_counter = 0
	
	##Tracks mouse
	while click_counter < var.sequence_size:
		button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
		click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
		var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
		if click_counter == 1:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[0], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[0])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 2:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[1], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[1])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 3:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[2], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[2])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 4:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[3], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[3])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 5:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[4], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[4])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 6:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[5], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[5])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 7:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[6], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[6])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 8:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[7], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[7])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
			
	# Set mouse-tracking variables for logging
		var.initiation_time_task=initiation_time
		var.timestamps_task=timestamps
		var.xpos_task=xpos
		var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
		selected_stimulus_display = Canvas()
		i2 = (int(button_clicked[1:len(button_clicked)])-1)
		selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=False, penwidth=var.MSPenwidth)
		save_selected_x = var.x_coord[i2]
		save_selected_y = var.y_coord[i2]	
		var.unpressed_buttons.remove(button_clicked)
		for i in var.unpressed_buttons:
			i2 = (int(i[1:len(var.unpressed_buttons)])-1)
			selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
		selected_stimulus_display.show()
		var.unpressed_buttons.insert(i2,button_clicked)
	
		##Creates object that will process and store the key storkes of the participant.
		my_keyboard = Keyboard(keylist=['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])
		start_time = clock.time()
		var.key, end_time = my_keyboard.get_key()
		var.key = var.key.lower()
		var.response_time_keyboard = end_time - start_time
		var.List_keys_pressed.append(var.key)
		my_keyboard.flush()
	
		##Stores RT mouse + RT keyboard.
		var.rt_mouse_plus_key = var.response_time_keyboard + response_time
		
		##displays the letter that the participant chose in the grid.
		selected_stimulus_display['a'] = Text(var.key, x = (save_selected_x + (var.width*0.125)), y = (save_selected_y + (var.height*0.125)), color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
		selected_stimulus_display.show()
		clock.sleep(495)
	
	
		##Displays an empty grid.
		canv.show()
	#	clock.sleep(500)
	
		my_mouse = Mouse()
		my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_Multimodal = end - start
	var.average_response_time_Multimodal = (var.response_time_Multimodal/var.sequence_size)
	__end__
	___prepare__
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	__end__

define inline_script MS_experimental_repeat_Script_Define_Weights
	set description "Executes Python code"
	___run__
	##Creates a DataMatrix with the information regarding sequence lenghts of the trainning block (first attempt/number of errors of the block = 0).
	from datamatrix import DataMatrix
	
	items['MS_experimental_repeat_block_loop'].dm = DataMatrix(length=9)
	
	items['MS_experimental_repeat_block_loop'].dm.sequence_size = ['3','4','5','6','7','8','9','10','11']
	
	if var.keep_track_errors == 1 and var.keep_track_seq_lenght == 3:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['1','0','0','0','0','0','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 4:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','1','0','0','0','0','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 5:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','1','0','0','0','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 6:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','1','0','0','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 7:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','1','0','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 8:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','0','1','0','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 9:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','0','0','1','0','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 10:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','0','0','0','1','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 11:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','0','0','0','0','1']
	else:
	    items['MS_experimental_repeat_block_loop'].dm.w = ['0','0','0','0','0','0','0','0','0']
	__end__
	set _prepare ""

define inline_script MS_experimental_repeat_Script_Gen_Stimuli
	set description "Executes Python code"
	___run__
	##Generates the sequences.
	for i in range(0,len(canv_letter)):
	    canv.show()
	    clock.sleep(995)
	    canv_letter[i].show()
	    clock.sleep(995)
	    canv_letter[i].clear
	    if i == (len(canv_letter)-1):
	        canv.show()
	        clock.sleep(995)
	__end__
	___prepare__
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	__end__

define inline_script MS_experimental_repeat_Script_prepare_screen
	set description "Executes Python code"
	___run__
	##Creates the text 'next sequence will begin in' screen.
	var.prep_screen.text('The next sequence will begin in ', center = True,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.text('3',x=var.PrepareScreenPosX1,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	var.prep_screen.text('2',x=0,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	var.prep_screen.text('1',x=var.PrepareScreenPosX2,y=var.PrepareScreenPosY,color='white', font_size = var.FontSize25Python, font_family = 'arial')
	var.prep_screen.show()
	clock.sleep(995)
	__end__
	___prepare__
	##Creates the canvas that will diplay the 'next sequence will begin in' screen.
	def draw_prepare_creen():
	    prep_screen = Canvas()
	    return prep_screen
	
	var.prep_screen = draw_prepare_creen()
	__end__

define inline_script MS_experimental_repeat_Script_score_Multimodal
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define loop MS_experimental_repeat_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "=var.keep_track_errors == 2"
	setcycle 0 empty_column ""
	weight w
	run MS_experimental_repeat_trial_sequence

define sequence MS_experimental_repeat_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run MS_experimental_repeat_reset_feedback always
	run MS_experimental_repeat_Script_Define_Weights always
	run MS_experimental_repeat_block_loop always

define feedback MS_experimental_repeat_feedback_end_prac_insuccess
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were not able to recall the last sequence!<br /><br />However, the experimental trials are over.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define feedback MS_experimental_repeat_feedback_end_prac_success
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />You completed all experimental trials.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define feedback MS_experimental_repeat_feedback_success
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />In the next trial you will have to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define sketchpad MS_experimental_repeat_fixartion_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop MS_experimental_repeat_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run MS_experimental_repeat_block_sequence

define sketchpad MS_experimental_repeat_request_rep_seq
	set duration 1495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Reconstruct the last sequence that was presented!" x=0 y=0 z_index=0

define reset_feedback MS_experimental_repeat_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence MS_experimental_repeat_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run MS_Update_TriaNumber always
	run MS_experimental_repeat_Script_prepare_screen always
	run Ms_experimental_repeat_Script_keep_track_errors always
	run MS_experimental_repeat_fixartion_dot always
	run MS_experimental_repeat_Script_Gen_Stimuli always
	run MS_experimental_repeat_request_rep_seq always
	run MS_experimental_repeat_Script_Collect_responses always
	run MS_experimental_repeat_Script_score_Multimodal always
	run MS_experimental_repeat_feedback_success "[correct_response] = 1 and [sequence_size] < 11"
	run MS_experimental_repeat_feedback_end_prac_success "[correct_response] = 1 and [sequence_size] = 11"
	run MS_experimental_repeat_feedback_end_prac_insuccess "[correct_response] = 0"
	run logger always

define sketchpad MS_experimental_request_rep_seq
	set duration 1495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Reconstruct the last sequence that was presented!" x=0 y=0 z_index=0

define reset_feedback MS_experimental_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence MS_experimental_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run MS_Update_TriaNumber always
	run MS_experimental_Script_keep_track_errors always
	run MS_experimental_Script_prepare_screen always
	run MS_experimental_fixation_dot always
	run MS_experimental_Script_Gen_Stimuli always
	run MS_experimental_request_rep_seq always
	run MS_experimental_Script_Collect_responses always
	run MS_experimental_Script_score_Multimodal always
	run MS_experimental_feedback_success "[correct_response] = 1 and [sequence_size] < 11"
	run MS_experimental_feedback_end_prac_success_1_tent_1 "[correct_response] = 1 and [sequence_size] = 11"
	run MS_experimental_feedback_insuccess_1 "[correct_response] = 0"
	run logger always
	run MS_experimental_repeat_practice_loop always

define sketchpad MS_general_instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />In this task, the computer will generate continuous sequences of letters placed inside a 4x4 grid. <br /><br />Your goal is to replicate the sequences generated — recall all letters and their respective locations in the same order they were presented. <br /><br />An empty grid will appear after each sequence. You must replicate the last sequence generated by the computer on this grid. To do this, you will need to use the mouse (to select the cells in which the letters were presented) and the keyboard (to type the letters that were displayed in the sequence).<br /><br />The computer will first generate a sequence with 3 elements.<br /><br />Every time you are able to replicate a sequence, the computer will generate a new one that will contain the number of elements of the last sequence that you were able to replicate + 1 — e.g., if you are able to replicate a sequence with 3 elements the computer will produce a sequence with 4 elements.<br /><br />You will have two opportunties to replicate a sequence of a given size.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define loop MS_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run MS_practice_trial_sequence

define sequence MS_practice_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run MS_practice_reset_feedback always
	run MS_practice_ini_var_calc_multimodal_span always
	run MS_practice_script_define_weights_practice always
	run MS_practice_block_loop always

define feedback MS_practice_feedback_end_prac_success_1_tent_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />You completed all practice trials.<br /><br />Next, you will complete the experimental trials.<br /><br />Like in the practice trials, you will have two chances to correctly reconstruct a sequence with a given size (e.g., 3 elements). However, if you are not able to replicate this sequence in two consecutive trials the task will be terminated. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define feedback MS_practice_feedback_insuccess
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were not able to recall the last sequence!<br /><br />You will have another chance to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define feedback MS_practice_feedback_success_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />In the next trial you will have to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define sketchpad MS_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define inline_script MS_practice_ini_var_calc_multimodal_span
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initializes the variables that will score the Multimodal Span and the variables that will keep track of the number of errors.
	##When the variable keep_track_errors reaches 2, the task will temrinate.
	var.keep_track_errors = 0
	var.keep_track_seq_lenght = 3
	
	var.MultimodalSpanScore = 0
	__end__

define sketchpad MS_practice_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Next, you will complete some practice trials to get acquainted with the task.<br /><br />Press any key to start the practice trials." x=0 y=0 z_index=0

define loop MS_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run MS_practice_block_sequence

define sketchpad MS_practice_repeat_PedidoRep_Seq
	set duration 1495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Reconstruct the last sequence that was presented!" x=0 y=0 z_index=0

define inline_script MS_practice_repeat_Script_Collect_responses
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	# Display canvas
	stimulus_display.show()
	
	##Inicilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	click_counter = 0
	
	##Tracks mouse
	while click_counter < var.sequence_size:
		button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
		click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
		var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
		if click_counter == 1:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[0], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[0])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 2:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[1], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[1])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 3:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[2], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[2])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 4:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[3], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[3])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 5:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[4], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[4])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 6:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[5], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[5])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 7:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[6], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[6])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 8:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[7], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[7])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
			
	# Set mouse-tracking variables for logging
		var.initiation_time_task=initiation_time
		var.timestamps_task=timestamps
		var.xpos_task=xpos
		var.ypos_task=ypos
		
	#Highlights the cell that participant selected (the limits of the grid will turn red).
		selected_stimulus_display = Canvas()
		i2 = (int(button_clicked[1:len(button_clicked)])-1)
		selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=False, penwidth=var.MSPenwidth)
		save_selected_x = var.x_coord[i2]
		save_selected_y = var.y_coord[i2]	
		var.unpressed_buttons.remove(button_clicked)
		for i in var.unpressed_buttons:
			i2 = (int(i[1:len(var.unpressed_buttons)])-1)
			selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
		selected_stimulus_display.show()
		var.unpressed_buttons.insert(i2,button_clicked)
	
			##Creates object that will process and store the key storkes of the participant.
		my_keyboard = Keyboard(keylist=['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])
		start_time = clock.time()
		var.key, end_time = my_keyboard.get_key()
		var.key = var.key.lower()
		var.response_time_keyboard = end_time - start_time
		var.List_keys_pressed.append(var.key)
		my_keyboard.flush()
	
		##displays the letter that the participant chose in the grid.
		selected_stimulus_display['a'] = Text(var.key, x = (save_selected_x + (var.width*0.125)), y = (save_selected_y + (var.height*0.125)), color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
		selected_stimulus_display.show()
		clock.sleep(495)
		
		##Displays an empty grid.
		canv.show()
	#	clock.sleep(500)
	
		my_mouse = Mouse()
		my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_Multimodal = end - start
	
	var.average_response_time_Multimodal = (var.response_time_Multimodal/var.sequence_size)
	__end__
	___prepare__
	from PyMT_response import MT_response
	import time
	
	##variables that will store the buttons that the participant pressed and ##the buttons that the participants did not pressed.
	var.pressed_buttons = []
	var.clean_pressed_buttons = []
	var.unpressed_buttons = ['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16']
	
	##Creates two list that hold the x and y coordinates of the buttons.
	var.x_coord = []
	var.y_coord = []
	for i in range(0,16):
	    x,y = var.var.xy_coord.pop(0)
	    var.x_coord.append(x)
	    var.y_coord.append(y)
	
	## Draws a grid with 16 cells. The cells will be placed in the same ##poitions as the ones drawed by rhe object canvon inline ##Script_Gen_Stimuli).
	stimulus_display = Canvas()
	stimulus_display['b1'] = Rect(x=(var.x_coord[0]),y=(var.y_coord[0]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b2'] = Rect(x=(var.x_coord[1]),y=(var.y_coord[1]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b3'] = Rect(x=(var.x_coord[2]),y=(var.y_coord[2]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b4'] = Rect(x=(var.x_coord[3]),y=(var.y_coord[3]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b5'] = Rect(x=(var.x_coord[4]),y=(var.y_coord[4]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b6'] = Rect(x=(var.x_coord[5]),y=(var.y_coord[5]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b7'] = Rect(x=(var.x_coord[6]),y=(var.y_coord[6]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b8'] = Rect(x=(var.x_coord[7]),y=(var.y_coord[7]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b9'] = Rect(x=(var.x_coord[8]),y=(var.y_coord[8]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b10'] = Rect(x=(var.x_coord[9]),y=(var.y_coord[9]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b11'] = Rect(x=(var.x_coord[10]),y=(var.y_coord[10]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b12'] = Rect(x=(var.x_coord[11]),y=(var.y_coord[11]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b13'] = Rect(x=(var.x_coord[12]),y=(var.y_coord[12]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b14'] = Rect(x=(var.x_coord[13]),y=(var.y_coord[13]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b15'] = Rect(x=(var.x_coord[14]),y=(var.y_coord[14]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b16'] = Rect(x=(var.x_coord[15]),y=(var.y_coord[15]),w=(var.width*0.25),h=(var.height*0.25))
	                                                
	                                                
	###############################################################################################################################################################
	##Prepare MT_response
	##Perfoms a Do Hit Test to the mouse responses.
	##Chooses which spaces can be chosen as valid responses - the prgogram ##will only process mouse clicks insde the 16 cells of the grid.
	mouse_tracking = MT_response(self.experiment, buttons=['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16'],canvas=stimulus_display)
	__end__

define inline_script MS_practice_repeat_Script_Gen_Stimuli
	set description "Executes Python code"
	___run__
	##Generates the sequences.
	for i in range(0,len(canv_letter)):
	    canv.show()
	    clock.sleep(995)
	    canv_letter[i].show()
	    clock.sleep(995)
	    canv_letter[i].clear
	    if i == (len(canv_letter)-1):
	        canv.show()
	        clock.sleep(995)
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that creates the canvas with letters
	def create_canvas_with_letters():
	    var.SeqList = []
	    for i in range(0,var.sequence_size):
	        var.c = Canvas()
	        ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	        var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	        ##Draws the textboxes.
	        for x, y in var.xy_coord:
	            var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	
	###########################################################################################Chooses the letter and position that will be displayed in the grid.
	
	        ##Letters that can be displayed in the canvas.
	        alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	
	        ##Chooses the next letter letter that will be displayed.
	        var.letter = random.choice(alphabet_list)
	        ##ensures that the letter has not yet been presented in the sequence.
	        while var.letter in var.List_Multimodal_Letter:
	            var.letter = random.choice(alphabet_list)
	        ##Determines the cell in which the letter will be displayed in the grid.
	        var.letter_pos = random.choice(var.xy_coord)
	        for i in range(0,len(var.xy_coord)):
	            index_xy_coord = var.xy_coord[i]
	            ##Stores the name of the button that the participant must press with the mouse.
	            if index_xy_coord == var.letter_pos:
	                var.correct_button = 'b' + str(i+1)
	        ##ensures that the letter is displyed in a grid that has not yet been used in the sequence.
	        while var.letter_pos in var.List_Multimodal_Pos:
	            var.letter_pos = random.choice(var.xy_coord)
	            for i in range(0,len(var.xy_coord)):
	                index_xy_coord = var.xy_coord[i]
	                if index_xy_coord == var.letter_pos:
	                    var.correct_button = 'b' + str(i+1)            
	        var.letter_pos = [var.letter_pos]
	        x,y = var.letter_pos.pop(0)
	        var.c.text(var.letter, x=(x+var.width*0.125), y=y+var.height*0.125, color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
	    
	        ##Stores information (letter and position) of the stimuli presented in the sequence.
	        var.List_Multimodal_Letter.append(var.letter)
	        var.letter_pos = tuple([x,y])
	        var.List_Multimodal_Pos.append(var.letter_pos)
	        var.List_Multimodal_button.append(var.correct_button)
	
	        var.SeqList.append(var.c)
	    return var.SeqList,var.List_Multimodal_Letter,var.List_Multimodal_Pos, var.List_Multimodal_button
	
	
	##Creates a copy of the variables generated by the function create_canvas_with_letters
	var.create_canvas_with_letters = create_canvas_with_letters()
	canv_letter = var.create_canvas_with_letters[0]
	var.List_Multimodal_Letter = var.create_canvas_with_letters[1]
	var.List_Multimodal_Pos = var.create_canvas_with_letters[2]
	var.List_Multimodal_button = var.create_canvas_with_letters[3] 
	__end__

define inline_script MS_practice_repeat_Script_keep_track_errors
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initializes the variables that will store information regarding the button (e.g., 'b1') pressed with the mouse, the letter taht was displayed, the position of the grid in which it was displayed, and the key pressed by the participant.
	var.List_Multimodal_button = []
	var.List_Multimodal_Letter = []
	var.List_Multimodal_Pos = []
	var.List_keys_pressed = []
	__end__

define inline_script MS_practice_repeat_Script_prepare_screen
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
	##Creates the canvas that will diplay the 'next sequence will begin in' screen.
	def draw_prepare_creen():
	    prep_screen = Canvas()
	    return prep_screen
	
	var.prep_screen = draw_prepare_creen()
	__end__

define inline_script MS_practice_repeat_Script_score_Multimodal
	set description "Executes Python code"
	___run__
	var.calculate_score = 0
	
	##verifies if the participant has replicated the sequence.
	for i in range(0,(var.sequence_size)):
	    if responses.correct[i] == 1 and var.List_Multimodal_Letter[i] == var.List_keys_pressed[i]:
	#        print("var.List_keys_pressed: ", var.List_keys_pressed[i])                         
	#        print("var.List_Multimodal_Letter: ", var.List_Multimodal_Letter[i])
	#        print("Correto!!")
	        var.calculate_score = var.calculate_score + 1
	#        print("var.calculate_score: ", var.calculate_score)
	#        print("var.List_keys_pressed: ", var.List_keys_pressed[i])                         
	#        print("var.List_Multimodal_Letter: ", var.List_Multimodal_Letter[i])
	#        print("Incorrect!")
	
	########################################################################################Scores the present trial.
	if (var.calculate_score/var.sequence_size) == 1:
		var.correct_response = 1
	    
	else:
		var.correct_response = 0
	
	
	if var.correct_response == 1:
		var.keep_track_errors = 0
	elif var.correct_response == 0:
		var.keep_track_errors = var.keep_track_errors + 1 
	
	var.keep_track_seq_lenght = var.sequence_size
	
	if var.correct_response == 1 and var.sequence_size == 3:
		var.MultimodalSpanScore = 3
	elif var.correct_response == 1 and var.sequence_size == 4:
		var.MultimodalSpanScore = 4
	elif var.MultimodalSpanScore == 3 and var.correct_response == 0:
		var.MultimodalSpanScore = 3
	else:
		var.MultimodalSpanScore = 0
	
	##Provides feedback to the participant
	if var.correct_response == 1:
		var.sequence_size_feedback = var.sequence_size + 1
	else: 
		var.sequence_size_feedback = var.sequence_size
	__end__
	set _prepare ""

define feedback MS_practice_repeat_feedback_end_prac_insuccess
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were not able to recall the last sequence!<br /><br />However, the practice trials are over.<br /><br />Next, you will complete the experimental trials.<br /><br />Like in the practice trials, you will have two chances to correctly reconstruct a sequence with a given size (e.g., 3 elements). However, if you are not able to replicate this sequence in two consecutive trials the task will be terminated. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define feedback MS_practice_repeat_feedback_end_prac_success
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />You completed all practice trials.<br /><br />Next, you will complete the experimental trials.<br /><br />Like in the practice trials, you will have two chances to correctly reconstruct a sequence with a given size (e.g., 3 elements). However, if you are not able to replicate this sequence in two consecutive trials the task will be terminated. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define feedback MS_practice_repeat_feedback_insuccess_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were not able to recall the last sequence!<br /><br />In the next trial you will have to replicate a sequence with 4 elements.<br /><br />Press any key to start the next sequence." x=-14 y=-35 z_index=0

define feedback MS_practice_repeat_feedback_success_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You were able to recall the last sequence!<br /><br />In the next trial you will have to replicate a sequence with [sequence_size_feedback] elements.<br /><br />Press any key to start the next sequence." x=0 y=0 z_index=0

define sketchpad MS_practice_repeat_fixartion_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop MS_practice_repeat_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "=var.keep_track_errors == 2"
	setcycle 0 empty_column ""
	weight w
	run MS_practice_repeat_trial_sequence

define loop MS_practice_repeat_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Ms_practice_repeat_block_sequence

define reset_feedback MS_practice_repeat_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script MS_practice_repeat_script_define_weights
	set description "Executes Python code"
	___run__
	##Criação da DataMatrix/Tabela com as informações sobre o tamanho das
	##sequências no bloco de treino (primeira tentativa/nº de erros no bloco = 0.
	from datamatrix import DataMatrix
	
	items['MS_practice_repeat_practice_block_loop'].dm = DataMatrix(length=2)
	
	items['MS_practice_repeat_practice_block_loop'].dm.sequence_size = ['3','4']
	
	if var.keep_track_errors == 1 and var.keep_track_seq_lenght == 3:
	    items['MS_practice_repeat_practice_block_loop'].dm.w = ['1','0']
	elif var.keep_track_errors == 1 and var.keep_track_seq_lenght == 4:
	    items['MS_practice_repeat_practice_block_loop'].dm.w = ['0','1']
	else:
	    items['MS_practice_repeat_practice_block_loop'].dm.w = ['0','0']
	__end__
	set _prepare ""

define sequence MS_practice_repeat_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run MS_Update_TriaNumber always
	run MS_practice_repeat_Script_prepare_screen always
	run MS_practice_repeat_Script_keep_track_errors always
	run MS_practice_repeat_fixartion_dot always
	run MS_practice_repeat_Script_Gen_Stimuli always
	run MS_practice_repeat_PedidoRep_Seq always
	run MS_practice_repeat_Script_Collect_responses always
	run MS_practice_repeat_Script_score_Multimodal always
	run MS_practice_repeat_feedback_success_1 "[correct_response] = 1 and [sequence_size] = 3"
	run MS_practice_repeat_feedback_end_prac_success "[correct_response] = 1 and [sequence_size] = 4"
	run MS_practice_repeat_feedback_end_prac_insuccess "[correct_response] = 0 and [sequence_size] = 4"
	run MS_practice_repeat_feedback_insuccess_1 "[correct_response] = 0 and [sequence_size] = 3"
	run logger always

define sketchpad MS_practice_request_rep_seq
	set duration 1495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Reconstruct the last sequence that was presented!" x=0 y=0 z_index=0

define reset_feedback MS_practice_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script MS_practice_script_collect_responses
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	# Display canvas
	stimulus_display.show()
	
	##Inicilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	click_counter = 0
	
	##Tracks mouse
	while click_counter < var.sequence_size:
		button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
		click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
		var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
		if click_counter == 1:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[0], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[0])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 2:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[1], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[1])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 3:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[2], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[2])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 4:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[3], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[3])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 5:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[4], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[4])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 6:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[5], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[5])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
		if click_counter == 7:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[6], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[6])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)	
		if click_counter == 8:
			responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_Multimodal_button[7], item="Script_Gen_Stimuli")
	#		print("Resposta correta 1o clique: ", var.List_Multimodal_button[7])
	#		print("Respostas 1o clique: ", responses.response)
	#		print("correto/incorreto: ", responses.correct)
			
	#Set mouse-tracking variables for logging
		var.initiation_time_task=initiation_time
		var.timestamps_task=timestamps
		var.xpos_task=xpos
		var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
		selected_stimulus_display = Canvas()
		i2 = (int(button_clicked[1:len(button_clicked)])-1)
		selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=False, penwidth=var.MSPenwidth)
		save_selected_x = var.x_coord[i2]
		save_selected_y = var.y_coord[i2]	
		var.unpressed_buttons.remove(button_clicked)
		for i in var.unpressed_buttons:
			i2 = (int(i[1:len(var.unpressed_buttons)])-1)
			selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
		selected_stimulus_display.show()
		var.unpressed_buttons.insert(i2,button_clicked)
	
		##Creates object that will process and store the key storkes of the participant.
		my_keyboard = Keyboard(keylist=['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])
		start_time = clock.time()
		var.key, end_time = my_keyboard.get_key()
		var.key = var.key.lower()
		var.response_time_keyboard = end_time - start_time
		var.List_keys_pressed.append(var.key)
		my_keyboard.flush()
		
		##Stores RT mouse + RT keyboard.
	#	var.rt_mouse_plus_key = var.response_time_keyboard + response_time
	
		##displays the letter that the participant chose in the grid.
		selected_stimulus_display['a'] = Text(var.key, x = (save_selected_x + (var.width*0.125)), y = (save_selected_y + (var.height*0.125)), color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
		selected_stimulus_display.show()
		clock.sleep(495)
	
	
		##Displays an empty grid.
		canv.show()
	#	clock.sleep(500)
	
		my_mouse = Mouse()
		my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_Multimodal = end - start
	var.average_response_time_Multimodal = (var.response_time_Multimodal/var.sequence_size)
	__end__
	___prepare__
	from PyMT_response import MT_response
	import time
	
	##variables that will store the buttons that the participant pressed and ##the buttons that the participants did not pressed. 
	var.pressed_buttons = []
	var.clean_pressed_buttons = []
	var.unpressed_buttons = ['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16']
	
	##Creates two list that hold the x and y coordinates of the buttons.
	var.x_coord = []
	var.y_coord = []
	for i in range(0,16):
	    x,y = var.var.xy_coord.pop(0)
	    var.x_coord.append(x)
	    var.y_coord.append(y)
	
	## Draws a grid with 16 cells. The cells will be placed in the same ##poitions as the ones drawed by rhe object canvon inline ##Script_Gen_Stimuli).
	stimulus_display = Canvas()
	stimulus_display['b1'] = Rect(x=(var.x_coord[0]),y=(var.y_coord[0]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b2'] = Rect(x=(var.x_coord[1]),y=(var.y_coord[1]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b3'] = Rect(x=(var.x_coord[2]),y=(var.y_coord[2]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b4'] = Rect(x=(var.x_coord[3]),y=(var.y_coord[3]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b5'] = Rect(x=(var.x_coord[4]),y=(var.y_coord[4]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b6'] = Rect(x=(var.x_coord[5]),y=(var.y_coord[5]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b7'] = Rect(x=(var.x_coord[6]),y=(var.y_coord[6]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b8'] = Rect(x=(var.x_coord[7]),y=(var.y_coord[7]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b9'] = Rect(x=(var.x_coord[8]),y=(var.y_coord[8]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b10'] = Rect(x=(var.x_coord[9]),y=(var.y_coord[9]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b11'] = Rect(x=(var.x_coord[10]),y=(var.y_coord[10]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b12'] = Rect(x=(var.x_coord[11]),y=(var.y_coord[11]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b13'] = Rect(x=(var.x_coord[12]),y=(var.y_coord[12]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b14'] = Rect(x=(var.x_coord[13]),y=(var.y_coord[13]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b15'] = Rect(x=(var.x_coord[14]),y=(var.y_coord[14]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b16'] = Rect(x=(var.x_coord[15]),y=(var.y_coord[15]),w=(var.width*0.25),h=(var.height*0.25))
	                                                
	                                                
	###############################################################################################################################################################
	##Prepare MT_response
	##Perfoms a Do Hit Test to the mouse responses.
	##Chooses which spaces can be chosen as valid responses - the prgogram ##will only process mouse clicks insde the 16 cells of the grid.
	mouse_tracking = MT_response(self.experiment, buttons=['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16'],canvas=stimulus_display)
	__end__

define inline_script MS_practice_script_define_weights_practice
	set description "Executes Python code"
	___run__
	##Creates a DataMatrix with the information regarding sequence lenghts of the trainning block (first attempt/number of errors of the block = 0.
	from datamatrix import DataMatrix
	
	items['MS_practice_block_loop'].dm = DataMatrix(length=2)
	
	items['MS_practice_block_loop'].dm.sequence_size = ['3','4']
	
	items['MS_practice_block_loop'].dm.w = ['1','1']
	
	var.TrialNumber = 0
	__end__
	set _prepare ""

define inline_script MS_practice_script_gen_stimuli
	set description "Executes Python code"
	___run__
	##Generates the sequences.
	for i in range(0,len(canv_letter)):
	    canv.show()
	    clock.sleep(995)
	    canv_letter[i].show()
	    clock.sleep(995)
	    canv_letter[i].clear
	    if i == (len(canv_letter)-1):
	        canv.show()
	        clock.sleep(995)
	        
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that creates the canvas with letters
	def create_canvas_with_letters():
	    var.SeqList = []
	    for i in range(0,var.sequence_size):
	        var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	        var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws the textboxes.
	        for x, y in var.xy_coord:
	            var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	
	###########################################################################################Chooses the letter and position that will be displayed in the grid.
	
	        ##Letters that can be displayed in the canvas.
	        alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	
	        ##Chooses the next letter letter that will be displayed.
	        var.letter = random.choice(alphabet_list)
	        ##ensures that the letter has not yet been presented in the sequence. 
	        while var.letter in var.List_Multimodal_Letter:
	            var.letter = random.choice(alphabet_list)
	        ##Determines the cell in which the letter will be displayed in the grid.
	        var.letter_pos = random.choice(var.xy_coord)
	        for i in range(0,len(var.xy_coord)):
	            index_xy_coord = var.xy_coord[i]
	            ##Stores the name of the button that the participant must press with the mouse.
	            if index_xy_coord == var.letter_pos:
	                var.correct_button = 'b' + str(i+1)
	        ##ensures that the letter is displyed in a grid that has not yet been used in the sequence.
	        while var.letter_pos in var.List_Multimodal_Pos:
	            var.letter_pos = random.choice(var.xy_coord)
	            for i in range(0,len(var.xy_coord)):
	                index_xy_coord = var.xy_coord[i]
	                if index_xy_coord == var.letter_pos:
	                    var.correct_button = 'b' + str(i+1)            
	        var.letter_pos = [var.letter_pos]
	        x,y = var.letter_pos.pop(0)
	        var.c.text(var.letter, x=(x+var.width*0.125), y=y+var.height*0.125, color = 'white', font_size = var.FontSize45Python, font_family = 'arial')
	    
	        ##Stores information (letter and position) of the stimuli presented in the sequence.
	        var.List_Multimodal_Letter.append(var.letter)
	        var.letter_pos = tuple([x,y])
	        var.List_Multimodal_Pos.append(var.letter_pos)
	        var.List_Multimodal_button.append(var.correct_button)
	
	        var.SeqList.append(var.c)
	    return var.SeqList,var.List_Multimodal_Letter,var.List_Multimodal_Pos, var.List_Multimodal_button
	
	
	##Creates a copy of the variables generated by the function create_canvas_with_letters
	var.create_canvas_with_letters = create_canvas_with_letters()
	canv_letter = var.create_canvas_with_letters[0]
	var.List_Multimodal_Letter = var.create_canvas_with_letters[1]
	var.List_Multimodal_Pos = var.create_canvas_with_letters[2]
	var.List_Multimodal_button = var.create_canvas_with_letters[3] 
	__end__

define inline_script MS_practice_script_keep_track_errors
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Reinitializes the number of error of the participant is able to replicate a given sequence lenght (e.g., 4).
	if var.sequence_size != var.keep_track_seq_lenght:
	    var.keep_track_errors = 0
	    
	##Inititalizes the sequence that will state the lenght of the next sequence.
	var.sequence_size_feedback = 0
	
	##Initializes the variables that will store information regarding the button (e.g., 'b1') pressed with the mouse, the letter taht was displayed, the position of the grid in which it was displayed, and the key pressed by the participant.
	var.List_Multimodal_button = []
	var.List_Multimodal_Letter = []
	var.List_Multimodal_Pos = []
	var.List_keys_pressed = []
	__end__

define inline_script MS_practice_script_prepare_screen
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
	##Creates the canvas that will diplay the 'next sequence will begin in' screen.
	def draw_prepare_creen():
	    prep_screen = Canvas()
	    return prep_screen
	
	var.prep_screen = draw_prepare_creen()
	__end__

define inline_script MS_practice_script_score_Multimodal
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define sequence MS_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run MS_Update_TriaNumber always
	run MS_practice_script_keep_track_errors always
	run MS_practice_instructions "[live_row] = 0"
	run MS_practice_script_prepare_screen always
	run MS_practice_fixation_dot always
	run MS_practice_script_gen_stimuli always
	run MS_practice_request_rep_seq always
	run MS_practice_script_collect_responses always
	run MS_practice_script_score_Multimodal always
	run MS_practice_feedback_success_1 "[correct_response] = 1 and [sequence_size] = 3"
	run MS_practice_feedback_end_prac_success_1_tent_1 "[correct_response] = 1 and [sequence_size] = 4"
	run MS_practice_feedback_insuccess "[correct_response] = 0"
	run logger always
	run MS_practice_repeat_practice_loop always

define inline_script Ms_experimental_repeat_Script_keep_track_errors
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initializes the variables that will store information regarding the button (e.g., 'b1') pressed with the mouse, the letter taht was displayed, the position of the grid in which it was displayed, and the key pressed by the participant.
	var.List_Multimodal_button = []
	var.List_Multimodal_Letter = []
	var.List_Multimodal_Pos = []
	var.List_keys_pressed = []
	__end__

define sequence Ms_practice_repeat_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run MS_practice_repeat_reset_feedback always
	run MS_practice_repeat_script_define_weights always
	run MS_practice_repeat_practice_block_loop always

define inline_script NB_Experimental_Ini_Var_Calc_N_Back
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.List_Last_N_Verbal = []
	var.List_Last_N_Pos = []
	
	##Sums the correct responses in the non-back trials.
	var.TotalCorrectNonTwoBack = 0
	
	##Sums the incorrect responses in the n-back trials.
	var.TotalMiss = 0
	
	##Sums the incorrect responses in the non-back trials.
	var.TotalFalseAlarms = 0
	
	##Sums the correct responses in the n-back trials (experiments that only ##want to asses the accuracy in n-back conditions).
	var.TotalCorrectTwoBack = 0
	
	##Sums the number of correct responses in the n-back and non-n-back ##trals (experiments that want to asses the accuracy in n-back (target ##condition) and non-back (control conditions) conditions).
	var.NBackScore = 0
	
	##################################################################################
	##Variable that stores the number of trials of the practive block.
	var.Block_lenght = 36
	var.RefCalcN2Back = (var.Block_lenght/3)
	var.RefCalcNonN2Back = ((var.Block_lenght*2)/3)
	
	##counts the number of 2-Back Trials.
	var.CounterN2BackTrials = 0
	
	##counts the number of Non-Back Trials.
	var.CounterNonN2BackTrials = 0
	
	##################################################################
	var.TrialNumber = 0
	var.correct = ''
	__end__

define inline_script NB_Experimental_Script_Canvas_Post_Response_with_Letter
	set description "Executes Python code"
	___run__
	##Highlights the cells of the grid that displays the letter when the participant presses the 'm' key.
	canv_letter.rect(var.letter_pos[0]-(var.width*0.165), var.letter_pos[1]-(var.height*0.165), (var.width*0.33), (var.height*0.33), color='red', fill=False, penwidth=10)
	canv_letter.show()
	clock.sleep(500-(float(var.response_time)-5))
	
	if var.response == 'm':
	    var.nbackrt_index = 1
	__end__
	set _prepare ""

define inline_script NB_Experimental_Script_Canvas_Post_Response_without_Letter
	set description "Executes Python code"
	___run__
	##Pinta um rectangulo vermelho na grelha quando o participante pressiona a tecla 'm' ##(quando a letra já não se encontra presente na grelha).
	canv.rect(var.letter_pos[0]-(var.width*0.165), var.letter_pos[1]-(var.height*0.165), (var.width*0.33), (var.height*0.33), color='red', fill=False, penwidth=10)
	canv.show()
	clock.sleep(1995-float(var.response_time))
	
	##Cálculo do RT (acresenta os 500ms que passaram desde o surgimento da tecla no ecrã).
	if var.nbackrt_index == 0:
	    var.response_time = var.response_time + 500
	__end__
	set _prepare ""

define inline_script NB_Experimental_Script_Empty_Canvas_Post_Stimuli_Presentation
	set description "Executes Python code"
	___run__
	##Displays an empty grid. This inline is only run if the participant has not pressed the 'm' key when the target letter is being displayed.
	canv.show()
	__end__
	set _prepare ""

define inline_script NB_Experimental_Script_Gen_Stimuli
	set description "Executes Python code"
	___run__
	##Exhibits canvas with and without letters.
	if var.live_row == 0:
	    canv.show()
	    clock.sleep(495)
	    canv_letter.show()
	    clock.sleep(495)
	    canv.show()
	    clock.sleep(1995)
	elif var.live_row == 1:
	    canv_letter.show()
	    clock.sleep(495)
	    canv.show()
	    clock.sleep(1995)    
	else:
	    canv_letter.show()
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.33,var.height*-0.33),(0,var.height*-0.33),(var.width*0.33,var.height*-0.33),(var.width*-0.33,0),(0,0),(var.width*0.33,0),(var.width*-0.33,var.height*0.33),(0,var.height*0.33),(var.width*0.33,var.height*0.33)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x-(var.width*0.165), y-(var.height*0.165), (var.width*0.33), (var.height*0.33))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that creates the canvas with letters
	def create_canvas_with_letters():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.33,var.height*-0.33),(0,var.height*-0.33),(var.width*0.33,var.height*-0.33),(var.width*-0.33,0),(0,0),(var.width*0.33,0),(var.width*-0.33,var.height*0.33),(0,var.height*0.33),(var.width*0.33,var.height*0.33)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x-(var.width*0.165), y-(var.height*0.165), (var.width*0.33), (var.height*0.33))
	
	
	###########################################################################################Chooses the letter and position that will be displayed in the grid.
	
	    ##Letters and numbers that can be displayed in the canvas.
	    alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	    ##Chooses the letter and position that will be displayed in the ##grid in the first two trials.
	    if var.live_row < 2:
	        var.letter = random.choice(alphabet_list)
	        var.letter_pos = [random.choice(var.xy_coord)]
	        x,y = var.letter_pos.pop(0)
	        var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    ##From the 2nd trial onwards, the program will use the variable ##SelectCondition to determine if the next trial is a 2-nack or a ##non-back trials. 1/3 of the task will compsed of 2N-Back trials and ##2/3 of the task by non-back condiitons. Thus, the variable ##SelectCondition will conatin the value 1 in 2-back conditions, and ##2 or 3 in non-back conditions.
	    if var.live_row > 1:
	        var.SelectCondition = random.randint(1,3)
	        ##Genrerates the reference that will determine if the the next trial is a 2-back or a non-back trial.
	        if var.SelectCondition == 1:
	            if var.CounterN2BackTrials < var.RefCalcN2Back:
	            ##Genereates a 2-back trials (since the counter of 2-back ##conditions has not got to 12.
	                var.letter = var.List_Last_N_Verbal[0]
	                var.letter_pos = [var.List_Last_N_Pos[0]]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterN2BackTrials = var.CounterN2BackTrials + 1
	            ##Genereates a non-back trials (since the counter of non-back ##conditions has not got to 24.
	            else:
	                var.letter = random.choice(alphabet_list)
	                while var.letter == var.List_Last_N_Verbal[0]:
	                    var.letter = random.choice(alphabet_list)
	                var.letter_pos = [random.choice(var.xy_coord)]
	                while var.letter_pos == [var.List_Last_N_Pos[0]]:
	                    var.letter_pos = [random.choice(var.xy_coord)]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterNonN2BackTrials = var.CounterNonN2BackTrials + 1
	        ##Genereates a non-back trials (since the counter of 2-back ##conditions has got to 12.
	        else:
	            if var.CounterNonN2BackTrials < var.RefCalcNonN2Back:
	                var.letter = random.choice(alphabet_list)
	                while var.letter == var.List_Last_N_Verbal[0]:
	                    var.letter = random.choice(alphabet_list)
	                var.letter_pos = [random.choice(var.xy_coord)]
	                while var.letter_pos == [var.List_Last_N_Pos[0]]:
	                    var.letter_pos = [random.choice(var.xy_coord)]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterNonN2BackTrials = var.CounterNonN2BackTrials + 1
	            ##Genereates a 2-back trials (since the counter of non-back ##conditions has got to 24.
	            else:
	                var.letter = var.List_Last_N_Verbal[0]
	                var.letter_pos = [var.List_Last_N_Pos[0]]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterN2BackTrials = var.CounterN2BackTrials + 1
	 
	
	    ##Saves the charateristics of the stumuli (letters and positions) displayed in the last to trials. This variable is the reference through which 2-back and non-back trials will be generated.
	    var.List_Last_N_Verbal.append(var.letter)
	    var.letter_pos = [x,y]
	    var.letter_pos = tuple(var.letter_pos)
	    var.List_Last_N_Pos.append(var.letter_pos)
	    if var.live_row > 1:
	##Creates a copy of the varables created by the function ##create_canvas_with_letters.
	        var.response_index_letter = var.List_Last_N_Verbal[0]
	        var.response_index_pos = tuple(var.List_Last_N_Pos[0])
	        var.List_Last_N_Verbal.remove(var.List_Last_N_Verbal[0])
	        var.List_Last_N_Pos.remove(var.List_Last_N_Pos[0])
	    else:
	        var.response_index_letter = 'NA'
	        var.response_index_pos = 'NA'
	
	    return var.c,var.response_index_letter, var.response_index_pos,var.letter,var.letter_pos
	
	
	##Creates a copy of the varables created by the function ##create_canvas_with_letters.
	var.create_canvas_with_letters = create_canvas_with_letters()
	canv_letter = var.create_canvas_with_letters[0]
	var.response_index_letter = var.create_canvas_with_letters[1]
	var.response_index_pos = var.create_canvas_with_letters[2]
	var.letter = var.create_canvas_with_letters[3]
	var.letter_pos = var.create_canvas_with_letters[4]
	
	##Reinitializes the variable that stores the RT of the conditions in ##which a False Alarm or a 2-back condition ocurred.
	var.rt_correct_n_back = 0
	var.rt_false_alarms = 0
	__end__

define inline_script NB_Experimental_Script_score_NBack
	set description "Executes Python code"
	___run__
	##Clears the response variable.
	responses.clear()
	
	####################################################################################
	##scores the response of the participants.
	
	##stores the RT of the participant in each trial.
	var.rt = var.avg_rt
	
	##Scores correct n-back trials - patticipants has pressed the 'm' key and the stimulus presented in this trials is the same stiumulus presented 2-trials ago (same letter in the same position of the grid).
	if var.response == 'm' and var.letter == var.response_index_letter and var.letter_pos == var.response_index_pos:
	    var.correct = '1'
	    var.correct_response = 'm'
	    var.TotalCorrectTwoBack = var.TotalCorrectTwoBack + 1
	    var.NBackScore = var.NBackScore + 1
	    var.rt_correct_n_back = var.response_time
	
	####Scores correct non-back trials - participants has not pressed the 'm' key and the stimulus presented in this trials is not the same stiumulus presented 2-trials ago (different letter in a different position of the grid).
	if var.response == 'None' and var.letter != var.response_index_letter or var.response == 'None' and var.letter_pos != var.response_index_pos:
	    var.correct = '1'
	    var.correct_response = 'None'
	    var.TotalCorrectNonTwoBack = var.TotalCorrectNonTwoBack + 1
	    var.NBackScore = var.NBackScore + 1
	
	####Scores incorrect non-back trials - participants has pressed the 'm' key and the stimulus presented in this trials is not the same stiumulus presented 2-trials ago (different letter in a different position of the grid).
	if var.response == 'm' and var.letter != var.response_index_letter or var.response == 'm' and var.letter_pos != var.response_index_pos:
	    var.correct = '0'
	    var.correct_response = 'None'
	    var.TotalFalseAlarms = var.TotalFalseAlarms + 1
	    var.rt_false_alarms = var.response_time
	
	####Scores incorrect n-back trials - participants has not pressed the 'm' key and the stimulus presented in this trials is the same stiumulus presented 2-trials ago (same letter in same position of the grid).
	if var.response == 'None' and var.letter == var.response_index_letter and  var.letter_pos == var.response_index_pos:
	    var.correct = '0'
	    var.correct_response = 'm'
	    var.TotalMiss = var.TotalMiss + 1
	__end__
	set _prepare ""

define loop NB_Experimental_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 38
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run NB_Experimental_trial_sequence

define sequence NB_Experimental_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run NB_Experimental_reset_feedback always
	run NB_Experimental_Ini_Var_Calc_N_Back always
	run NB_Experimental_block_loop always
	run NB_experimental_feedback "[NBackScore] != 1"
	run NB_experimental_feedback_1 "[NBackScore] = 1"

define sketchpad NB_Experimental_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define keyboard_response NB_Experimental_keyboard_response_1
	set timeout 500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses m

define keyboard_response NB_Experimental_keyboard_response_2
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses m

define reset_feedback NB_Experimental_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence NB_Experimental_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run NB_Update_Trial_Number always
	run NB_Experimental_fixation_dot "[live_row] = 0"
	run NB_Experimental_Script_Gen_Stimuli always
	run NB_Experimental_keyboard_response_1 "[live_row] > 1"
	run NB_general_script_turn_to_lower always
	run NB_Experimental_Script_Canvas_Post_Response_with_Letter "[response] = m and [live_row] > 1"
	run NB_Experimental_Script_Empty_Canvas_Post_Stimuli_Presentation always
	run NB_Experimental_keyboard_response_2 "[response] = None and [live_row] > 1"
	run NB_general_script_turn_to_lower always
	run NB_Experimental_Script_Canvas_Post_Response_without_Letter "[response] = m and [live_row] > 1"
	run NB_general_script_calculate_response_time_no_response "[response] = None and [live_row] > 1"
	run NB_set_correct_response_first_two_trials "[live_row] < 2"
	run NB_Experimental_Script_score_NBack "[live_row] > 1"
	run logger always

define inline_script NB_Ini_Task_Name
	set description "Executes Python code"
	___run__
	var.Task_Name = "N-Back Task"
	__end__
	set _prepare ""

define inline_script NB_Update_Trial_Number
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	
	var.nbackrt_index = 0
	var.rt_correct_n_back = ''
	var.rt_false_alarms = ''
	__end__
	set _prepare ""

define feedback NB_experimental_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />Your responses were correct in [NBackScore] trials.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define feedback NB_experimental_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />Your responses were correct in [NBackScore] trial.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define loop NB_experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run NB_Experimental_block_sequence

define sketchpad NB_general_instructions_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="" x=-4 y=1 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />A continuous sequence of letters placed inside a 3x3 grid will be presented in this task.<br /><br />You must signal every time a '2-back' condition is observed. A 2-back condition is observed when the presented stimulus is the same that was presented 2 trials ago — the same letter presented in the same location.<br /><br />Every time a new letter is presented you must press the key ‘m’ if you think that the requirements for a 2-back condition are met. On the contrary, if you think that the presented stimulus is not the same that was presented 2 trials ago do not press any key. You will only be able to press the key ‘m’ after the third letter is presented (as it is impossible to generate a 2-back condition in the first two trials).<br /><br />In the next slides we will present three schemes. The first one displays an example of a 2-back condition. The second and third schemes present examples of trials in which the n-back condition is not met.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad NB_general_instructions_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Situacao_M_2.png" scale="[NBackImgSize]" show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="" x=0 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Press any key to continue." x=0 y=320 z_index=0

define sketchpad NB_general_instructions_3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Situacao_No_Key_label_2.png" scale="[NBackImgSize]" show_if=always x=0 y="[NbackImgPos1]" z_index=0
	draw image center=1 file="Situacao_No_Key__No_Label_2.png" scale=0.01 show_if=always x=0 y="[NbackImgPos2]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Press any key to continue." x=0 y=320 z_index=0

define sketchpad NB_general_instructions_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="We recommend that you stay particularly vigilant during this task, as each letter is solely presented for 0.5 seconds. However, there is a 2-second interval between each pair of letters during which you can also press the key ‘m’.<br /><br />A red rectangle will appear every time you press the key 'm' to signal that your response was processed by the computer. The red square will disappear every time a new letter pops up.<br /><br />First, you will complete some practice trials to get acquainted with the task.<br /><br />Press any key to start the practice trials." x=0 y=0 z_index=0

define inline_script NB_general_script_calculate_response_time_no_response
	set description "Executes Python code"
	___run__
	##Calculates RT when the participant does not press the 'm' key.
	var.response_time = var.response_time + 500
	__end__
	set _prepare ""

define inline_script NB_general_script_turn_to_lower
	set description "Executes Python code"
	___run__
	##transfomrs the responses of the participants in lower caes. 
	if var.response == 'M':
	    var.response = var.response.lower()
	__end__
	set _prepare ""

define loop NB_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 8
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run NB_practice_trial_sequence

define sequence NB_practice_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run NB_practice_reset_feedback always
	run NB_practice_ini_var_calc_n_back always
	run NB_practice_block_loop always
	run NB_practice_feedback "[NBackScore] != 1"
	run NB_practice_feedback_1 "[NBackScore] = 1"

define feedback NB_practice_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />Your responses were correct in [NBackScore] trials.<br /><br />Next, you will complete the experimental trials.<br /><br />Press any key to start this block." x=0 y=0 z_index=0

define feedback NB_practice_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />Your responses were correct in [NBackScore] trial.<br /><br />Next, you will complete the experimental trials.<br /><br />Press any key to start this block.<br />" x=0 y=0 z_index=0

define sketchpad NB_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define inline_script NB_practice_ini_var_calc_n_back
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.List_Last_N_Verbal = []
	var.List_Last_N_Pos = []
	
	##Sums the correct responses in the non-back trials.
	var.TotalCorrectNonTwoBack = 0
	
	##Sums the incorrect responses in the n-back trials.
	var.TotalMiss = 0
	
	##Sums the incorrect responses in the non-back trials.
	var.TotalFalseAlarms = 0
	
	##Sums the correct responses in the n-back trials (experiments that only ##want to asses the accuracy in n-back conditions).
	var.TotalCorrectTwoBack = 0
	
	##Sums the number of correct responses in the n-back and non-n-back ##trals (experiments that want to asses the accuracy in n-back (target ##condition) and non-back (control conditions) conditions).
	var.NBackScore = 0
	
	##################################################################################
	##Variable that stores the number of trials of the practive block.
	var.Block_lenght = 6
	var.RefCalcN2Back = (var.Block_lenght/3)
	var.RefCalcNonN2Back = ((var.Block_lenght*2)/3)
	
	##counts the number of 2-Back Trials.
	var.CounterN2BackTrials = 0
	
	##counts the number of Non-Back Trials.
	var.CounterNonN2BackTrials = 0
	
	
	##################################################################
	var.TrialNumber = 0
	__end__

define keyboard_response NB_practice_keyboard_response_1
	set timeout 500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses m

define keyboard_response NB_practice_keyboard_response_2
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses m

define loop NB_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run NB_practice_block_sequence

define reset_feedback NB_practice_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script NB_practice_script_canvas_post_response_with_letter
	set description "Executes Python code"
	___run__
	##Highlights the cells of the grid that displays the letter when the participant presses the 'm' key.
	canv_letter.rect(var.letter_pos[0]-(var.width*0.165), var.letter_pos[1]-(var.height*0.165), (var.width*0.33), (var.height*0.33), color='red', fill=False, penwidth=10)
	canv_letter.show()
	clock.sleep(495-(float(var.response_time)))
	
	if var.response == 'm':
	    var.nbackrt_index = 1
	    
	__end__
	set _prepare ""

define inline_script NB_practice_script_canvas_post_response_without_letter
	set description "Executes Python code"
	___run__
	##Highlights the cells of the grid that displayed the letter if the ##participant presses the 'm' key when the target letter is no longer being ##presented.
	canv.rect(var.letter_pos[0]-(var.width*0.165), var.letter_pos[1]-(var.height*0.165), (var.width*0.33), (var.height*0.33), color='red', fill=False, penwidth=10)
	canv.show()
	clock.sleep(1995-float(var.response_time))
	
	## adds 500ms to the RT (corresponding to the display time of the target letter).
	
	if var.nbackrt_index == 0:
	    var.response_time = var.response_time + 500
	__end__
	set _prepare ""

define inline_script NB_practice_script_empty_canvas_post_stimuli_presentation
	set description "Executes Python code"
	___run__
	##Displays an empty grid. This inline is only run if the participant has not pressed the 'm' key when the target letter is being displayed.
	canv.show()
	__end__
	set _prepare ""

define inline_script NB_practice_script_gen_stimuli
	set description "Executes Python code"
	___run__
	##Exhibits canvas with and without letters.
	if var.live_row == 0:
	    canv.show()
	    clock.sleep(495)
	    canv_letter.show()
	    clock.sleep(495)
	    canv.show()
	    clock.sleep(1995)
	elif var.live_row == 1:
	    canv_letter.show()
	    clock.sleep(495)
	    canv.show()
	    clock.sleep(1995)    
	else:
	    canv_letter.show()
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.33,var.height*-0.33),(0,var.height*-0.33),(var.width*0.33,var.height*-0.33),(var.width*-0.33,0),(0,0),(var.width*0.33,0),(var.width*-0.33,var.height*0.33),(0,var.height*0.33),(var.width*0.33,var.height*0.33)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x-(var.width*0.165), y-(var.height*0.165), (var.width*0.33), (var.height*0.33))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that creates the canvas with letters
	def create_canvas_with_letters():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.33,var.height*-0.33),(0,var.height*-0.33),(var.width*0.33,var.height*-0.33),(var.width*-0.33,0),(0,0),(var.width*0.33,0),(var.width*-0.33,var.height*0.33),(0,var.height*0.33),(var.width*0.33,var.height*0.33)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x-(var.width*0.165), y-(var.height*0.165), (var.width*0.33), (var.height*0.33))
	
	
	###########################################################################################Chooses the letter and position that will be displayed in the grid.
	
	    ##Letters and numbers that can be displayed in the canvas.
	    alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	    ##Chooses the letter and position that will be displayed in the ##grid in the first two trials.
	    if var.live_row < 2:
	        var.letter = random.choice(alphabet_list)
	        var.letter_pos = [random.choice(var.xy_coord)]
	        x,y = var.letter_pos.pop(0)
	        var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    ##From the 2nd trial onwards, the program will use the variable ##SelectCondition to determine if the next trial is a 2-nack or a ##non-back trials. 1/3 of the task will compsed of 2N-Back trials and ##2/3 of the task by non-back condiitons. Thus, the variable ##SelectCondition will conatin the value 1 in 2-back conditions, and ##2 or 3 in non-back conditions.
	    if var.live_row > 1:
	        var.SelectCondition = random.randint(1,3)
	        ##Genrerates the reference that will determine if the the next trial is a 2-back or a non-back trial.
	        if var.SelectCondition == 1:
	            if var.CounterN2BackTrials < var.RefCalcN2Back:
	                var.letter = var.List_Last_N_Verbal[0]
	                var.letter_pos = [var.List_Last_N_Pos[0]]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterN2BackTrials = var.CounterN2BackTrials + 1
	            ##Genereates a non-back trials (since the counter of non-back ##conditions has not got to 24.
	            else:
	                var.letter = random.choice(alphabet_list)
	                while var.letter == var.List_Last_N_Verbal[0]:
	                    var.letter = random.choice(alphabet_list)
	                var.letter_pos = [random.choice(var.xy_coord)]
	                while var.letter_pos == [var.List_Last_N_Pos[0]]:
	                    var.letter_pos = [random.choice(var.xy_coord)]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterNonN2BackTrials = var.CounterNonN2BackTrials + 1
	        ##Genereates a non-back trials (since the counter of 2-back ##conditions has got to 12.
	        else:
	            if var.CounterNonN2BackTrials < var.RefCalcNonN2Back:
	                var.letter = random.choice(alphabet_list)
	                while var.letter == var.List_Last_N_Verbal[0]:
	                    var.letter = random.choice(alphabet_list)
	                var.letter_pos = [random.choice(var.xy_coord)]
	                while var.letter_pos == [var.List_Last_N_Pos[0]]:
	                    var.letter_pos = [random.choice(var.xy_coord)]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterNonN2BackTrials = var.CounterNonN2BackTrials + 1
	            ##Genereates a 2-back trials (since the counter of non-back ##conditions has got to 24.
	            else:
	                var.letter = var.List_Last_N_Verbal[0]
	                var.letter_pos = [var.List_Last_N_Pos[0]]
	                x,y = var.letter_pos.pop(0)
	                var.c.text(var.letter, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	                var.CounterN2BackTrials = var.CounterN2BackTrials + 1
	 
	    ##Saves the charateristics of the stumuli (letters and positions) displayed in the last to trials. This variable is the reference through which 2-back and non-back trials will be generated.
	    var.List_Last_N_Verbal.append(var.letter)
	    var.letter_pos = [x,y]
	    var.letter_pos = tuple(var.letter_pos)
	    var.List_Last_N_Pos.append(var.letter_pos)
	    if var.live_row > 1:
	        var.response_index_letter = var.List_Last_N_Verbal[0]
	        var.response_index_pos = tuple(var.List_Last_N_Pos[0])
	        var.List_Last_N_Verbal.remove(var.List_Last_N_Verbal[0])
	        var.List_Last_N_Pos.remove(var.List_Last_N_Pos[0])
	    else:
	        var.response_index_letter = 'NA'
	        var.response_index_pos = 'NA'
	
	    return var.c,var.response_index_letter, var.response_index_pos,var.letter,var.letter_pos
	
	
	##Creates a copy of the varables created by the function ##create_canvas_with_letters.
	var.create_canvas_with_letters = create_canvas_with_letters()
	canv_letter = var.create_canvas_with_letters[0]
	var.response_index_letter = var.create_canvas_with_letters[1]
	var.response_index_pos = var.create_canvas_with_letters[2]
	var.letter = var.create_canvas_with_letters[3]
	var.letter_pos = var.create_canvas_with_letters[4]
	
	##Reinitializes the variable that stores the RT of the conditions in ##which a False Alarm or a 2-back condition ocurred.
	var.rt_correct_n_back = 0
	var.rt_false_alarms = 0
	__end__

define inline_script NB_practice_script_score_n_back
	set description "Executes Python code"
	___run__
	##Clears the response variable.
	responses.clear()
	
	####################################################################################
	##scores the response of the participants.
	
	##stores the RT of the participant in each trial.
	var.rt = var.avg_rt
	
	##Scores correct n-back trials - patticipants has pressed the 'm' key and the stimulus presented in this trials is the same stiumulus presented 2-trials ago (same letter in the same position of the grid).
	if var.response == 'm' and var.letter == var.response_index_letter and var.letter_pos == var.response_index_pos:
	    var.correct = '1'
	    var.correct_response = 'm'
	    var.TotalCorrectTwoBack = var.TotalCorrectTwoBack + 1
	    var.NBackScore = var.NBackScore + 1
	    var.rt_correct_n_back = var.response_time
	    
	####Scores correct non-back trials - participants has not pressed the 'm' key and the stimulus presented in this trials is not the same stiumulus presented 2-trials ago (different letter in a different position of the grid).
	if var.response == 'None' and var.letter != var.response_index_letter or var.response == 'None' and var.letter_pos != var.response_index_pos:
	    var.correct = '1'
	    var.correct_response = 'None'
	    var.TotalCorrectNonTwoBack = var.TotalCorrectNonTwoBack + 1
	    var.NBackScore = var.NBackScore + 1
	
	####Scores incorrect non-back trials - participants has pressed the 'm' key and the stimulus presented in this trials is not the same stiumulus presented 2-trials ago (different letter in a different position of the grid).
	if var.response == 'm' and var.letter != var.response_index_letter or var.response == 'm' and var.letter_pos != var.response_index_pos:
	    var.correct = '0'
	    var.correct_response = 'None'
	    var.TotalFalseAlarms = var.TotalFalseAlarms + 1
	    var.rt_false_alarms = var.response_time 
	
	
	####Scores incorrect n-back trials - participants has not pressed the 'm' key and the stimulus presented in this trials is the same stiumulus presented 2-trials ago (same letter in same position of the grid).
	if var.response == 'None' and var.letter == var.response_index_letter and  var.letter_pos == var.response_index_pos:
	    var.correct = '0'
	    var.correct_response = 'm'
	    var.TotalMiss = var.TotalMiss + 1
	__end__
	set _prepare ""

define sequence NB_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run NB_Update_Trial_Number always
	run NB_practice_fixation_dot "[live_row] = 0"
	run NB_practice_script_gen_stimuli always
	run NB_practice_keyboard_response_1 "[live_row] > 1"
	run NB_general_script_turn_to_lower always
	run NB_practice_script_canvas_post_response_with_letter "[response] = m and [live_row] > 1"
	run NB_practice_script_empty_canvas_post_stimuli_presentation always
	run NB_practice_keyboard_response_2 "[response] = None and [live_row] > 1"
	run NB_general_script_turn_to_lower always
	run NB_practice_script_canvas_post_response_without_letter "[response] = m and [live_row] > 1"
	run NB_general_script_calculate_response_time_no_response "[response] = None and [live_row] > 1"
	run NB_set_correct_response_first_two_trials "[live_row] < 2"
	run NB_practice_script_score_n_back "[live_row] > 1"
	run logger always

define inline_script NB_set_correct_response_first_two_trials
	set description "Executes Python code"
	set _run "var.correct_response = ''"
	set _prepare ""

define sketchpad OP_Display
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[OP_Operation]" x=0 y=0 z_index=0

define sketchpad OP_Display_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[OP_Operation]" x=0 y=0 z_index=0

define inline_script OP_IniLists
	set description "Executes Python code"
	___run__
	##Sets the list that will store the RTs of the participants and ##the list that stores the information that says if the answers of ##the participants are correct or not.
	var.OPRtList = []
	var.OPCorrectList = []
	
	var.Task_Name = "Operation Processing Task"
	__end__
	set _prepare ""

define inline_script OP_calculate_avg_dp_processing_time
	set description "Executes Python code"
	___run__
	##Sets the variable that will store the information regarding the ##amount of time each participant will have to solve each equations in ##the Operation Span - mean RT + 2.5 SD.
	var.OP_part_process_time = statistics.mean(var.OPRtList) + (2.5*statistics.stdev(var.OPRtList))
	
	##Rounds the variable OP_part_process_time. This value of this ##variable will be displayed to the participants in the instructions ##screen.
	var.round_OP_part_time = str(round((var.OP_part_process_time*0.001), 2))
	__end__
	set _prepare ""

define inline_script OP_calculate_processing_time
	set description "Executes Python code"
	___run__
	##Sets the maxmimal and minimal amount of time that the participants ##will have to solve an equation in the operation span. If the participant take longer than 11.785 seconds or less than 2.089 to solve an equation the value of his RT will be replaced by 5.482 seconds. This value was the mean RT obtained in pilot tests (N=14).
	if var.response_time > 11047 or var.response_time < 1668:
	    var.response_time = 5314
	
	var.OPRtList.append(var.response_time)
	__end__
	set _prepare ""

define feedback OP_experimental_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You correctely determined that the result of the equations were correct/incorrect in [total_correct] trials.<br /><br />Press any key to start the next task!" x=0 y=0 z_index=0

define feedback OP_experimental_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You correctely determined that the result of the equations were correct/incorrect in [total_correct] trial.<br /><br />Press any key to start the next task!" x=0 y=0 z_index=0

define loop OP_experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 OP_Operation "(6 * 3) + 1 = 19"
	setcycle 0 correct_response 1
	setcycle 1 OP_Operation "(8 / 4) - 1 = 2"
	setcycle 1 correct_response 2
	setcycle 2 OP_Operation "(6 / 3) + 2 = 4"
	setcycle 2 correct_response 1
	setcycle 3 OP_Operation "(6 * 3) - 7 = 10"
	setcycle 3 correct_response 2
	setcycle 4 OP_Operation "(8 / 4) - 1 = 1"
	setcycle 4 correct_response 1
	setcycle 5 OP_Operation "(6 * 3) + 2 = 19"
	setcycle 5 correct_response 2
	setcycle 6 OP_Operation "(3 * 4) - 9 = 3"
	setcycle 6 correct_response 1
	setcycle 7 OP_Operation "(8 / 4) + 4 = 4"
	setcycle 7 correct_response 2
	setcycle 8 OP_Operation "(6 / 2) - 2 = 2"
	setcycle 8 correct_response 2
	setcycle 9 OP_Operation "(6 / 3) + 4 = 6"
	setcycle 9 correct_response 1
	setcycle 10 OP_Operation "(3 * 5) - 9 = 4"
	setcycle 10 correct_response 2
	setcycle 11 OP_Operation "(8 / 2) - 1 = 3"
	setcycle 11 correct_response 1
	setcycle 12 OP_Operation "(2 * 8) + 2 = 16"
	setcycle 12 correct_response 2
	setcycle 13 OP_Operation "(4 * 4) - 7 = 9"
	setcycle 13 correct_response 1
	setcycle 14 OP_Operation "(6 / 3) + 1 = 1"
	setcycle 14 correct_response 2
	setcycle 15 OP_Operation "(6 * 3) + 2 = 20"
	setcycle 15 correct_response 1
	setcycle 16 OP_Operation "(8 / 2) + 7 = 11"
	setcycle 16 correct_response 1
	setcycle 17 OP_Operation "(2 * 9) - 8 = 9"
	setcycle 17 correct_response 2
	setcycle 18 OP_Operation "(6 / 2) - 2 = 1"
	setcycle 18 correct_response 1
	setcycle 19 OP_Operation "(3 * 2) + 5 = 9"
	setcycle 19 correct_response 2
	run OP_experimental_sequence

define sequence OP_experimental_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run OP_fixation_dot always
	run OP_Display always
	run OP_keyboard_response always
	run OP_calculate_processing_time always

define sketchpad OP_fixation_dot
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OP_fixation_dot_1
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OP_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize28OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />A sequence of mathematical equations will be presented in this task. The results of the equations are correct in some trials and incorrect in others.<br /><br />You must signal if the results of the equations are correct or not. You must press the key ‘1’ if you think the result is correct or the key ‘2’ if you think the result is incorrect. <br /><br />First, you will complete some practice trials.<br /><br />Press any key to begin this block of trials." x=0 y=0 z_index=0

define keyboard_response OP_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define keyboard_response OP_keyboard_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define feedback OP_practice_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize28OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You correctely determined that the result of the equations were correct/incorrect in [total_correct] trials.<br /><br />You will know complete the experimental trials. This block contains 20 equations. Once again, you must signal if the results of the equations are correct or not.<br /><br />Press any key to begin the next block." x=0 y=0 z_index=0

define feedback OP_practice_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize28OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You correctely determined that the result of the equations were correct/incorrect in [total_correct] trial.<br /><br />You will know complete the experimental trials. This block contains 20 equations. Once again, you must signal if the results of the equations are correct or not.<br /><br />Press any key to begin the next block." x=0 y=0 z_index=0

define loop OP_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 OP_Operation "(4 * 3) - 5 = 7"
	setcycle 0 correct_response 1
	setcycle 1 OP_Operation "(9 / 3) + 8 = 10"
	setcycle 1 correct_response 2
	run OP_practice_sequence

define sequence OP_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run OP_fixation_dot_1 always
	run OP_Display_1 always
	run OP_keyboard_response_1 always

define inline_script OSRestartNTrial
	set description "Executes Python code"
	___run__
	var.TrialNumber = TrialNumberRef
	
	var.SubTaskName = 'Memory Subtask'
	var.acc = str(var.acc)
	var.acc = ''
	var.avg_rt = str(var.avg_rt)
	var.avg_rt = ''
	var.List_responses_memory = []
	var.response_processing = ''
	var.response_time_processing = ''
	var.total_response_time = ''
	__end__
	set _prepare ""

define inline_script OSUpdateTrialNumber
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	
	var.List_Prev_Letter = var.Temp_Prev_Letter
	__end__
	set _prepare ""

define sketchpad OS_General_instructions
	set start_response_interval no
	set duration keypress
	set description "Frases dp bloco de treino"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />The next task has some similarities with a task that you completed previously. A sequence of mathematical equations will be presented. The results of the equations are correct in some trials and incorrect in others. However, in this task each equation will be followed by a single letter presented for 1 second.<br /><br />You have two goals in this task (both equally important):<br />Goal 1 – Every time an equation is presented, you must state if the result of the equation is correct or not. You must press the key ‘1’ if you think that the presented result is correct or press the key ‘2’ if you think that the presented result is incorrect. You will have a maximum of [round_OP_part_time] seconds to solve an equation and signal if the displayed result is correct or not.<br />Goal 2 – You must memorize the letters presented after each equation. At the end of each block, you will have to recall these letters in the same order they were presented and type them in a response box. <br /><br />You will complete two practice trials to get acquainted with the task.<br /><br />Press any key to start the practice blocks!" x=0 y=0 z_index=0

define inline_script OS_Init_List_Prev_Letter
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Chooses the block (1 to 57) that will be exhibited in the next ##experimental block.
	if var.live_row == 0:
	    var.BlockChoice = var.subject_nr
	    while var.BlockChoice > 15:
	        var.BlockChoice = var.BlockChoice - 15
	
	if var.live_row > 0:
	    var.BlockChoice = var.BlockChoice + 5
	    if var.BlockChoice > 15:
	        var.BlockChoice = var.BlockChoice - 15
	
	##Initalizes the variable that will save the letters exhibited in previous trials and the list that will save the responses of the participants in the memory subtask.
	var.List_Prev_Letter = []
	var.List_responses_memory = []
	var.Big_i = 0
	__end__

define inline_script OS_Init_List_Prev_Letter_Practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initialization of the variables that will store the letters that were presented in the practice block and the responses of the participant in the subtask memory.
	var.List_Prev_Letter = []
	var.List_responses_memory = []
	var.Big_i = 0
	#var.TrialNumber = 1
	#TrialNumberRef = var.TrialNumber
	var.subblock = 'practice'
	var.Sub_bloco = 'practice'
	__end__

define inline_script OS_Restart_Response_total_time_memory
	set description "Executes Python code"
	set _run "var.response_total_time_memory = 0"
	set _prepare ""

define inline_script OS_Sequential_block_choice
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initialization of the variable BlockChoice.vars.
	##This variable will select which of the 15 blocks of equations ##will be displayed to the participant in the first block.
	import math, random
	
	var.Task_Name = "Operation Span"
	
	var.BlockChoice = var.subject_nr
	
	while var.BlockChoice > 15:
	    var.BlockChoice = var.BlockChoice - 15
	
	##Initialization of the variables response_total_time_memory e ##average_total_time_memory    
	var.response_total_time_memory = 0
	var.average_total_time_memory = 0
	var.agrregate_score_memory = 0
	var.subblock = ''
	
	##Initialization of variables that will score each block of the memory subtask.
	##var.score_subblock_2_1 = 0
	var.score_subblock_2_2 = 0
	var.score_subblock_2_3 = 0
	var.score_subblock_3_1 = 0
	var.score_subblock_3_2 = 0
	var.score_subblock_3_3 = 0
	var.score_subblock_4_1 = 0
	var.score_subblock_4_2 = 0
	var.score_subblock_4_3 = 0
	var.score_subblock_5_1 = 0
	var.score_subblock_5_2 = 0
	var.score_subblock_5_3 = 0
	var.score_subblock_6_1 = 0
	var.score_subblock_6_2 = 0
	var.score_subblock_6_3 = 0
	score_practice = 0
	__end__

define sequence OS_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_practice_reset_feedback always
	run OS_Init_List_Prev_Letter_Practice always
	run OS_experimental_script_create_experimental_table_defining_weights_2_1 always
	run OS_practice_block_loop always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_practice_text_input_2_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_practice_text_input_2_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_subblock_practice always
	run logger always
	run OS_practice_feedback_first_block "[total_correct] != 1 and [score_practice_feedback] != 1 and [count_OS_practice_reset_feedback] = 0"
	run OS_practice_feedback_first_block_1 "[total_correct] = 1 and [score_practice_feedback] != 1 and [count_OS_practice_reset_feedback] = 0"
	run OS_practice_feedback_first_block_2 "[total_correct] != 1 and [score_practice_feedback] = 1 and [count_OS_practice_reset_feedback] = 0"
	run OS_practice_feedback_first_block_3 "[total_correct] = 1 and [score_practice_feedback] = 1 and [count_OS_practice_reset_feedback] = 0"
	run OS_practice_feedback_second_block "[total_correct] != 1 and [score_practice_feedback] != 1 and [count_OS_practice_reset_feedback] = 1"
	run OS_practice_feedback_second_block_1 "[total_correct] = 1 and [score_practice_feedback] != 1 and [count_OS_practice_reset_feedback] = 1"
	run OS_practice_feedback_second_block_2 "[total_correct] != 1 and [score_practice_feedback] = 1 and [count_OS_practice_reset_feedback] = 1"
	run OS_practice_feedback_second_block_3 "[total_correct] = 1 and [score_practice_feedback] = 1 and [count_OS_practice_reset_feedback] = 1"

define loop OS_experimental_block_loop_2
	set source_file "frases_tarefa.xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run OS_experimental_trial_sequence_2

define loop OS_experimental_block_loop_3
	set source_file "frases_tarefa.xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run experimental_trial_sequence_3

define loop OS_experimental_block_loop_4
	set source_file "frases_tarefa.xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run OS_experimental_trial_sequence_4

define loop OS_experimental_block_loop_5
	set source_file "frases_tarefa.xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run OS_experimental_trial_sequence_5

define loop OS_experimental_block_loop_6
	set source_file "frases_tarefa.xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run OS_experimental_trial_sequence_6

define sequence OS_experimental_block_sequence_2
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_experimental_reset_feedback_2 always
	run OS_Init_List_Prev_Letter always
	run OS_experimental_script_create_experimental_table_defining_weights_2 always
	run OS_experimental_block_loop_2 always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_2_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_2_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_sub_block_2 always
	run logger always
	run OS_experimental_feedback_2_1_1 "[total_correct] != 1 and [score_subblock_2_1] != 1 and [count_OS_experimental_reset_feedback_2] = 0"
	run OS_experimental_feedback_2_1_2 "[total_correct] = 1 and [score_subblock_2_1] != 1 and [count_OS_experimental_reset_feedback_2] = 0"
	run OS_experimental_feedback_2_1_3 "[total_correct] != 1 and [score_subblock_2_1] = 1 and [count_OS_experimental_reset_feedback_2] = 0"
	run OS_experimental_feedback_2_1_4 "[total_correct] = 1 and [score_subblock_2_1] = 1 and [count_OS_experimental_reset_feedback_2] = 0"
	run OS_experimental_feedback_2_2_1 "[total_correct] != 1 and [score_subblock_2_2] != 1 and [count_OS_experimental_reset_feedback_2] = 1"
	run OS_experimental_feedback_2_2_2 "[total_correct] = 1 and [score_subblock_2_2] != 1 and [count_OS_experimental_reset_feedback_2] = 1"
	run OS_experimental_feedback_2_2_3 "[total_correct] != 1 and [score_subblock_2_2] = 1 and [count_OS_experimental_reset_feedback_2] = 1"
	run OS_experimental_feedback_2_2_4 "[total_correct] = 1 and [score_subblock_2_2] = 1 and [count_OS_experimental_reset_feedback_2] = 1"
	run OS_experimental_feedback_2_3_1 "[total_correct] != 1 and [score_subblock_2_3] != 1 and [count_OS_experimental_reset_feedback_2] = 2"
	run OS_experimental_feedback_2_3_2 "[total_correct] = 1 and [score_subblock_2_3] != 1 and [count_OS_experimental_reset_feedback_2] = 2"
	run OS_experimental_feedback_2_3_3 "[total_correct] != 1 and [score_subblock_2_3] = 1 and [count_OS_experimental_reset_feedback_2] = 2"
	run OS_experimental_feedback_2_3_4 "[total_correct] = 1 and [score_subblock_2_3] = 1 and [count_OS_experimental_reset_feedback_2] = 2"

define sequence OS_experimental_block_sequence_3
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_experimental_reset_feedback_3 always
	run OS_Init_List_Prev_Letter always
	run OS_experimental_script_create_experimental_table_defining_weights_3 always
	run OS_experimental_block_loop_3 always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_3_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_3_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_3_3 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_sub_block_3 always
	run logger always
	run OS_experimental_feedback_3_1_1 "[total_correct] != 1 and [score_subblock_3_1] != 1 and [count_OS_experimental_reset_feedback_3] = 0"
	run OS_experimental_feedback_3_1_2 "[total_correct] = 1 and [score_subblock_3_1] != 1 and [count_OS_experimental_reset_feedback_3] = 0"
	run OS_experimental_feedback_3_1_3 "[total_correct] != 1 and [score_subblock_3_1] = 1 and [count_OS_experimental_reset_feedback_3] = 0"
	run OS_experimental_feedback_3_1_4 "[total_correct] = 1 and [score_subblock_3_1] = 1 and [count_OS_experimental_reset_feedback_3] = 0"
	run OS_experimental_feedback_3_2_1 "[total_correct] != 1 and [score_subblock_3_2] != 1 and [count_OS_experimental_reset_feedback_3] = 1"
	run OS_experimental_feedback_3_2_2 "[total_correct] = 1 and [score_subblock_3_2] != 1 and [count_OS_experimental_reset_feedback_3] = 1"
	run OS_experimental_feedback_3_2_3 "[total_correct] != 1 and [score_subblock_3_2] = 1 and [count_OS_experimental_reset_feedback_3] = 1"
	run OS_experimental_feedback_3_2_4 "[total_correct] = 1 and [score_subblock_3_2] = 1 and [count_OS_experimental_reset_feedback_3] = 1"
	run OS_experimental_feedback_3_3_1 "[total_correct] != 1 and [score_subblock_3_3] != 1 and [count_OS_experimental_reset_feedback_3] = 2"
	run OS_experimental_feedback_3_3_2 "[total_correct] = 1 and [score_subblock_3_3] != 1 and [count_OS_experimental_reset_feedback_3] = 2"
	run OS_experimental_feedback_3_3_3 "[total_correct] != 1 and [score_subblock_3_3] = 1 and [count_OS_experimental_reset_feedback_3] = 2"
	run OS_experimental_feedback_3_3_4 "[total_correct] = 1 and [score_subblock_3_3] = 1 and [count_OS_experimental_reset_feedback_3] = 2"

define sequence OS_experimental_block_sequence_4
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_experimental_reset_feedback_4 always
	run OS_Init_List_Prev_Letter always
	run OS_experimental_script_create_experimental_table_defining_weights_4 always
	run OS_experimental_block_loop_4 always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_4_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_4_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_4_3 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_4_4 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_sub_block_4 always
	run logger always
	run OS_experimental_feedback_4_1_1 "[total_correct] != 1 and [score_subblock_4_1] != 1 and [count_OS_experimental_reset_feedback_4] = 0"
	run OS_experimental_feedback_4_1_2 "[total_correct] = 1 and [score_subblock_4_1] != 1 and [count_OS_experimental_reset_feedback_4] = 0"
	run OS_experimental_feedback_4_1_3 "[total_correct] != 1 and [score_subblock_4_1] = 1 and [count_OS_experimental_reset_feedback_4] = 0"
	run OS_experimental_feedback_4_1_4 "[total_correct] = 1 and [score_subblock_4_1] = 1 and [count_OS_experimental_reset_feedback_4] = 0"
	run OS_experimental_feedback_4_2_1 "[total_correct] != 1 and [score_subblock_4_2] != 1 and [count_OS_experimental_reset_feedback_4] = 1"
	run OS_experimental_feedback_4_2_2 "[total_correct] = 1 and [score_subblock_4_2] != 1 and [count_OS_experimental_reset_feedback_4] = 1"
	run OS_experimental_feedback_4_2_3 "[total_correct] != 1 and [score_subblock_4_2] = 1 and [count_OS_experimental_reset_feedback_4] = 1"
	run OS_experimental_feedback_4_2_4 "[total_correct] = 1 and [score_subblock_4_2] = 1 and [count_OS_experimental_reset_feedback_4] = 1"
	run OS_experimental_feedback_4_3_1 "[total_correct] != 1 and [score_subblock_4_3] != 1 and [count_OS_experimental_reset_feedback_4] = 2"
	run OS_experimental_feedback_4_3_2 "[total_correct] = 1 and [score_subblock_4_3] != 1 and [count_OS_experimental_reset_feedback_4] = 2"
	run OS_experimental_feedback_4_3_3 "[total_correct] != 1 and [score_subblock_4_3] = 1 and [count_OS_experimental_reset_feedback_4] = 2"
	run OS_experimental_feedback_4_3_4 "[total_correct] = 1 and [score_subblock_4_3] = 1 and [count_OS_experimental_reset_feedback_4] = 2"

define sequence OS_experimental_block_sequence_5
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_experimental_reset_feedback_5 always
	run OS_Init_List_Prev_Letter always
	run OS_experimental_script_create_experimental_table_defining_weights_5 always
	run OS_experimental_block_loop_5 always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_5_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_5_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_5_3 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_5_4 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_5_5 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_sub_block_5 always
	run logger always
	run OS_experimental_feedback_5_1_1 "[total_correct] != 1 and [score_subblock_5_1] != 1 and [count_OS_experimental_reset_feedback_5] = 0"
	run OS_experimental_feedback_5_1_2 "[total_correct] = 1 and [score_subblock_5_1] != 1 and [count_OS_experimental_reset_feedback_5] = 0"
	run OS_experimental_feedback_5_1_3 "[total_correct] != 1 and [score_subblock_5_1] = 1 and [count_OS_experimental_reset_feedback_5] = 0"
	run OS_experimental_feedback_5_1_4 "[total_correct] = 1 and [score_subblock_5_1] = 1 and [count_OS_experimental_reset_feedback_5] = 0"
	run OS_experimental_feedback_5_2_1 "[total_correct] != 1 and [score_subblock_5_2] != 1 and [count_OS_experimental_reset_feedback_5] = 1"
	run OS_experimental_feedback_5_2_2 "[total_correct] = 1 and [score_subblock_5_2] != 1 and [count_OS_experimental_reset_feedback_5] = 1"
	run OS_experimental_feedback_5_2_3 "[total_correct] != 1 and [score_subblock_5_2] = 1 and [count_OS_experimental_reset_feedback_5] = 1"
	run OS_experimental_feedback_5_2_4 "[total_correct] = 1 and [score_subblock_5_2] = 1 and [count_OS_experimental_reset_feedback_5] = 1"
	run OS_experimental_feedback_5_3_1 "[total_correct] != 1 and [score_subblock_5_3] != 1 and [count_OS_experimental_reset_feedback_5] = 2"
	run OS_experimental_feedback_5_3_2 "[total_correct] = 1 and [score_subblock_5_3] != 1 and [count_OS_experimental_reset_feedback_5] = 2"
	run OS_experimental_feedback_5_3_3 "[total_correct] != 1 and [score_subblock_5_3] = 1 and [count_OS_experimental_reset_feedback_5] = 2"
	run OS_experimental_feedback_5_3_4 "[total_correct] = 1 and [score_subblock_5_3] = 1 and [count_OS_experimental_reset_feedback_5] = 2"

define sequence OS_experimental_block_sequence_6
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run OS_experimental_reset_feedback_6 always
	run OS_Init_List_Prev_Letter always
	run OS_experimental_script_create_experimental_table_defining_weights_6 always
	run OS_experimental_block_loop_6 always
	run OSRestartNTrial always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_1 always
	run OS_general_cornometro_fim always
	run OS_Restart_Response_total_time_memory always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_2 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_3 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_4 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_5 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_memory always
	run logger always
	run OSUpdateTrialNumber always
	run OS_general_cronometro_init always
	run OS_experimental_text_input_6_6 always
	run OS_general_cornometro_fim always
	run OS_general_calculo_rt_total_and_average_memory always
	run OS_experimental_score_sub_block_6 always
	run logger always
	run OS_experimental_feedback_6_1_1 "[total_correct] != 1 and [score_subblock_6_1] != 1 and [count_OS_experimental_reset_feedback_6] = 0"
	run OS_experimental_feedback_6_1_2 "[total_correct] = 1 and [score_subblock_6_1] != 1 and [count_OS_experimental_reset_feedback_6] = 0"
	run OS_experimental_feedback_6_1_3 "[total_correct] != 1 and [score_subblock_6_1] = 1 and [count_OS_experimental_reset_feedback_6] = 0"
	run OS_experimental_feedback_6_1_4 "[total_correct] = 1 and [score_subblock_6_1] = 1 and [count_OS_experimental_reset_feedback_6] = 0"
	run OS_experimental_feedback_6_2_1 "[total_correct] != 1 and [score_subblock_6_2] != 1 and [count_OS_experimental_reset_feedback_6] = 1"
	run OS_experimental_feedback_6_2_2 "[total_correct] = 1 and [score_subblock_6_2] != 1 and [count_OS_experimental_reset_feedback_6] = 1"
	run OS_experimental_feedback_6_2_3 "[total_correct] != 1 and [score_subblock_6_2] = 1 and [count_OS_experimental_reset_feedback_6] = 1"
	run OS_experimental_feedback_6_2_4 "[total_correct] = 1 and [score_subblock_6_2] = 1 and [count_OS_experimental_reset_feedback_6] = 1"
	run OS_experimental_feedback_6_3_1 "[total_correct] != 1 and [score_subblock_6_3] != 1 and [count_OS_experimental_reset_feedback_6] = 2"
	run OS_experimental_feedback_6_3_2 "[total_correct] = 1 and [score_subblock_6_3] != 1 and [count_OS_experimental_reset_feedback_6] = 2"
	run OS_experimental_feedback_6_3_3 "[total_correct] != 1 and [score_subblock_6_3] = 1 and [count_OS_experimental_reset_feedback_6] = 2"
	run OS_experimental_feedback_6_3_4 "[total_correct] = 1 and [score_subblock_6_3] = 1 and [count_OS_experimental_reset_feedback_6] = 2"
	run OS_experimental_script_claculate_total_score "[count_OS_experimental_reset_feedback_6] = 2"

define inline_script OS_experimental_correct_response_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the labels correct/incorrect to the sitmuli in processing ##sub-##task.
	if var.Tipo == 'EC*+' or var.Tipo == 'EC/+' or var.Tipo == 'EC/-' or var.Tipo == 'EC*-':
	    var.correct_response = '1'
	elif var.Tipo == 'EI/-' or var.Tipo == 'EI*-' or var.Tipo == 'EI*+' or var.Tipo == 'EI/+':
	    var.correct_response = '2'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	var.SubTaskName = 'Processing Subtask'
	var.letter = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	__end__

define inline_script OS_experimental_correct_response_3
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the labels correct/incorrect to the sitmuli in processing ##sub-task.
	if var.Tipo == 'EC*+' or var.Tipo == 'EC/+' or var.Tipo == 'EC/-' or var.Tipo == 'EC*-':
	    var.correct_response = '1'
	elif var.Tipo == 'EI/-' or var.Tipo == 'EI*-' or var.Tipo == 'EI*+' or var.Tipo == 'EI/+':
	    var.correct_response = '2'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	var.SubTaskName = 'Processing Subtask'
	var.letter = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	__end__

define inline_script OS_experimental_correct_response_4
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the labels correct/incorrect to the sitmuli in processing ##sub-task.
	if var.Tipo == 'EC*+' or var.Tipo == 'EC/+' or var.Tipo == 'EC/-' or var.Tipo == 'EC*-':
	    var.correct_response = '1'
	elif var.Tipo == 'EI/-' or var.Tipo == 'EI*-' or var.Tipo == 'EI*+' or var.Tipo == 'EI/+':
	    var.correct_response = '2'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	var.SubTaskName = 'Processing Subtask'
	var.letter = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	__end__

define inline_script OS_experimental_correct_response_5
	set description "Executes Python code"
	set _run ""
	___prepare__
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	__end__

define inline_script OS_experimental_correct_response_6
	set description "Executes Python code"
	set _run ""
	___prepare__
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	__end__

define sketchpad OS_experimental_equation_display_2
	set start_response_interval no
	set duration 0
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[Equations]" x=0 y=0 z_index=0

define sketchpad OS_experimental_equation_display_3
	set start_response_interval no
	set duration 0
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[Equations]" x=0 y=0 z_index=0

define sketchpad OS_experimental_equation_display_4
	set start_response_interval no
	set duration 0
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[Equations]" x=0 y=0 z_index=0

define sketchpad OS_experimental_equation_display_5
	set start_response_interval no
	set duration 0
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=arial font_italic=no font_size="[FontSize60OpenSes]" html=yes show_if=always text="[Equations]" x=0 y=0 z_index=0

define sketchpad OS_experimental_equation_display_6
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
define feedback OS_experimental_feedback_2_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_1] letters in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_1_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_1] letters in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_1_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_1] letter in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_1_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_1] letter in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_2] letters in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_2_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_2] letters in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_2_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_2] letter in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_2_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_2] letter in the correct order. <br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_3] letters in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_3_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_3] letters in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_3_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_2_3] letter in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_2_3_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_2_3] letter in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_3_1] letters in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_1_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_3_1] letters in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_1_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_3_1] letter in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_1_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_3_1] letter in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_3_2] letters in the correct order. <br /><br />The next block will contain a sequence of 3 equations and 3 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_2_2
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
define feedback OS_experimental_feedback_3_2_3
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
define feedback OS_experimental_feedback_3_2_4
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
define feedback OS_experimental_feedback_3_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_3_3] letters in the correct order. <br /><br />The next block will contain a sequence of 4 equations and 4 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_3_3_2
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
define feedback OS_experimental_feedback_3_3_3
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
define feedback OS_experimental_feedback_3_3_4
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
define feedback OS_experimental_feedback_4_1_1
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
define feedback OS_experimental_feedback_4_1_2
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
define feedback OS_experimental_feedback_4_1_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_4_1] letter in the correct order. <br /><br />The next block will contain a sequence of 4 equations and 4 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_4_1_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_4_1] letter in the correct order. <br /><br />The next block will contain a sequence of 4 equations and 4 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_4_2_1
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
define feedback OS_experimental_feedback_4_2_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_4_2] letters in the correct order. <br /><br />The next block will contain a sequence of 4 equations and 4 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_4_2_3
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
define feedback OS_experimental_feedback_4_2_4
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
define feedback OS_experimental_feedback_4_3_1
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
define feedback OS_experimental_feedback_4_3_2
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
define feedback OS_experimental_feedback_4_3_3
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
define feedback OS_experimental_feedback_4_3_4
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
define feedback OS_experimental_feedback_5_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_5_1] letters in the correct order. <br /><br />The next block will contain a sequence of 5 equations and 5 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_5_1_2
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
define feedback OS_experimental_feedback_5_1_3
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
define feedback OS_experimental_feedback_5_1_4
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
define feedback OS_experimental_feedback_5_2_1
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
define feedback OS_experimental_feedback_5_2_2
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
define feedback OS_experimental_feedback_5_2_3
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
define feedback OS_experimental_feedback_5_2_4
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
define feedback OS_experimental_feedback_5_3_1
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
define feedback OS_experimental_feedback_5_3_2
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
define feedback OS_experimental_feedback_5_3_3
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
define feedback OS_experimental_feedback_5_3_4
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
define feedback OS_experimental_feedback_6_1_1
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
define feedback OS_experimental_feedback_6_1_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_6_1] letters in the correct order. <br /><br />The next block will contain a sequence of 6 equations and 6 letters. <br /><br />Press any key to start this block!<br />" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_6_1_3
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
define feedback OS_experimental_feedback_6_1_4
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
define feedback OS_experimental_feedback_6_2_1
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
define feedback OS_experimental_feedback_6_2_2
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
define feedback OS_experimental_feedback_6_2_3
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
define feedback OS_experimental_feedback_6_2_4
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
define feedback OS_experimental_feedback_6_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_6_3] letters in the correct order.  <br /><br />You completed all experimental blocks.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_6_3_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_6_3] letters in the correct order.  <br /><br />You completed all experimental blocks.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_6_3_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_subblock_6_3] letter in the correct order.  <br /><br />You completed all experimental blocks.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define feedback OS_experimental_feedback_6_3_4
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_subblock_6_3] letter in the correct order.  <br /><br />You completed all experimental blocks.<br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define sketchpad OS_experimental_fixation_dot_2
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OS_experimental_fixation_dot_3
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OS_experimental_fixation_dot_4
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OS_experimental_fixation_dot_5
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad OS_experimental_fixation_dot_6
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define keyboard_response OS_experimental_keyboard_response_2
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define keyboard_response OS_experimental_keyboard_response_3
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define keyboard_response OS_experimental_keyboard_response_4
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define keyboard_response OS_experimental_keyboard_response_5
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define keyboard_response OS_experimental_keyboard_response_6
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define loop OS_experimental_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run OS_experimental_block_sequence_2

define loop OS_experimental_loop_3
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run OS_experimental_block_sequence_3

define loop OS_experimental_loop_4
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run OS_experimental_block_sequence_4

define loop OS_experimental_loop_5
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run OS_experimental_block_sequence_5

define loop OS_experimental_loop_6
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run OS_experimental_block_sequence_6

define reset_feedback OS_experimental_reset_feedback_2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback OS_experimental_reset_feedback_3
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback OS_experimental_reset_feedback_4
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback OS_experimental_reset_feedback_5
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback OS_experimental_reset_feedback_6
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script OS_experimental_score_sub_block_2
	set description "Executes Python code"
	___run__
	##Calculates the score of the participants in the memory subtasks in ##each of the 3 sub-blocks of tis loop.
	if var.count_OS_experimental_reset_feedback_2 == 0:
	    var.score_subblock_2_1 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_2 == 1:
	    var.score_subblock_2_2 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_2 == 2:
	    var.score_subblock_2_3 = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_score_sub_block_3
	set description "Executes Python code"
	___run__
	##Calculates the score of the participants in the memory subtasks in ##each of the 3 sub-blocks of tis loop.
	if var.count_OS_experimental_reset_feedback_3 == 0:
	    var.score_subblock_3_1 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_3 == 1:
	    var.score_subblock_3_2 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_3 == 2:
	    var.score_subblock_3_3 = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_score_sub_block_4
	set description "Executes Python code"
	___run__
	##Calculates the score of the participants in the memory subtasks in ##each of the 3 sub-blocks of tis loop.
	if var.count_OS_experimental_reset_feedback_4 == 0:
	    var.score_subblock_4_1 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_4 == 1:
	    var.score_subblock_4_2 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_4 == 2:
	    var.score_subblock_4_3 = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_score_sub_block_5
	set description "Executes Python code"
	___run__
	##Calculates the score of the participants in the memory subtasks in ##each of the 3 sub-blocks of tis loop.
	if var.count_OS_experimental_reset_feedback_5 == 0:
	    var.score_subblock_5_1 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_5 == 1:
	    var.score_subblock_5_2 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_5 == 2:
	    var.score_subblock_5_3 = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_score_sub_block_6
	set description "Executes Python code"
	___run__
	##Calculates the score of the participants in the memory subtasks in ##each of the 3 sub-blocks of tis loop.
	if var.count_OS_experimental_reset_feedback_6 == 0:
	    var.score_subblock_6_1 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_6 == 1:
	    var.score_subblock_6_2 = var.agrregate_score_memory
	if var.count_OS_experimental_reset_feedback_6 == 2:
	    var.score_subblock_6_3 = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_score_subblock_practice
	set description "Executes Python code"
	___run__
	##Calculates the score of the participant in the memory subtask of the ##practice block. 
	score_practice += var.agrregate_score_memory
	if var.count_OS_practice_reset_feedback == 1:
	    var.score_practice = score_practice/4
	
	var.score_practice_feedback = var.agrregate_score_memory
	
	var.agrregate_score_memory = 0
	__end__
	set _prepare ""

define inline_script OS_experimental_script_claculate_total_score
	set description "Executes Python code"
	___run__
	##Cáculo do score no Reading Span (apenas considera a sub-tarefa de memória)
	var.score_operation_span = (var.score_subblock_2_1 + var.score_subblock_2_2 + var.score_subblock_2_3 + var.score_subblock_3_1 + var.score_subblock_3_2 + var.score_subblock_3_3 + var.score_subblock_4_1 + var.score_subblock_4_2 + var.score_subblock_4_3 + var.score_subblock_5_1 + var.score_subblock_5_2 + var.score_subblock_5_3 + var.score_subblock_6_1 + var.score_subblock_6_2 + var.score_subblock_6_3)/60
	
	var.SubTaskName = ''
	__end__
	set _prepare ""

define inline_script OS_experimental_script_create_experimental_table_defining_weights_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 2
	
	##Creation of the datamtrix that will be used in the loop practice block loop.
	items['OS_experimental_block_loop_2'].dm = DataMatrix(length=30)
	
	items['OS_experimental_block_loop_2'].dm.Bloco = ['1', '1', '2', '2', '3', '3', '4', '4', '5', '5', '6', '6', '7', '7', '8', '8', '9', '9', '10', '10', '11', '11', '12', '12', '13', '13', '14', '14', '15', '15']
	
	
	items['OS_experimental_block_loop_2'].dm.Tipo = ['EC*+', 'EI/-', 'EC*-', 'EI/+', 'EI*+', 'EC*-', 'EI*-', 'EC/-', 'EC/+', 'EI*-', 'EC*+', 'EI/-', 'EI/+', 'EC*+', 'EI*+', 'EC*-', 'EC/-', 'EI*+', 'EC/+', 'EI*-', 'EI/-', 'EC/+', 'EI/+', 'EC*+', 'EC*-', 'EI/+', 'EC/-', 'EI*+', 'EI*-', 'EC/-']
	
	
	items['OS_experimental_block_loop_2'].dm.Equations = ['(6 * 2) + 1 = 13', '(6 / 2) - 1 = 3', '(3 * 4) - 3 = 9', '(6 / 2) + 4 = 8', '(3 * 5) + 5 = 19', '(3 * 6) - 9 = 9', '(2 * 6) - 5 = 8', '(8 / 2) - 3 = 1', '(8 / 2) + 5 = 9', '(4 * 2) - 2 = 7', '(2 * 5) + 9 = 19', '(9 / 3) - 2 = 2', '(8 / 2) + 3 = 6', '(5 * 2) + 4 = 14', '(2 * 4) + 1 = 8', '(2 * 8) - 7 = 9', '(8 / 4) - 1 = 1', '(6 * 2) + 4 = 17', '(9 / 3) + 1 = 4', '(2 * 4) - 4 = 5', '(6 / 2) - 2 = 2', '(4 / 2) + 6 = 8', '(8 / 2) + 2 = 4', '(3 * 3) + 5 = 14', '(6 * 2) - 7 = 5', '(8 / 2) + 4 = 6', '(6 / 3) - 1 = 1', '(2 * 6) + 1 = 12', '(4 * 4) - 8 = 6', '(8 / 4) - 1 = 1']
	
	
	##Declaration of the variable fsd. This variable contains the ID (block number from 1 ##to 15) to which each equation belongs to.
	var.fsd = [1, 1, 2, 2, 3, 3, 4, 4, 5, 5, 6, 6, 7, 7, 8, 8, 9, 9, 10, 10, 11, 11, 12, 12, 13, 13, 14, 14, 15, 15]
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	var.sw = []
	
	for x in var.fsd:
	    if var.BlockChoice == x:
	        var.sw.append('1')
	    else:
	        var.sw.append('0')
	
	items['OS_experimental_block_loop_2'].dm.w = var.sw
	
	
	if var.count_OS_experimental_reset_feedback_2 == 0:
	    var.TrialNumber = 1
	else:
	    var.TrialNumber = var.TrialNumber + 1
	
	TrialNumberRef = var.TrialNumber
	
	
	if var.count_OS_experimental_reset_feedback_2 == 0:
	    var.subblock = '2.1'
	if var.count_OS_experimental_reset_feedback_2 == 1:
	    var.subblock = '2.2'
	if var.count_OS_experimental_reset_feedback_2 == 2:
	    var.subblock = '2.3'
	__end__

define inline_script OS_experimental_script_create_experimental_table_defining_weights_2_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory 
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 'practice'
	
	##Creation of the datamtrix that will be used in the loop practice block loop.
	items['OS_practice_block_loop'].dm = DataMatrix(length=4)
	
	items['OS_practice_block_loop'].dm.Bloco = ['practice', 'practice', 'practice', 'practice']
	
	items['OS_practice_block_loop'].dm.Tipo = ['EC*+','EI/-','EI*-','EC/+']
	
	items['OS_practice_block_loop'].dm.Equations = ['(2*5) + 6 = 16','(8/2) - 2 = 3','(3*6) - 7 = 12','(4/2) + 8 = 10']
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	
	
	if var.count_OS_practice_reset_feedback == 0:
	    items['OS_practice_block_loop'].dm.w = ['1','1','0','0']
	else:
	    items['OS_practice_block_loop'].dm.w = ['0','0','1','1']
	
	
	
	
	if var.count_OS_practice_reset_feedback == 0:
	    var.TrialNumber = 1
	else:
	    var.TrialNumber = var.TrialNumber + 1
	
	TrialNumberRef = var.TrialNumber
	__end__

define inline_script OS_experimental_script_create_experimental_table_defining_weights_3
	set description "Executes Python code"
	set _run ""
	___prepare__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory.
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 3
	
	##Creation of the datamtrix that will be used in the experimental_block_loop_3.
	items['OS_experimental_block_loop_3'].dm = DataMatrix(length=45)
	
	items['OS_experimental_block_loop_3'].dm.Bloco = ['1', '1', '1', '2', '2', '2', '3', '3', '3', '4', '4', '4', '5', '5', '5', '6', '6', '6', '7', '7', '7', '8', '8', '8', '9', '9', '9', '10', '10', '10', '11', '11', '11', '12', '12', '12', '13', '13', '13', '14', '14', '14', '15', '15', '15']
	
	items['OS_experimental_block_loop_3'].dm.Tipo = ['EC/+', 'EI*-', 'EC/-', 'EC*+', 'EI/-', 'EI*-', 'EI/+', 'EC*+', 'EI/-', 'EI*+', 'EC*-', 'EC*+', 'EC/-', 'EI*+', 'EC*-', 'EC/+', 'EI*-', 'EI*+', 'EI/-', 'EC/+', 'EI*-', 'EI/+', 'EC*+', 'EC/+', 'EC*-', 'EI/+', 'EC*+', 'EC/-', 'EI*+', 'EI/+', 'EI*-', 'EC/-', 'EI*+', 'EI/-', 'EC/+', 'EC/-', 'EC*+', 'EI/-', 'EC/+', 'EC*-', 'EI/+', 'EI/-', 'EI*+', 'EC*-', 'EI/+']
	
	items['OS_experimental_block_loop_3'].dm.Equations = ['(9 / 3) + 3 = 6', '(3 * 5) - 2 = 14', '(9 / 3) - 1 = 2', '(2 * 8) + 3 = 19', '(8 / 4) - 1 = 2', '(2 * 6) - 2 = 11', '(9 / 3) + 2 = 6', '(2 * 5) + 3 = 13', '(8 / 4) - 1 = 2', '(4 * 3) + 7 = 18', '(6 * 2) - 5 = 7', '(3 * 2) + 8 = 14', '(8 / 4) - 1 = 1', '(3 * 2) + 5 = 10', '(5 * 4) - 5 = 15', '(4 / 2) + 6 = 8', '(2 * 5) - 8 = 3', '(3 * 2) + 4 = 9', '(6 / 3) - 1 = 2', '(8 / 4) + 2 = 4', '(9 * 2) - 4 = 13', '(6 / 2) + 8 = 10', '(2 * 2) + 6 = 10', '(6 / 2) + 9 = 12', '(4 * 4) - 5 = 11', '(6 / 2) + 8 = 12', '(3 * 3) + 4 = 13', '(6 / 2) - 2 = 1', '(2 * 2) + 3 = 6', '(6 / 3) + 1 = 4', '(2 * 6) - 8 = 5', '(9 / 3) - 2 = 1', '(2 * 8) + 2 = 19', '(6 / 2) - 1 = 1', '(4 / 2) + 4 = 6', '(4 / 2) - 1 = 2', '(4 * 2) + 6 = 14', '(8 / 2) - 1 = 2', '(6 / 2) + 6 = 9', '(9 * 2) - 8 = 10', '(6 / 3) + 8 = 9', '(6 / 3) - 1 = 2', '(3 * 2) + 9 = 13', '(5 * 2) - 8 = 2', '(6 / 3) + 6 = 7']
	
	
	##Declaration of the variable fsd. This variable contains the ID (block number from 1 ##to 15) to which each equation belongs to.
	var.fsd = [1, 1, 1, 2, 2, 2, 3, 3, 3, 4, 4, 4, 5, 5, 5, 6, 6, 6, 7, 7, 7, 8, 8, 8, 9, 9, 9, 10, 10, 10, 11, 11, 11, 12, 12, 12, 13, 13, 13, 14, 14, 14, 15, 15, 15]
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	var.sw = []
	
	for x in var.fsd:
	    if var.BlockChoice == x:
	        var.sw.append('1')
	    else:
	        var.sw.append('0')
	
	items['OS_experimental_block_loop_3'].dm.w = var.sw
	
	var.TrialNumber = var.TrialNumber + 1
	TrialNumberRef = var.TrialNumber 
	
	if var.count_OS_experimental_reset_feedback_3 == 0:
	    var.subblock = '3.1'
	if var.count_OS_experimental_reset_feedback_3 == 1:
	    var.subblock = '3.2'
	if var.count_OS_experimental_reset_feedback_3 == 2:
	    var.subblock = '3.3'
	__end__

define inline_script OS_experimental_script_create_experimental_table_defining_weights_4
	set description "Executes Python code"
	___run__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory.
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 4
	
	##Creation of the datamtrix that will be used in the loop experimental block loop 4.
	items['OS_experimental_block_loop_4'].dm = DataMatrix(length=60)
	
	items['OS_experimental_block_loop_4'].dm.Bloco = ['1', '1', '1', '1', '2', '2', '2', '2', '3', '3', '3', '3', '4', '4', '4', '4', '5', '5', '5', '5', '6', '6', '6', '6', '7', '7', '7', '7', '8', '8', '8', '8', '9', '9', '9', '9', '10', '10', '10', '10', '11', '11', '11', '11', '12', '12', '12', '12', '13', '13', '13', '13', '14', '14', '14', '14', '15', '15', '15', '15']
	
	
	items['OS_experimental_block_loop_4'].dm.Tipo = ['EI*+', 'EC*-', 'EI/+', 'EI/-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC/+', 'EI*-', 'EC/-', 'EC*-', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI/+', 'EC*+', 'EI/-', 'EI*-', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/-', 'EI*+', 'EC*-', 'EC*+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/-', 'EC/+', 'EI*-', 'EI*+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC*-', 'EI/+', 'EC*+', 'EC/+', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI*-', 'EC/-', 'EI*+', 'EI/+', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*+', 'EI/-', 'EC/+', 'EC/-']
	
	items['OS_experimental_block_loop_4'].dm.Equations = ['(2 * 9) + 1 = 18', '(6 * 2) - 7 = 5', '(8 / 4) + 7 = 10', '(8 / 4) - 1 = 2', '(9 / 3) - 2 = 1', '(4 * 3) + 6 = 16', '(2 * 2) - 3 = 1', '(4 / 2) + 1 = 2', '(6 / 3) + 4 = 6', '(4 * 3) - 5 = 8', '(4 / 2) - 1 = 1', '(2 * 8) - 2 = 14', '(6 / 3) - 1 = 2', '(8 / 2) + 1 = 5', '(4 * 5) - 2 = 16', '(4 / 2) - 1 = 1', '(8 / 4) + 5 = 5', '(5 * 2) + 3 = 13', '(6 / 3) - 1 = 2', '(2 * 2) - 2 = 3', '(5 * 4) - 9 = 11', '(6 / 2) + 7 = 9', '(2 * 9) + 1 = 19', '(9 / 3) - 2 = 2', '(8 / 2) - 3 = 1', '(2 * 6) + 8 = 19', '(7 * 2) - 1 = 13', '(2 * 6) + 7 = 19', '(3 * 5) - 9 = 7', '(8 / 4) - 1 = 1', '(3 * 5) + 4 = 17', '(4 * 2) - 1 = 7', '(9 / 3) - 1 = 3', '(8 / 2) + 4 = 8', '(9 * 2) - 9 = 7', '(2 * 9) + 2 = 19', '(2 * 2) + 4 = 8', '(6 / 2) - 1 = 1', '(8 / 4) + 8 = 10', '(6 * 3) - 2 = 15', '(5 * 3) - 6 = 9', '(4 / 2) + 2 = 3', '(2 * 3) + 6 = 12', '(8 / 4) + 4 = 6', '(2 * 5) + 3 = 12', '(3 * 5) - 3 = 12', '(8 / 4) + 8 = 8', '(3 * 2) + 4 = 10', '(2 * 6) - 7 = 3', '(4 / 2) - 1 = 1', '(3 * 2) + 4 = 8', '(6 / 3) + 1 = 1', '(8 / 4) + 6 = 8', '(6 * 2) - 9 = 1', '(6 / 3) - 1 = 1', '(2 * 5) + 7 = 16', '(2 * 6) + 3 = 15', '(6 / 2) - 2 = 2', '(8 / 4) + 5 = 7', '(8 / 2) - 1 = 3']
	
	
	##Declaration of the variable fsd. This variable contains the ID (block number from 1 ##to 15) to which each equation belongs to.
	var.fsd = [1, 1, 1, 1, 2, 2, 2, 2, 3, 3, 3, 3, 4, 4, 4, 4, 5, 5, 5, 5, 6, 6, 6, 6, 7, 7, 7, 7, 8, 8, 8, 8, 9, 9, 9, 9, 10, 10, 10, 10, 11, 11, 11, 11, 12, 12, 12, 12, 13, 13, 13, 13, 14, 14, 14, 14, 15, 15, 15, 15]
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	var.sw = []
	
	for x in var.fsd:
	    if var.BlockChoice == x:
	        var.sw.append('1')
	    else:
	        var.sw.append('0')
	
	items['OS_experimental_block_loop_4'].dm.w = var.sw
	
	var.TrialNumber = var.TrialNumber + 1
	TrialNumberRef = var.TrialNumber 
	
	if var.count_OS_experimental_reset_feedback_4 == 0:
	    var.subblock = '4.1'
	if var.count_OS_experimental_reset_feedback_4 == 1:
	    var.subblock = '4.2'
	if var.count_OS_experimental_reset_feedback_4 == 2:
	    var.subblock = '4.3'
	__end__
	set _prepare ""

define inline_script OS_experimental_script_create_experimental_table_defining_weights_5
	set description "Executes Python code"
	set _run ""
	___prepare__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 5
	
	##Creation of the datamtrix that will be used in the experimental_block_loop_5.
	items['OS_experimental_block_loop_5'].dm = DataMatrix(length=75)
	
	items['OS_experimental_block_loop_5'].dm.Bloco = ['1', '1', '1', '1', '1', '2', '2', '2', '2', '2', '3', '3', '3', '3', '3', '4', '4', '4', '4', '4', '5', '5', '5', '5', '5', '6', '6', '6', '6', '6', '7', '7', '7', '7', '7', '8', '8', '8', '8', '8', '9', '9', '9', '9', '9', '10', '10', '10', '10', '10', '11', '11', '11', '11', '11', '12', '12', '12', '12', '12', '13', '13', '13', '13', '13', '14', '14', '14', '14', '14', '15', '15', '15', '15', '15']
	
	items['OS_experimental_block_loop_5'].dm.Tipo = ['EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EC*+', 'EI/-', 'EC/+', 'EC/-', 'EI*+', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EI*+', 'EC*-', 'EI/+', 'EI/-', 'EC/+', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EC/+', 'EI*-', 'EC/-', 'EC*-', 'EI/+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EI/+', 'EC*+', 'EI/-', 'EI*-', 'EC/-', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EC/-', 'EI*+', 'EC*-', 'EC*+', 'EI/-', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EI/-', 'EC/+', 'EI*-', 'EI*+', 'EC*-', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EC*-', 'EI/+', 'EC*+', 'EC/+', 'EI*-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-']
	
	
	items['OS_experimental_block_loop_5'].dm.Equations = ['(9 / 3) + 3 = 6', '(4 * 2) - 7 = 2', '(6 / 2) - 2 = 1', '(5 * 3) + 4 = 20', '(2 * 6) - 7 = 5', '(6 * 2) + 4 = 16', '(6 / 3) - 1 = 2', '(6 / 2) + 5 = 8', '(6 / 2) - 2 = 1', '(3 * 6) + 2 = 19', '(4 / 2) + 8 = 8', '(4 * 2) + 4 = 12', '(6 / 3) - 1 = 2', '(8 / 2) + 5 = 9', '(4 * 2) - 3 = 4', '(3 * 6) + 1 = 18', '(3 * 5) - 9 = 6', '(8 / 4) + 4 = 5', '(8 / 2) - 3 = 2', '(6 / 3) + 6 = 8', '(4 / 2) - 1 = 1', '(3 * 2) + 6 = 13', '(6 * 2) - 1 = 11', '(6 / 2) + 8 = 9', '(9 * 2) + 2 = 20', '(9 / 3) + 5 = 8', '(5 * 4) - 4 = 15', '(8 / 2) - 2 = 2', '(2 * 6) - 5 = 7', '(6 / 3) + 9 = 12', '(8 / 2) - 2 = 1', '(9 / 3) + 1 = 4', '(4 * 4) - 9 = 8', '(4 / 2) - 1 = 1', '(2 * 6) + 1 = 14', '(6 / 3) + 8 = 9', '(6 * 2) + 8 = 20', '(8 / 2) - 1 = 1', '(2 * 3) - 5 = 2', '(9 / 3) - 1 = 2', '(5 * 2) - 8 = 2', '(6 / 2) + 4 = 6', '(3 * 4) + 5 = 17', '(9 / 3) - 1 = 1', '(6 / 2) + 3 = 6', '(9 / 3) - 2 = 1', '(4 * 3) + 3 = 14', '(8 * 2) - 8 = 8', '(2 * 2) + 7 = 11', '(8 / 2) - 2 = 3', '(3 * 6) - 8 = 8', '(4 / 2) - 1 = 1', '(2 * 3) + 4 = 8', '(4 * 3) - 4 = 8', '(4 / 2) + 4 = 5', '(6 / 2) - 1 = 3', '(8 / 4) + 4 = 6', '(2 * 4) - 4 = 3', '(2 * 2) + 9 = 11', '(2 * 5) - 2 = 8', '(3 * 5) + 2 = 17', '(8 / 2) - 2 = 1', '(4 / 2) + 2 = 4', '(6 * 2) - 3 = 7', '(8 / 2) - 3 = 1', '(5 * 3) - 2 = 13', '(8 / 4) + 4 = 4', '(2 * 3) + 5 = 11', '(6 / 2) + 2 = 5', '(2 * 6) - 6 = 5', '(2 * 5) + 2 = 11', '(2 * 4) - 2 = 6', '(9 / 3) + 6 = 7', '(2 * 3) + 6 = 12', '(6 / 2) - 1 = 1'] 
	
	
	##Declaration of the variable fsd. This variable contains the ID (block number from 1 ##to 15) to which each equation belongs to.
	var.fsd = [1, 1, 1, 1, 1, 2, 2, 2, 2, 2, 3, 3, 3, 3, 3, 4, 4, 4, 4, 4, 5, 5, 5, 5, 5, 6, 6, 6, 6, 6, 7, 7, 7, 7, 7, 8, 8, 8, 8, 8, 9, 9, 9, 9, 9, 10, 10, 10, 10, 10, 11, 11, 11, 11, 11, 12, 12, 12, 12, 12, 13, 13, 13, 13, 13, 14, 14, 14, 14, 14, 15, 15, 15, 15, 15]
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	var.sw = []
	
	for x in var.fsd:
	    if var.BlockChoice == x:
	        var.sw.append('1')
	    else:
	        var.sw.append('0')
	
	items['OS_experimental_block_loop_5'].dm.w = var.sw
	
	
	var.TrialNumber = var.TrialNumber + 1
	TrialNumberRef = var.TrialNumber 
	
	if var.count_OS_experimental_reset_feedback_5 == 0:
	    var.subblock = '5.1'
	if var.count_OS_experimental_reset_feedback_5 == 1:
	    var.subblock = '5.2'
	if var.count_OS_experimental_reset_feedback_5 == 2:
	    var.subblock = '5.3'
	__end__

define inline_script OS_experimental_script_create_experimental_table_defining_weights_6
	set description "Executes Python code"
	set _run ""
	___prepare__
	from datamatrix import DataMatrix
	
	##Reinitialization of the variables response_average_time_memory and ##response_total_time_memory.
	var.response_average_time_memory = 0
	var.response_total_time_memory = 0
	
	##Initialization of the variable Sub_bloco.
	##This variable will be used as an index to help to interpret the logg files.
	var.Sub_bloco = 6
	
	##Creation of the datamtrix that will be used in the experimental_block_loop_6.
	items['OS_experimental_block_loop_6'].dm = DataMatrix(length=90)
	
	items['OS_experimental_block_loop_6'].dm.Bloco = ['1', '1', '1', '1', '1', '1', '2', '2', '2', '2', '2', '2', '3', '3', '3', '3', '3', '3', '4', '4', '4', '4', '4', '4', '5', '5', '5', '5', '5', '5', '6', '6', '6', '6', '6', '6', '7', '7', '7', '7', '7', '7', '8', '8', '8', '8', '8', '8', '9', '9', '9', '9', '9', '9', '10', '10', '10', '10', '10', '10', '11', '11', '11', '11', '11', '11', '12', '12', '12', '12', '12', '12', '13', '13', '13', '13', '13', '13', '14', '14', '14', '14', '14', '14', '15', '15', '15', '15', '15', '15']
	
	items['OS_experimental_block_loop_6'].dm.Tipo = ['EI/+', 'EC*+', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EC/-', 'EI*+', 'EC*-', 'EI/+', 'EC*+', 'EI/-', 'EC/+', 'EI*-', 'EI*+', 'EC*-', 'EI/+', 'EC*+']
	
	items['OS_experimental_block_loop_6'].dm.Equations = ['(8 / 4) + 3 = 4', '(2 * 2) + 4 = 8', '(9 / 3) + 7 = 10', '(6 * 3) - 6 = 13', '(8 / 2) - 3 = 1', '(6 * 2) + 6 = 16', '(2 * 7) - 9 = 5', '(8 / 2) + 3 = 8', '(3 * 4) + 3 = 15', '(6 / 3) - 1 = 2', '(6 / 2) + 2 = 5', '(2 * 3) - 5 = 2', '(8 / 4) - 1 = 1', '(5 * 3) + 4 = 20', '(8 / 2) + 1 = 6', '(6 * 2) + 4 = 16', '(8 / 4) - 1 = 2', '(6 / 3) + 4 = 6', '(4 * 3) - 1 = 10', '(6 / 2) - 1 = 2', '(2 * 4) + 1 = 7', '(4 * 2) - 2 = 6', '(8 / 4) + 9 = 10', '(3 * 5) + 5 = 20', '(4 / 2) - 1 = 2', '(6 / 2) + 7 = 10', '(9 / 3) - 1 = 2', '(7 * 2) + 5 = 18', '(6 * 3) - 6 = 12', '(8 / 2) + 1 = 4', '(2 * 5) + 1 = 11', '(4 / 2) - 1 = 2', '(9 / 3) + 5 = 8', '(8 * 2) - 1 = 14', '(8 / 4) - 1 = 1', '(2 * 9) + 1 = 18', '(8 * 2) - 5 = 11', '(8 / 2) + 6 = 11', '(4 / 2) - 1 = 2', '(6 / 2) + 3 = 6', '(2 * 8) - 6 = 11', '(6 / 3) - 1 = 1', '(6 * 2) + 2 = 13', '(7 * 2) - 1 = 13', '(9 / 3) + 5 = 7', '(6 * 3) + 2 = 20', '(6 / 2) - 1 = 3', '(9 / 3) + 5 = 8', '(2 * 3) - 1 = 3', '(6 / 3) - 1 = 1', '(3 * 4) - 9 = 3', '(6 / 3) + 3 = 4', '(6 * 3) + 1 = 19', '(6 / 2) - 1 = 1', '(4 / 2) + 3 = 5', '(3 * 2) - 5 = 2', '(4 / 2) - 1 = 1', '(5 * 2) + 4 = 13', '(4 * 3) - 9 = 3', '(8 / 2) + 9 = 11', '(4 * 3) + 4 = 16', '(6 / 2) - 1 = 1', '(6 * 3) - 9 = 7', '(6 / 2) - 1 = 2', '(3 * 4) + 4 = 17', '(9 * 2) - 5 = 13', '(9 / 3) + 4 = 6', '(2 * 7) + 2 = 16', '(8 / 2) - 3 = 2', '(9 / 3) + 8 = 11', '(3 * 4) - 8 = 2', '(6 / 2) - 2 = 1', '(5 * 2) + 8 = 19', '(3 * 3) - 8 = 1', '(4 * 3) + 2 = 14', '(4 / 2) - 1 = 2', '(4 / 2) + 1 = 3', '(2 * 8) - 4 = 10', '(8 / 2) - 2 = 2', '(4 * 4) + 1 = 15', '(2 * 9) - 8 = 10', '(9 / 3) + 1 = 2', '(6 * 3) + 2 = 20', '(8 / 4) - 1 = 2', '(6 / 3) + 8 = 10', '(3 * 2) - 1 = 4', '(5 * 2) + 8 = 17', '(7 * 2) - 5 = 9', '(6 / 2) + 1 = 3', '(4 * 2) + 8 = 16'] 
	
	
	##Declaration of the variable fsd. This variable contains the ID (block number from 1 ##to 15) to which each equation belongs to.
	var.fsd = [1, 1, 1, 1, 1, 1, 2, 2, 2, 2, 2, 2, 3, 3, 3, 3, 3, 3, 4, 4, 4, 4, 4, 4, 5, 5, 5, 5, 5, 5, 6, 6, 6, 6, 6, 6, 7, 7, 7, 7, 7, 7, 8, 8, 8, 8, 8, 8, 9, 9, 9, 9, 9, 9, 10, 10, 10, 10, 10, 10, 11, 11, 11, 11, 11, 11, 12, 12, 12, 12, 12, 12, 13, 13, 13, 13, 13, 13, 14, 14, 14, 14, 14, 14, 15, 15, 15, 15, 15, 15]
	
	##Declaration and filling of the variable sw.
	##This varable will select the sentences that will be presented in the this sub_bloco .
	##This variables will be selected if the value of the variable Bloco (computed with the variable fsd) is equal to the variable BlockChoice.
	var.sw = []
	
	for x in var.fsd:
	    if var.BlockChoice == x:
	        var.sw.append('1')
	    else:
	        var.sw.append('0')
	
	items['OS_experimental_block_loop_6'].dm.w = var.sw
	
	var.TrialNumber = var.TrialNumber + 1
	TrialNumberRef = var.TrialNumber 
	
	if var.count_OS_experimental_reset_feedback_6 == 0:
	    var.subblock = '6.1'
	if var.count_OS_experimental_reset_feedback_6 == 1:
	    var.subblock = '6.2'
	if var.count_OS_experimental_reset_feedback_6 == 2:
	    var.subblock = '6.3'
	__end__

define form_text_input OS_experimental_text_input_2_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_2_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_3_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_3_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_3_3
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the third letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_4_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_4_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_4_3
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the third letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_4_4
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the fourth letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_5_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_5_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_5_3
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the third letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_5_4
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the fourth letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_5_5
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Repita a fifth letra que lhe foi apresentada: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_3
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the third letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_4
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the fourth letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_5
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the fifth letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_experimental_text_input_6_6
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the sixth letter that was presented:"
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence OS_experimental_trial_sequence_2
	set flush_keyboard yes
	set description "A single trial"
	run OS_experimental_correct_response_2 always
	run OS_experimental_fixation_dot_2 always
	run OS_experimental_equation_display_2 always
	run OS_experimental_keyboard_response_2 always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define sequence OS_experimental_trial_sequence_4
	set flush_keyboard yes
	set description "A single trial"
	run OS_experimental_correct_response_4 always
	run OS_experimental_fixation_dot_4 always
	run OS_experimental_equation_display_4 always
	run OS_experimental_keyboard_response_4 always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define sequence OS_experimental_trial_sequence_5
	set flush_keyboard yes
	set description "A single trial"
	run OS_experimental_correct_response_5 always
	run OS_experimental_fixation_dot_5 always
	run OS_experimental_equation_display_5 always
	run OS_experimental_keyboard_response_5 always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define sequence OS_experimental_trial_sequence_6
	set flush_keyboard yes
	set description "A single trial"
	run OS_experimental_correct_response_6 always
	run OS_experimental_fixation_dot_6 always
	run OS_experimental_equation_display_6 always
	run OS_experimental_keyboard_response_6 always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define inline_script OS_general_calculo_rt_total_and_average_memory
	set description "Executes Python code"
	___run__
	##Saves the total time the participant took in the memory subtask in ##this block.
	var.response_total_time_memory = var.response_total_time_memory + var.response_time_memory
	
	##Saves the total time the participant took in the processing subtask in ##this block.
	var.response_total_time_processing = var.total_response_time
	
	##Calculates the average RT of the participant in this sub-bloc.
	if var.practice == 'yes':
	    var.response_average_time_memory = (var.response_total_time_memory/2)
	else:
	    var.response_average_time_memory = (var.response_total_time_memory/var.Sub_bloco)
	__end__
	set _prepare ""

define inline_script OS_general_calculo_rt_total_memory
	set description "Executes Python code"
	___run__
	##Saves the total time the participant took in the memory subtask in ##this block.
	var.response_total_time_memory = var.response_total_time_memory + var.response_time_memory
	__end__
	set _prepare ""

define inline_script OS_general_cornometro_fim
	set description "Executes Python code"
	___run__
	##Saves the RT of the participant in eachtrial of the memory subtask.
	end = round(time.time() * 1000)
	
	var.response_time_memory = end - start
	
	##Saves the response of the participant in eachtrial of the memory ##subtask.
	var.response_memory = var.response
	
	var.List_responses_memory.append(var.response_memory)
	
	##Scores the response of the participant in each trial of the memory ##subtask.
	if var.response_memory == var.List_Prev_Letter[var.Big_i]:
	    var.correct = 1
	    var.correct_response = var.List_Prev_Letter[var.Big_i]
	    var.Big_i = var.Big_i + 1
	else:
	    var.correct = 0
	    var.correct_response = var.List_Prev_Letter[var.Big_i]
	    var.Big_i = var.Big_i + 1
	
	##Sums the number of correct responses in the sub-block.
	var.agrregate_score_memory = var.agrregate_score_memory + var.correct
	__end__
	set _prepare ""

define inline_script OS_general_cronometro_init
	set description "Executes Python code"
	___run__
	##Initializes the chornometer that will measure the RT of the ##participant in each trial of the memory subtask.
	import time
	
	start = round(time.time() * 1000)
	__end__
	set _prepare ""

define inline_script OS_general_script_generate_to_be_remembered_letter
	set description "Executes Python code"
	___run__
	###Exibição da to-be-remembered letter (durante 1000ms)
	var.c.show()
	clock.sleep(995)
	__end__
	___prepare__
	##Creates the canvas and selects the to-be-remembered letter that will ##be displayed in each trial of the to-be-remembered letter. 
	var.c = Canvas()
	
	alphabet_list = ['b','c','d','f','g','p','q','t','v','x','z']
	
	##Chooses the next letter that will be displayed.
	var.letter = random.choice(alphabet_list)
	
	##Ensures that the next letter to be displayed ahs not been presented ##in previous trials of the block.
	while var.letter in var.List_Prev_Letter:
	    var.letter = random.choice(alphabet_list)
	var.List_Prev_Letter.append(var.letter)
	
	var.Temp_Prev_Letter = var.List_Prev_Letter
	var.List_Prev_Letter = ''
	
	var.c.text(var.letter, x=0, y=0, color = 'white', font_size = var.FontSize80Python, font_family = 'arial')
	__end__

define sketchpad OS_practice_Equation_display
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
define loop OS_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run OS_practice_trial_sequence

define inline_script OS_practice_correct_response
	set description "Executes Python code"
	set _run ""
	___prepare__
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	__end__

define feedback OS_practice_feedback_first_block
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_practice_feedback] letters in the correct order. <br /><br />The next practice block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start the next block!<br />" x=0 y=0 z_index=0

define feedback OS_practice_feedback_first_block_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_practice_feedback] letters in the correct order. <br /><br />The next practice block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_first_block_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_practice_feedback] letter in the correct order. <br /><br />The next practice block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_first_block_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_practice_feedback] letter in the correct order. <br /><br />The next practice block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_second_block
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_practice_feedback] letters in the correct order. <br /><br />You completed all practice blocks.<br /><br />You will now begin the experimental trials.<br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_second_block_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_practice_feedback] letters in the correct order. <br /><br />You completed all practice blocks.<br /><br />You will now begin the experimental trials.<br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_second_block_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trials. You were able to recall [score_practice_feedback] letter in the correct order. <br /><br />You completed all practice blocks.<br /><br />You will now begin the experimental trials.<br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define feedback OS_practice_feedback_second_block_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the results of the equations were correct/incorrect in [total_correct] trial. You were able to recall [score_practice_feedback] letter in the correct order. <br /><br />You completed all practice blocks.<br /><br />You will now begin the experimental trials.<br /><br />The next block will contain a sequence of 2 equations and 2 letters. <br /><br />Press any key to start this block!" x=0 y=0 z_index=0

define sketchpad OS_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define keyboard_response OS_practice_keyboard_response
	set timeout "[OP_part_process_time]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define loop OS_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run OS_block_sequence

define reset_feedback OS_practice_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define form_text_input OS_practice_text_input_2_1
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the first letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input OS_practice_text_input_2_2
	set timeout infinite
	set spacing "[NSSpacing1]"
	set rows "1;1;1;1;1"
	set only_render no
	set margins "[LSMargin1];[LSMargin1];[LSMargin1];[LSMargin1]"
	set form_var response
	set form_question "Type the second letter that was presented: "
	set description "A simple text input form"
	set cols "0.55;1;1.5;1;1;1"
	set _theme gray
	widget 0 1 6 1 label center=yes text="[form_question]"
	widget 1 2 1 1 text_input center=yes focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence OS_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run OS_practice_correct_response always
	run OS_practice_fixation_dot always
	run OS_practice_Equation_display always
	run OS_practice_keyboard_response always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define reset_feedback OS_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback OS_reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script OS_script_keep_response_processing_subtask
	set description "Executes Python code"
	___run__
	##Saves the responses and RT of the participants in each trial of ##the subprocessng task.
	var.response_time_processing = var.response_time
	
	var.response_processing = var.response
	__end__
	set _prepare ""

define inline_script SP_Calculate_Processing_Time
	set description "Executes Python code"
	___run__
	##Sets the maxmimal and minimal amount of time that the participants ##will have to state if the images are symmetrical or not in the ##symmetry span. If the participant take longer than 10.115 seconds or ##less than 1.520 to solve an equation the value of his RT will be ##replaced by 5.816 seconds. This value was the mean RT obtained in ##pilot tests (N=14).
	if var.response_time_processing > 10115 or var.response_time_processing < 1520:
	    var.response_time_processing = 4816
	
	var.SPRtList.append(var.response_time_processing)
	__end__
	set _prepare ""

define inline_script SP_IniLists
	set description "Executes Python code"
	___run__
	##Sets the list that will store the RTs of the participants and the ##list that stores the information that says if the answers of the ##participants are correct or not.
	import math, random
	
	var.SPRtList = []
	var.SPCorrectList = []
	
	var.Task_Name = "Symmetry Processing Task"
	__end__
	set _prepare ""

define inline_script SP_Init_List_Prev_Letter_Experimental
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initialization of variables.
	var.List_Prev_Square = []
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 10
	var.maxDys = 10
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.total_correct_processing = 0
	var.total_response_time_processing = 0
	__end__

define inline_script SP_Init_List_Prev_Letter_Practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Initialization of variables.
	var.List_Prev_Square = []
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 1
	var.maxDys = 1
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.total_correct_processing = 0
	var.total_response_time_processing = 0
	__end__

define inline_script SP_calculate_avg_dp_processing_time
	set description "Executes Python code"
	___run__
	import statistics
	
	##Sets the variable that will store the information regarding the ##amount of time each participant will have to state if the images are ##symmetrical or not in the Symmetry span - mean RT + 2.5 SD.
	var.SP_part_process_time = statistics.mean(var.SPRtList) + (2.5*statistics.stdev(var.SPRtList))
	
	##Rounds the variable SP_part_process_time. This value of this ##variable will be displayed to the participants in the instructions ##screen of the symmetry span.
	var.round_SP_part_time = str(round((var.SP_part_process_time*0.001), 2))
	__end__
	set _prepare ""

define loop SP_experimental_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 20
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 20
	run SP_experimental_trial_sequence

define feedback SP_experimental_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You correctely determined that the images were symmetrical\\dissymmetrical in [total_correct_processing] trials.<br /><br />Press any key to start the next task.<br />" x=0 y=0 z_index=0

define feedback SP_experimental_feedback1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You correctely determined that the images were symmetrical\\dissymmetrical in [total_correct_processing] trial.<br /><br />Press any key to start the next task." x=0 y=0 z_index=0

define sketchpad SP_experimental_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop SP_experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SP_experimental_sequence

define sequence SP_experimental_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SP_Init_List_Prev_Letter_Experimental always
	run SP_experimental_block_loop always
	run SP_calculate_avg_dp_processing_time always
	run SP_experimental_feedback "[total_correct_processing] != 1"
	run SP_experimental_feedback1 "[total_correct_processing] = 1"

define inline_script SP_experimental_symmetry_subtask_display
	set description "Executes Python code"
	___run__
	canv1.show()
	
	##Creation of the keyboard object that will collect information regarding which keys were pressed by the participant.
	my_keyboard = Keyboard(keylist=['1','2'])
	start_time = clock.time()
	var.key, end_time = my_keyboard.get_key()
	var.key = str(var.key)
	var.response_time_processing = end_time - start_time
	var.total_response_time_processing += var.response_time_processing
	var.response_processing = var.key
	my_keyboard.flush()
	
	
	if var.response_processing == var.correct_response:
	    var.correct = 1
	    var.total_correct_processing += 1
	else:
	    var.correct = 0
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the symmetrical/disymmetrical ##images.
	var.Temp_Prev_Square = []
	
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.5,var.height*-0.5),
	(var.width*-0.375,var.height*-0.5),
	(var.width*-0.25,var.height*-0.5),
	(var.width*-0.125,var.height*-0.5),
	(var.width*-0.5,var.height*-0.375),
	(var.width*-0.375,var.height*-0.375),
	(var.width*-0.25,var.height*-0.375),
	(var.width*-0.125,var.height*-0.375),
	(var.width*-0.5,var.height*-0.25),
	(var.width*-0.375,var.height*-0.25),
	(var.width*-0.25,var.height*-0.25),
	(var.width*-0.125,var.height*-0.25),
	(var.width*-0.5,var.height*-0.125),
	(var.width*-0.375,var.height*-0.125),
	(var.width*-0.25,var.height*-0.125),
	(var.width*-0.125,var.height*-0.125),
	(var.width*-0.5,var.height*0),
	(var.width*-0.375,var.height*0),
	(var.width*-0.25,var.height*0),
	(var.width*-0.125,var.height*0),
	(var.width*-0.5,var.height*0.125),
	(var.width*-0.375,var.height*0.125),
	(var.width*-0.25,var.height*0.125),
	(var.width*-0.125,var.height*0.125),
	(var.width*-0.5,var.height*0.25),
	(var.width*-0.375,var.height*0.25),
	(var.width*-0.25,var.height*0.25),
	(var.width*-0.125,var.height*0.25),
	(var.width*-0.5,var.height*0.375),
	(var.width*-0.375,var.height*0.375),
	(var.width*-0.25,var.height*0.375),
	(var.width*-0.125,var.height*0.375),
	(var.width*0,var.height*-0.5),
	(var.width*0.125,var.height*-0.5),
	(var.width*0.25,var.height*-0.5),
	(var.width*0.375,var.height*-0.5),
	(var.width*0,var.height*-0.375),
	(var.width*0.125,var.height*-0.375),
	(var.width*0.25,var.height*-0.375),
	(var.width*0.375,var.height*-0.375),
	(var.width*0,var.height*-0.25),
	(var.width*0.125,var.height*-0.25),
	(var.width*0.25,var.height*-0.25),
	(var.width*0.375,var.height*-0.25),
	(var.width*0,var.height*-0.125),
	(var.width*0.125,var.height*-0.125),
	(var.width*0.25,var.height*-0.125),
	(var.width*0.375,var.height*-0.125),
	(var.width*0,var.height*0),
	(var.width*0.125,var.height*0),
	(var.width*0.25,var.height*0),
	(var.width*0.375,var.height*0),
	(var.width*0,var.height*0.125),
	(var.width*0.125,var.height*0.125),
	(var.width*0.25,var.height*0.125),
	(var.width*0.375,var.height*0.125),
	(var.width*0,var.height*0.25),
	(var.width*0.125,var.height*0.25),
	(var.width*0.25,var.height*0.25),
	(var.width*0.375,var.height*0.25),
	(var.width*0,var.height*0.375),
	(var.width*0.125,var.height*0.375),
	(var.width*0.25,var.height*0.375),
	(var.width*0.375,var.height*0.375),
	]
	
	    var.LeftHalfPos = []
	    for i in range(0,32):
	        tempRand = random.randint(1,2)
	        if tempRand == 1:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125), (var.height*0.125))
	            var.LeftHalfPos.append(tempRand)
	        else:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            var.LeftHalfPos.append(tempRand)
	
	    var.TempRightHalfPos = []
	    var.RightHalfPos = []
	    i = 31
	    while i >= 0:
	        var.TempRightHalfPos.append(var.LeftHalfPos[i])
	        tempfrac,tempwhole = math.modf(i/4)
	        if tempfrac == 0.0:
	            var.RightHalfPos = var.TempRightHalfPos + var.RightHalfPos
	            var.TempRightHalfPos = []
	        i -= 1
	
	
	    var.tempRand2 = random.randint(1,2)
	    if var.countSym >= var.maxSym:
	        var.tempRand2 = 2
	    if var.countDys >= var.maxDys:
	        var.tempRand2 = 1
	    
	    if var.tempRand2 == 1:
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1
	        var.countSym += 1
	    else:
	        RndDysSquare = random.randint(0,31)
	        if var.RightHalfPos[RndDysSquare] == 1:
	           var.RightHalfPos[RndDysSquare] = 2
	        else:
	            var.RightHalfPos[RndDysSquare] = 1
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1        
	        var.countDys += 1
	    return var.c,var.tempRand2
	
	canv = create_canvas()
	
	##Sets the label correct or incorrect answer.
	if canv[1] == 1:
	    var.correct_response = '1'
	    var.SymType = 'Symmetric'
	elif canv[1] == 2:
	    var.correct_response = '2'
	    var.SymType = 'Disymmetric'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	canv1 = canv[0]
	__end__

define sequence SP_experimental_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run SP_experimental_fixation_dot always
	run SP_experimental_symmetry_subtask_display always
	run SP_Calculate_Processing_Time always

define loop SP_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 2
	run SP_practice_trial_sequence

define feedback SP_practice_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You correctely determined that the images were symmetrical\\dissymmetrical in [total_correct_processing] trials.<br /><br />You will know complete the experimental trials. This block contains 20 images. Once again, you must signal if the images are symmetrical or not.<br /><br />Press any key to begin the next block." x=0 y=0 z_index=0

define feedback SP_practice_feedback1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You correctely determined that the images were symmetrical\\dissymmetrical in [total_correct_processing] trial.<br /><br />You will know complete the experimental trials. This block contains 20 images. Once again, you must signal if the images are symmetrical or not.<br /><br />Press any key to begin the next block." x=0 y=0 z_index=0

define sketchpad SP_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sequence SP_practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SP_Init_List_Prev_Letter_Practice always
	run SP_practice_block_loop always
	run SP_practice_feedback "[total_correct_processing] != 1"
	run SP_practice_feedback1 "[total_correct_processing] = 1"
	run SP_reset_feedback1 always

define inline_script SP_practice_symmetry_subtask_display
	set description "Executes Python code"
	___run__
	canv1.show()
	
	##Creation of the keyboard object that will collect information regarding which keys were pressed by the participant.
	my_keyboard = Keyboard(keylist=['1','2'])
	start_time = clock.time()
	var.key, end_time = my_keyboard.get_key()
	var.key = str(var.key)
	var.response_time_processing = end_time - start_time
	var.total_response_time_processing += var.response_time_processing
	var.response_processing = var.key
	my_keyboard.flush()
	
	
	if var.response_processing == var.correct_response:
	    var.correct = 1
	    var.total_correct_processing += 1
	else:
	    var.correct = 0
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the symmetrical/disymmetrical ##images.
	var.Temp_Prev_Square = []
	
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.5,var.height*-0.5),
	(var.width*-0.375,var.height*-0.5),
	(var.width*-0.25,var.height*-0.5),
	(var.width*-0.125,var.height*-0.5),
	(var.width*-0.5,var.height*-0.375),
	(var.width*-0.375,var.height*-0.375),
	(var.width*-0.25,var.height*-0.375),
	(var.width*-0.125,var.height*-0.375),
	(var.width*-0.5,var.height*-0.25),
	(var.width*-0.375,var.height*-0.25),
	(var.width*-0.25,var.height*-0.25),
	(var.width*-0.125,var.height*-0.25),
	(var.width*-0.5,var.height*-0.125),
	(var.width*-0.375,var.height*-0.125),
	(var.width*-0.25,var.height*-0.125),
	(var.width*-0.125,var.height*-0.125),
	(var.width*-0.5,var.height*0),
	(var.width*-0.375,var.height*0),
	(var.width*-0.25,var.height*0),
	(var.width*-0.125,var.height*0),
	(var.width*-0.5,var.height*0.125),
	(var.width*-0.375,var.height*0.125),
	(var.width*-0.25,var.height*0.125),
	(var.width*-0.125,var.height*0.125),
	(var.width*-0.5,var.height*0.25),
	(var.width*-0.375,var.height*0.25),
	(var.width*-0.25,var.height*0.25),
	(var.width*-0.125,var.height*0.25),
	(var.width*-0.5,var.height*0.375),
	(var.width*-0.375,var.height*0.375),
	(var.width*-0.25,var.height*0.375),
	(var.width*-0.125,var.height*0.375),
	(var.width*0,var.height*-0.5),
	(var.width*0.125,var.height*-0.5),
	(var.width*0.25,var.height*-0.5),
	(var.width*0.375,var.height*-0.5),
	(var.width*0,var.height*-0.375),
	(var.width*0.125,var.height*-0.375),
	(var.width*0.25,var.height*-0.375),
	(var.width*0.375,var.height*-0.375),
	(var.width*0,var.height*-0.25),
	(var.width*0.125,var.height*-0.25),
	(var.width*0.25,var.height*-0.25),
	(var.width*0.375,var.height*-0.25),
	(var.width*0,var.height*-0.125),
	(var.width*0.125,var.height*-0.125),
	(var.width*0.25,var.height*-0.125),
	(var.width*0.375,var.height*-0.125),
	(var.width*0,var.height*0),
	(var.width*0.125,var.height*0),
	(var.width*0.25,var.height*0),
	(var.width*0.375,var.height*0),
	(var.width*0,var.height*0.125),
	(var.width*0.125,var.height*0.125),
	(var.width*0.25,var.height*0.125),
	(var.width*0.375,var.height*0.125),
	(var.width*0,var.height*0.25),
	(var.width*0.125,var.height*0.25),
	(var.width*0.25,var.height*0.25),
	(var.width*0.375,var.height*0.25),
	(var.width*0,var.height*0.375),
	(var.width*0.125,var.height*0.375),
	(var.width*0.25,var.height*0.375),
	(var.width*0.375,var.height*0.375),
	]
	
	    var.LeftHalfPos = []
	    for i in range(0,32):
	        tempRand = random.randint(1,2)
	        if tempRand == 1:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125), (var.height*0.125))
	            var.LeftHalfPos.append(tempRand)
	        else:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            var.LeftHalfPos.append(tempRand)
	
	    var.TempRightHalfPos = []
	    var.RightHalfPos = []
	    i = 31
	    while i >= 0:
	        var.TempRightHalfPos.append(var.LeftHalfPos[i])
	        tempfrac,tempwhole = math.modf(i/4)
	        if tempfrac == 0.0:
	            var.RightHalfPos = var.TempRightHalfPos + var.RightHalfPos
	            var.TempRightHalfPos = []
	        i -= 1
	
	
	    var.tempRand2 = random.randint(1,2)
	    if var.countSym >= var.maxSym:
	        var.tempRand2 = 2
	    if var.countDys >= var.maxDys:
	        var.tempRand2 = 1
	    
	    if var.tempRand2 == 1:
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1
	        var.countSym += 1
	    else:
	        RndDysSquare = random.randint(0,31)
	        if var.RightHalfPos[RndDysSquare] == 1:
	           var.RightHalfPos[RndDysSquare] = 2
	        else:
	            var.RightHalfPos[RndDysSquare] = 1
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1        
	        var.countDys += 1
	    return var.c,var.tempRand2
	
	canv = create_canvas()
	
	##Sets the label correct or incorrect answer.
	if canv[1] == 1:
	    var.correct_response = '1'
	    var.SymType = 'Symmetric'
	elif canv[1] == 2:
	    var.correct_response = '2'
	    var.SymType = 'Disymmetric'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	
	canv1 = canv[0]
	__end__

define sequence SP_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run SP_practice_fixation_dot always
	run SP_practice_symmetry_subtask_display always

define loop SP_prectice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SP_practice_sequence

define reset_feedback SP_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback SP_reset_feedback1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script SSRestartNTrial
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumberRef
	var.SubTaskName = 'Memory Subtask'
	var.acc = str(var.acc)
	var.acc = ''
	var.avg_rt = str(var.avg_rt)
	var.avg_rt = ''
	var.List_responses_memory = []
	var.response_processing = ''
	var.response_time_processing = ''
	var.total_response_time = ''
	__end__
	set _prepare ""

define inline_script SSRestartNTrialExperimental2
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumberRef
	var.SubTaskName = 'Memory Subtask'
	var.acc = str(var.acc)
	var.acc = ''
	var.avg_rt = str(var.avg_rt)
	var.avg_rt = ''
	var.List_responses_memory = []
	var.response_processing = ''
	var.response_time_processing = ''
	var.total_response_time = ''
	var.total_response_time_processing = ''
	var.response_total_time_memory_full_task = var.temp2
	__end__
	set _prepare ""

define inline_script SSRestartNTrialExperimental3
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumberRef
	var.SubTaskName = 'Memory Subtask'
	var.acc = str(var.acc)
	var.acc = ''
	var.avg_rt = str(var.avg_rt)
	var.avg_rt = ''
	var.List_responses_memory = []
	var.response_processing = ''
	var.response_time_processing = ''
	var.total_response_time = ''
	var.total_response_time_processing = ''
	var.response_total_time_memory_full_task = var.temp2
	__end__
	set _prepare ""

define inline_script SSRestartNTrialExperimental4
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script SSRestartNTrialExperimental5
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script SSRestartNTrialExperimental6
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script SSUpdateTrialNumberExperimental2
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	
	var.TrialNumberRef = var.TrialNumber
	__end__
	set _prepare ""

define inline_script SSUpdateTrialNumberExperimental3
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	
	#var.List_Prev_Letter = var.Temp_Prev_Letter
	__end__
	set _prepare ""

define inline_script SSUpdateTrialNumberExperimental4
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	#var.List_Prev_Letter = var.Temp_Prev_Letter
	__end__
	set _prepare ""

define inline_script SSUpdateTrialNumberExperimental5
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	#var.List_Prev_Letter = var.Temp_Prev_Letter
	__end__
	set _prepare ""

define inline_script SSUpdateTrialNumberExperimental6
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	#var.List_Prev_Letter = var.Temp_Prev_Letter
	__end__
	set _prepare ""

define sketchpad SS_General_instructions
	set start_response_interval no
	set duration keypress
	set description "Frases dp bloco de treino"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b> Instructions </b><br /><br />The next task has some similarities with a task that you completed previously. A sequence of images composed of black and white squares will be presented. Some images are symmetrical (along the vertical axis) while others are not. However, in this task, each image is followed by a 4x4 grid that will be presented for 1 second. These grids will display a single red square. <br /><br />You have two goals in this task (both equally important):<br />Goal 1 – Every time a new image — composed of black and white squares — is presented, you must state if the image is symmetrical along its vertical axis or not. You must press the key ‘1’ when you consider that the image is symmetrical and the key '2' when you think that the image is not symmetrical. You will have [round_SP_part_time] seconds to analyze each image and make your decision. The right and left halves of dissymmetrical images only differ in a small detail. Thus, we advise you to screen the images thoroughly before making your decision. <br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad SS_General_instructions_1
	set start_response_interval no
	set duration keypress
	set description "Frases dp bloco de treino"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b> Instructions </b><br /><br />Goal 2 – You must memorize the positions of the red squares presented after each image. At the end of the block, you will need to recall the positions of the red squares in the same order in which they were presented (the software will ask you to introduce these sequences on an empty 4x4 grid). You must use the mouse to replicate the sequences of red squares. <br /><br />Next, you will complete some practice trials to get acquainted with the task.<br /><br />Press any key to start the practice trials." x=0 y=0 z_index=0

define sketchpad SS_General_instructions_2
	set start_response_interval no
	set duration keypress
	set description "Frases dp bloco de treino"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />A sequence of images composed of black and white squares will be presented. Some images are symmetrical (along the vertical axis), while others are not.<br /><br />You must determine which images are symmetrical - the left half of the image must mirror the right half - and which images are not. You must press the key ‘1’ when you consider that the image is symmetrical and the key '2' when you think that the image is not symmetrical. The right and left halves of dissymmetrical images only differ in a small detail. Thus, we advise you to screen the images thoroughly before making your decision and pressing one of the aforementioned keys. <br /><br />First, you will complete some practice trials.<br /><br />Press any key to begin the practice trials." x=0 y=0 z_index=0

define inline_script SS_IniVar
	set description "Executes Python code"
	set _run ""
	___prepare__
	import math, random
	
	var.Task_Name = "Symmetry Span"
	
	##Initializes variables that will hold information regarding the RT and accuracy score of the processing and memory subtasks. and the variable that will determine when the images will be symmetrical.
	var.response_total_time_memory = 0
	var.average_total_time_memory = 0
	var.aggregated_score_memory = 0 
	var.total_response_time_processing = 0
	var.response_total_time_memory_full_task = 0
	var.SymType = ''
	var.TrialNumber = 0
	var.TrialNumberRef = 0
	var.temp1 = 0
	var.temp2 = 0
	##Initialization of the variables that will score the responses of of each block the memory subtask.
	var.score_subblock_2_1 = 0
	var.score_subblock_2_2 = 0
	var.score_subblock_2_3 = 0
	var.score_subblock_3_1 = 0
	var.score_subblock_3_2 = 0
	var.score_subblock_3_3 = 0
	var.score_subblock_4_1 = 0
	var.score_subblock_4_2 = 0
	var.score_subblock_4_3 = 0
	var.score_subblock_5_1 = 0
	var.score_subblock_5_2 = 0
	var.score_subblock_5_3 = 0
	var.score_subblock_6_1 = 0
	var.score_subblock_6_2 = 0
	var.score_subblock_6_3 = 0
	score_practice = 0
	__end__

define inline_script SS_Init_List_Prev_Letter_Experimental2
	set description "Executes Python code"
	___run__
	var.total_response_time_processing = var.temp1
	
	if var.count_SS_experimental_reset_feedback2 == 0:
	    var.subblock = '2.1'
	elif var.count_SS_experimental_reset_feedback2 == 1:
	    var.subblock = '2.2'
	elif var.count_SS_experimental_reset_feedback2 == 2:
	    var.subblock = '2.3'
	__end__
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 1
	var.maxDys = 1
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = '2'
	if var.count_SS_experimental_reset_feedback2 == 0:
	    var.TrialNumber = 0
	__end__

define inline_script SS_Init_List_Prev_Letter_Experimental3
	set description "Executes Python code"
	___run__
	var.total_response_time_processing = var.temp1
	
	if var.count_SS_experimental_reset_feedback3 == 0:
	    var.subblock = '3.1'
	elif var.count_SS_experimental_reset_feedback3 == 1:
	    var.subblock = '3.2'
	elif var.count_SS_experimental_reset_feedback3 == 2:
	    var.subblock = '3.3'
	__end__
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 2
	var.maxDys = 2
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = '3'
	__end__

define inline_script SS_Init_List_Prev_Letter_Experimental4
	set description "Executes Python code"
	___run__
	var.total_response_time_processing = var.temp1
	
	if var.count_SS_experimental_reset_feedback4 == 0:
	    var.subblock = '4.1'
	elif var.count_SS_experimental_reset_feedback4 == 1:
	    var.subblock = '4.2'
	elif var.count_SS_experimental_reset_feedback4 == 2:
	    var.subblock = '4.3'
	__end__
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 2
	var.maxDys = 2
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = '4'
	__end__

define inline_script SS_Init_List_Prev_Letter_Experimental5
	set description "Executes Python code"
	___run__
	var.total_response_time_processing = var.temp1
	
	if var.count_SS_experimental_reset_feedback5 == 0:
	    var.subblock = '5.1'
	elif var.count_SS_experimental_reset_feedback5 == 1:
	    var.subblock = '5.2'
	elif var.count_SS_experimental_reset_feedback5 == 2:
	    var.subblock = '5.3'
	__end__
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 3
	var.maxDys = 3
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = '5'
	__end__

define inline_script SS_Init_List_Prev_Letter_Experimental6
	set description "Executes Python code"
	___run__
	var.total_response_time_processing = var.temp1
	
	if var.count_SS_experimental_reset_feedback5 == 0:
	    var.subblock = '6.1'
	elif var.count_SS_experimental_reset_feedback5 == 1:
	    var.subblock = '6.2'
	elif var.count_SS_experimental_reset_feedback5 == 2:
	    var.subblock = '6.3'
	__end__
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 3
	var.maxDys = 3
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = '6'
	__end__

define inline_script SS_Init_List_Prev_Letter_Practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.List_Prev_Square = []
	var.List_responses_memory = []
	var.Big_i = 0
	var.countSym = 0
	var.countDys = 0
	var.maxSym = 1
	var.maxDys = 1
	var.List_SS_button = []
	var.List_SS_Pos = []
	var.List_keys_pressed = []
	var.aggregated_score_practice = 0
	var.total_correct_processing = 0
	var.correct_response_pos = 0
	var.Subloco = 'practice'
	var.subblock = 'practice'
	__end__

define sequence SS_block_sequence2
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_practice_reset_feedback always
	run SS_Init_List_Prev_Letter_Practice always
	run SS_practice_block_loop always
	run SSRestartNTrial always
	run SS_practice_request_rep_seq always
	run SS_practice_script_collect_responses always
	run logger always
	run SS_practice_script_collect_responses_1 always
	run SS_practice_calculate_score always
	run logger always
	run SS_practice_feedback_first_block "[total_correct_processing] != 1 and [count_SS_practice_reset_feedback] = 0"
	run SS_practice_feedback_first_block_1 "[total_correct_processing] = 1 and [count_SS_practice_reset_feedback] = 0"
	run SS_practice_feedback_second_block "[total_correct_processing] != 1 and [count_SS_practice_reset_feedback] = 1"
	run SS_practice_feedback_second_block_1 "[total_correct_processing] = 1 and [count_SS_practice_reset_feedback] = 1"

define loop SS_experimental_block_loop2
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 2
	run SS_experimental_trial_sequence2

define loop SS_experimental_block_loop3
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 3
	run SS_experimental_trial_sequence3

define loop SS_experimental_block_loop4
	set source_file ""
	set source table
	set skip 0
	set repeat 4
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 4
	run SS_experimental_trial_sequence4

define loop SS_experimental_block_loop5
	set source_file ""
	set source table
	set skip 0
	set repeat 5
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 5
	run SS_experimental_trial_sequence5

define loop SS_experimental_block_loop6
	set source_file ""
	set source table
	set skip 0
	set repeat 6
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 6
	run SS_experimental_trial_sequence6

define inline_script SS_experimental_correct_response2
	set description "Executes Python code"
	___run__
	var.score_feedback = 0
	if var.live_row == 0:
	    var.total_correct_processing = 0
	
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
	var.SubTaskName = 'Processing Subtask'
	var.square = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_memory_pos = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	var.response_total_time_memory_full_task = ''
	__end__

define inline_script SS_experimental_correct_response3
	set description "Executes Python code"
	___run__
	var.score_feedback = 0
	if var.live_row == 0:
	    var.total_correct_processing = 0
	
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
	var.SubTaskName = 'Processing Subtask'
	var.square = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_memory_pos = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	var.response_total_time_memory_full_task = ''
	__end__

define inline_script SS_experimental_correct_response4
	set description "Executes Python code"
	___run__
	var.score_feedback = 0
	if var.live_row == 0:
	    var.total_correct_processing = 0
	
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_correct_response5
	set description "Executes Python code"
	___run__
	var.score_feedback = 0
	if var.live_row == 0:
	    var.total_correct_processing = 0
	
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_correct_response6
	set description "Executes Python code"
	___run__
	var.score_feedback = 0
	if var.live_row == 0:
	    var.total_correct_processing = 0
	
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
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	__end__

define feedback SS_experimental_feedback2_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_2_1] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback2_1_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_2_1] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback2_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_2_2] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!<br />" x=0 y=0 z_index=0

define feedback SS_experimental_feedback2_2_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_2_2] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!<br />" x=0 y=0 z_index=0

define feedback SS_experimental_feedback2_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_2_3] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback2_3_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_2_3] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback3_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_3_1] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback3_1_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_3_1] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback3_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_3_2] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback3_2_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_3_2] of the [sequence_size] red squares that were presented.<br /><br />The next block of trials will also comprehend 3 symmetrical/dissymmetrical images and a sequence of 3 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback3_3_1
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
define feedback SS_experimental_feedback3_3_2
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
define feedback SS_experimental_feedback4_1_1
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
define feedback SS_experimental_feedback4_1_2
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
define feedback SS_experimental_feedback4_2_1
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
define feedback SS_experimental_feedback4_2_2
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
define feedback SS_experimental_feedback4_3_1
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
define feedback SS_experimental_feedback4_3_2
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
define feedback SS_experimental_feedback5_1_1
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
define feedback SS_experimental_feedback5_1_2
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
define feedback SS_experimental_feedback5_2_1
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
define feedback SS_experimental_feedback5_2_2
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
define feedback SS_experimental_feedback5_3_1
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
define feedback SS_experimental_feedback5_3_2
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
define feedback SS_experimental_feedback6_1_1
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
define feedback SS_experimental_feedback6_1_2
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
define feedback SS_experimental_feedback6_2_1
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
define feedback SS_experimental_feedback6_2_2
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
define feedback SS_experimental_feedback6_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [score_subblock_6_3] of the [sequence_size] red squares that were presented.<br /><br />You completed all blocks of experimental trials. <br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define feedback SS_experimental_feedback6_3_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [score_subblock_6_3] of the [sequence_size] red squares that were presented.<br /><br />You completed all blocks of experimental trials. <br /><br />Press any key to finish the task!" x=0 y=0 z_index=0

define sketchpad SS_experimental_fixation_dot2
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad SS_experimental_fixation_dot3
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad SS_experimental_fixation_dot4
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad SS_experimental_fixation_dot5
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define sketchpad SS_experimental_fixation_dot6
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop SS_experimental_loop2
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SS_experimental_sequence2

define loop SS_experimental_loop3
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SS_experimental_sequence3

define loop SS_experimental_loop4
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SS_experimental_sequence4

define loop SS_experimental_loop5
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SS_experimental_sequence5

define loop SS_experimental_loop6
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run SS_experimental_sequence6

define reset_feedback SS_experimental_reset_feedback2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback SS_experimental_reset_feedback3
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback SS_experimental_reset_feedback4
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback SS_experimental_reset_feedback5
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback SS_experimental_reset_feedback6
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script SS_experimental_script_claculate_total_score
	set description "Executes Python code"
	___run__
	##Calculates the score of the Symmetry Span (only takes into account the scores of the memory sub-task).
	var.score_symmetry_span = (var.score_subblock_2_1 + var.score_subblock_2_2 + var.score_subblock_2_3 + var.score_subblock_3_1 + var.score_subblock_3_2 + var.score_subblock_3_3 + var.score_subblock_4_1 + var.score_subblock_4_2 + var.score_subblock_4_3 + var.score_subblock_5_1 + var.score_subblock_5_2 + var.score_subblock_5_3 + var.score_subblock_6_1 + var.score_subblock_6_2 + var.score_subblock_6_3)/60
	               
	var.average_total_time_memory = var.response_total_time_memory_full_task/60
	
	var.total_response_time_processing = var.temp1
	var.average_response_time_processing = var.total_response_time_processing/60
	var.SubTaskName = ''
	__end__
	set _prepare ""

define inline_script SS_experimental_script_collect_responses2_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	var.response_total_time_memory = 0
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback2 == 0 and var.correct == 1:
		var.score_subblock_2_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback2 == 1 and var.correct == 1:
		var.score_subblock_2_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback2 == 2 and var.correct == 1:
		var.score_subblock_2_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
	from PyMT_response import MT_response
	import time
	
	##variables that will store the buttons that the participant pressed and ##the buttons that the participants did not pressed.
	var.pressed_buttons = []
	var.clean_pressed_buttons = []
	var.unpressed_buttons = ['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16']
	
	##Creates two list that hold the x and y coordinates of the buttons.
	var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	var.x_coord = []
	var.y_coord = []
	for i in range(0,16):
	    x,y = var.xy_coord.pop(0)
	    var.x_coord.append(x)
	    var.y_coord.append(y)
	
	## Draws a grid with 16 cells. The cells will be placed in the same ##poitions as the ones drawed by rhe object canv on inline ##Script_Gen_Stimuli)
	stimulus_display = Canvas()
	stimulus_display['b1'] = Rect(x=(var.x_coord[0]),y=(var.y_coord[0]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b2'] = Rect(x=(var.x_coord[1]),y=(var.y_coord[1]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b3'] = Rect(x=(var.x_coord[2]),y=(var.y_coord[2]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b4'] = Rect(x=(var.x_coord[3]),y=(var.y_coord[3]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b5'] = Rect(x=(var.x_coord[4]),y=(var.y_coord[4]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b6'] = Rect(x=(var.x_coord[5]),y=(var.y_coord[5]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b7'] = Rect(x=(var.x_coord[6]),y=(var.y_coord[6]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b8'] = Rect(x=(var.x_coord[7]),y=(var.y_coord[7]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b9'] = Rect(x=(var.x_coord[8]),y=(var.y_coord[8]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b10'] = Rect(x=(var.x_coord[9]),y=(var.y_coord[9]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b11'] = Rect(x=(var.x_coord[10]),y=(var.y_coord[10]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b12'] = Rect(x=(var.x_coord[11]),y=(var.y_coord[11]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b13'] = Rect(x=(var.x_coord[12]),y=(var.y_coord[12]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b14'] = Rect(x=(var.x_coord[13]),y=(var.y_coord[13]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b15'] = Rect(x=(var.x_coord[14]),y=(var.y_coord[14]),w=(var.width*0.25),h=(var.height*0.25))
	stimulus_display['b16'] = Rect(x=(var.x_coord[15]),y=(var.y_coord[15]),w=(var.width*0.25),h=(var.height*0.25))
	                                                
	                                                
	###############################################################################################################################################################
	##Prepare MT_response
	##Perfoms a Do Hit Test to the mouse responses.
	##Chooses which spaces can be chosen as valid responses - the prgogram ##will only process mouse clicks insde the 16 cells of the grid.
	mouse_tracking = MT_response(self.experiment, buttons=['b1','b2','b3','b4','b5','b6','b7','b8','b9','b10','b11','b12','b13','b14','b15','b16'],canvas=stimulus_display)
	__end__

define inline_script SS_experimental_script_collect_responses_2_2
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback2 == 0 and var.correct == 1:
		var.score_subblock_2_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback2 == 1 and var.correct == 1:
		var.score_subblock_2_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback2 == 2 and var.correct == 1:
		var.score_subblock_2_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_3_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	var.response_total_time_memory = 0
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback3 == 0 and var.correct == 1:
		var.score_subblock_3_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 1 and var.correct == 1:
		var.score_subblock_3_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 2 and var.correct == 1:
		var.score_subblock_3_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_3_2
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback3 == 0 and var.correct == 1:
		var.score_subblock_3_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 1 and var.correct == 1:
		var.score_subblock_3_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 2 and var.correct == 1:
		var.score_subblock_3_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_3_3
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[2], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[2]
	var.correct_response_pos = var.List_SS_Pos[2]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback3 == 0 and var.correct == 1:
		var.score_subblock_3_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 1 and var.correct == 1:
		var.score_subblock_3_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback3 == 2 and var.correct == 1:
		var.score_subblock_3_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_4_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	var.response_total_time_memory = 0
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback4 == 0 and var.correct == 1:
		var.score_subblock_4_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 1 and var.correct == 1:
		var.score_subblock_4_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 2 and var.correct == 1:
		var.score_subblock_4_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_4_2
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback4 == 0 and var.correct == 1:
		var.score_subblock_4_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 1 and var.correct == 1:
		var.score_subblock_4_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 2 and var.correct == 1:
		var.score_subblock_4_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_4_3
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[2], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[2]
	var.correct_response_pos = var.List_SS_Pos[2]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback4 == 0 and var.correct == 1:
		var.score_subblock_4_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 1 and var.correct == 1:
		var.score_subblock_4_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 2 and var.correct == 1:
		var.score_subblock_4_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_4_4
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[3], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[3]
	var.correct_response_pos = var.List_SS_Pos[3]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback4 == 0 and var.correct == 1:
		var.score_subblock_4_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 1 and var.correct == 1:
		var.score_subblock_4_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback4 == 2 and var.correct == 1:
		var.score_subblock_4_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_5_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	var.response_total_time_memory = 0
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback5 == 0 and var.correct == 1:
		var.score_subblock_5_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 1 and var.correct == 1:
		var.score_subblock_5_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 2 and var.correct == 1:
		var.score_subblock_5_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_5_2
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback5 == 0 and var.correct == 1:
		var.score_subblock_5_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 1 and var.correct == 1:
		var.score_subblock_5_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 2 and var.correct == 1:
		var.score_subblock_5_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_5_3
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[2], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[2]
	var.correct_response_pos = var.List_SS_Pos[2]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback5 == 0 and var.correct == 1:
		var.score_subblock_5_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 1 and var.correct == 1:
		var.score_subblock_5_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 2 and var.correct == 1:
		var.score_subblock_5_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_5_4
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[3], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[3]
	var.correct_response_pos = var.List_SS_Pos[3]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback5 == 0 and var.correct == 1:
		var.score_subblock_5_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 1 and var.correct == 1:
		var.score_subblock_5_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 2 and var.correct == 1:
		var.score_subblock_5_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_5_5
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[4], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[4]
	var.correct_response_pos = var.List_SS_Pos[4]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback5 == 0 and var.correct == 1:
		var.score_subblock_5_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 1 and var.correct == 1:
		var.score_subblock_5_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback5 == 2 and var.correct == 1:
		var.score_subblock_5_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	var.response_total_time_memory = 0
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_2
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_3
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[2], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[2]
	var.correct_response_pos = var.List_SS_Pos[2]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_4
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[3], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[3]
	var.correct_response_pos = var.List_SS_Pos[3]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_5
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[4], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[4]
	var.correct_response_pos = var.List_SS_Pos[4]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_collect_responses_6_6
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial.
	responses.clear()
	
	##Displays canvas
	stimulus_display.show()
	
	##Initializes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	##Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses)
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[5], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[5]
	var.correct_response_pos = var.List_SS_Pos[5]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
	##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	var.response_total_time_memory += var.response_time_memory
	var.response_total_time_memory_full_task += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_memory += 1
	
	if var.count_SS_experimental_reset_feedback6 == 0 and var.correct == 1:
		var.score_subblock_6_1 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 1 and var.correct == 1:
		var.score_subblock_6_2 += 1
		var.score_feedback += 1
	elif var.count_SS_experimental_reset_feedback6 == 2 and var.correct == 1:
		var.score_subblock_6_3 += 1
		var.score_feedback += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_gen_square2
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
	import random
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws the cells/grid.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	    return var.c
	
	canv = create_canvas()
	
	
	########################################################################################Function that generates the grids with red rectangles
	
	def create_canvas_with_squares():
	    var.SeqList = []
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.50,var.height*-0.50),(var.width*-0.25,var.height*-0.50),(var.width*0,var.height*-0.50),(var.width*0.25,var.height*-0.50),(var.width*-0.50,var.height*-0.25),(var.width*-0.25,var.height*-0.25),(var.width*0,var.height*-0.25),(var.width*0.25,var.height*-0.25),(var.width*-0.50,var.height*0),(var.width*-0.25,var.height*0),(var.width*0,var.height*0),(var.width*0.25,var.height*0),(var.width*-0.50,var.height*0.25),(var.width*-0.25,var.height*0.25),(var.width*0,var.height*0.25),(var.width*0.25,var.height*0.25)]
	    ##Draws cells/grid.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.width*0.25), (var.height*0.25))
	
	###########################################################################################Chooses the poition in which the red square wll be displyed.
	
	    var.square_pos = random.choice(var.xy_coord)
	    for i in range(0,len(var.xy_coord)):
	        index_xy_coord = var.xy_coord[i]
	        ##Saves the name of the button (cell of the grid) that the participant mus select with the mouse.
	        if index_xy_coord == var.square_pos:
	            var.correct_button = 'b' + str(i+1)
	        ##ensures that the position of the red square was not used before in the sequence.
	    while var.square_pos in var.List_SS_Pos:
	        var.square_pos = random.choice(var.xy_coord)
	        for i in range(0,len(var.xy_coord)):
	            index_xy_coord = var.xy_coord[i]
	            if index_xy_coord == var.square_pos:
	                var.correct_button = 'b' + str(i+1)            
	    var.square_pos = [var.square_pos]
	    x,y = var.square_pos.pop(0)
	    var.c.rect(x, y, (var.width*0.25), (var.height*0.25), color = 'red', fill=True)
	    
	        ##Stores information of the positions of the stimuli. 
	    var.square_pos = tuple([x,y])
	
	    return var.c,var.square_pos, var.correct_button
	
	
	##saves a copy of the variables genereated the function create_canvas_with_squares
	var.create_canvas_with_squares = create_canvas_with_squares()
	canv_square = var.create_canvas_with_squares[0]
	var.List_SS_Pos.append(var.create_canvas_with_squares[1])
	var.List_SS_button.append(var.create_canvas_with_squares[2])
	__end__

define inline_script SS_experimental_script_gen_square3
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_gen_square4
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_gen_square5
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_script_gen_square6
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
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	__end__

define sequence SS_experimental_sequence2
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_experimental_reset_feedback2 always
	run SS_Init_List_Prev_Letter_Experimental2 always
	run SS_experimental_block_loop2 always
	run SSRestartNTrialExperimental2 always
	run SS_practice_request_rep_seq always
	run SS_experimental_script_collect_responses2_1 always
	run logger always
	run SSUpdateTrialNumberExperimental2 always
	run SS_experimental_script_collect_responses_2_2 always
	run logger always
	run SS_experimental_feedback2_1_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback2] = 0"
	run SS_experimental_feedback2_1_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback2] = 0"
	run SS_experimental_feedback2_2_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback2] = 1"
	run SS_experimental_feedback2_2_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback2] = 1"
	run SS_experimental_feedback2_3_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback2] = 2"
	run SS_experimental_feedback2_3_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback2] = 2"

define sequence SS_experimental_sequence3
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_experimental_reset_feedback3 always
	run SS_Init_List_Prev_Letter_Experimental3 always
	run SS_experimental_block_loop3 always
	run SSRestartNTrialExperimental3 always
	run SS_practice_request_rep_seq always
	run SS_experimental_script_collect_responses_3_1 always
	run logger always
	run SSUpdateTrialNumberExperimental3 always
	run SS_experimental_script_collect_responses_3_2 always
	run logger always
	run SSUpdateTrialNumberExperimental3 always
	run SS_experimental_script_collect_responses_3_3 always
	run logger always
	run SS_experimental_feedback3_1_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback3] = 0"
	run SS_experimental_feedback3_1_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback3] = 0"
	run SS_experimental_feedback3_2_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback3] = 1"
	run SS_experimental_feedback3_2_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback3] = 1"
	run SS_experimental_feedback3_3_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback3] = 2"
	run SS_experimental_feedback3_3_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback3] = 2"

define sequence SS_experimental_sequence4
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_experimental_reset_feedback4 always
	run SS_Init_List_Prev_Letter_Experimental4 always
	run SS_experimental_block_loop4 always
	run SSRestartNTrialExperimental4 always
	run SS_practice_request_rep_seq always
	run SS_experimental_script_collect_responses_4_1 always
	run logger always
	run SSUpdateTrialNumberExperimental4 always
	run SS_experimental_script_collect_responses_4_2 always
	run logger always
	run SSUpdateTrialNumberExperimental4 always
	run SS_experimental_script_collect_responses_4_3 always
	run logger always
	run SSUpdateTrialNumberExperimental4 always
	run SS_experimental_script_collect_responses_4_4 always
	run logger always
	run SS_experimental_feedback4_1_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback4] = 0"
	run SS_experimental_feedback4_1_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback4] = 0"
	run SS_experimental_feedback4_2_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback4] = 1"
	run SS_experimental_feedback4_2_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback4] = 1"
	run SS_experimental_feedback4_3_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback4] = 2"
	run SS_experimental_feedback4_3_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback4] = 2"

define sequence SS_experimental_sequence5
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_experimental_reset_feedback5 always
	run SS_Init_List_Prev_Letter_Experimental5 always
	run SS_experimental_block_loop5 always
	run SSRestartNTrialExperimental5 always
	run SS_practice_request_rep_seq always
	run SS_experimental_script_collect_responses_5_1 always
	run logger always
	run SSUpdateTrialNumberExperimental5 always
	run SS_experimental_script_collect_responses_5_2 always
	run logger always
	run SSUpdateTrialNumberExperimental5 always
	run SS_experimental_script_collect_responses_5_3 always
	run logger always
	run SSUpdateTrialNumberExperimental5 always
	run SS_experimental_script_collect_responses_5_4 always
	run logger always
	run SSUpdateTrialNumberExperimental5 always
	run SS_experimental_script_collect_responses_5_5 always
	run logger always
	run SS_experimental_feedback5_1_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback5] = 0"
	run SS_experimental_feedback5_1_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback5] = 0"
	run SS_experimental_feedback5_2_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback5] = 1"
	run SS_experimental_feedback5_2_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback5] = 1"
	run SS_experimental_feedback5_3_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback5] = 2"
	run SS_experimental_feedback5_3_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback5] = 2"

define sequence SS_experimental_sequence6
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run SS_experimental_reset_feedback6 always
	run SS_Init_List_Prev_Letter_Experimental6 always
	run SS_experimental_block_loop6 always
	run SSRestartNTrialExperimental6 always
	run SS_practice_request_rep_seq always
	run SS_experimental_script_collect_responses_6_1 always
	run logger always
	run SSUpdateTrialNumberExperimental6 always
	run SS_experimental_script_collect_responses_6_2 always
	run logger always
	run SSUpdateTrialNumberExperimental6 always
	run SS_experimental_script_collect_responses_6_3 always
	run logger always
	run SSUpdateTrialNumberExperimental6 always
	run SS_experimental_script_collect_responses_6_4 always
	run logger always
	run SSUpdateTrialNumberExperimental6 always
	run SS_experimental_script_collect_responses_6_5 always
	run logger always
	run SSUpdateTrialNumberExperimental6 always
	run SS_experimental_script_collect_responses_6_6 always
	run logger always
	run SS_experimental_feedback6_1_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback6] = 0"
	run SS_experimental_feedback6_1_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback6] = 0"
	run SS_experimental_feedback6_2_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback6] = 1"
	run SS_experimental_feedback6_2_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback6] = 1"
	run SS_experimental_feedback6_3_1 "[total_correct_processing] != 1 and [count_SS_experimental_reset_feedback6] = 2"
	run SS_experimental_feedback6_3_2 "[total_correct_processing] = 1 and [count_SS_experimental_reset_feedback6] = 2"
	run SS_experimental_script_claculate_total_score "[count_SS_experimental_reset_feedback6] = 2"
	run logger "[count_SS_experimental_reset_feedback6] = 2"

define inline_script SS_experimental_symmetry_subtask_display2
	set description "Executes Python code"
	___run__
	canv1.show()
	
	##Creation of the keyboard object that will collect information regarding which keys were pressed by the participant.
	start_time = clock.time()
	my_keyboard = Keyboard(keylist=['1','2'],timeout=var.SP_part_process_time)
	var.key, end_time = my_keyboard.get_key()
	var.key = str(var.key)
	var.response_time_processing = end_time - start_time
	var.response_processing = var.key
	my_keyboard.flush()
	
	##Scores the response of the participant.
	if var.response_processing == var.correct_response:
	    var.correct = 1
	    var.total_correct_processing += 1
	else:
	    var.correct = 0
	__end__
	___prepare__
	import random
	######################################################################################Function that creates the symmetrical/disymmetrical images.
	var.Temp_Prev_Square = []
	
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.5,var.height*-0.5),
	(var.width*-0.375,var.height*-0.5),
	(var.width*-0.25,var.height*-0.5),
	(var.width*-0.125,var.height*-0.5),
	(var.width*-0.5,var.height*-0.375),
	(var.width*-0.375,var.height*-0.375),
	(var.width*-0.25,var.height*-0.375),
	(var.width*-0.125,var.height*-0.375),
	(var.width*-0.5,var.height*-0.25),
	(var.width*-0.375,var.height*-0.25),
	(var.width*-0.25,var.height*-0.25),
	(var.width*-0.125,var.height*-0.25),
	(var.width*-0.5,var.height*-0.125),
	(var.width*-0.375,var.height*-0.125),
	(var.width*-0.25,var.height*-0.125),
	(var.width*-0.125,var.height*-0.125),
	(var.width*-0.5,var.height*0),
	(var.width*-0.375,var.height*0),
	(var.width*-0.25,var.height*0),
	(var.width*-0.125,var.height*0),
	(var.width*-0.5,var.height*0.125),
	(var.width*-0.375,var.height*0.125),
	(var.width*-0.25,var.height*0.125),
	(var.width*-0.125,var.height*0.125),
	(var.width*-0.5,var.height*0.25),
	(var.width*-0.375,var.height*0.25),
	(var.width*-0.25,var.height*0.25),
	(var.width*-0.125,var.height*0.25),
	(var.width*-0.5,var.height*0.375),
	(var.width*-0.375,var.height*0.375),
	(var.width*-0.25,var.height*0.375),
	(var.width*-0.125,var.height*0.375),
	(var.width*0,var.height*-0.5),
	(var.width*0.125,var.height*-0.5),
	(var.width*0.25,var.height*-0.5),
	(var.width*0.375,var.height*-0.5),
	(var.width*0,var.height*-0.375),
	(var.width*0.125,var.height*-0.375),
	(var.width*0.25,var.height*-0.375),
	(var.width*0.375,var.height*-0.375),
	(var.width*0,var.height*-0.25),
	(var.width*0.125,var.height*-0.25),
	(var.width*0.25,var.height*-0.25),
	(var.width*0.375,var.height*-0.25),
	(var.width*0,var.height*-0.125),
	(var.width*0.125,var.height*-0.125),
	(var.width*0.25,var.height*-0.125),
	(var.width*0.375,var.height*-0.125),
	(var.width*0,var.height*0),
	(var.width*0.125,var.height*0),
	(var.width*0.25,var.height*0),
	(var.width*0.375,var.height*0),
	(var.width*0,var.height*0.125),
	(var.width*0.125,var.height*0.125),
	(var.width*0.25,var.height*0.125),
	(var.width*0.375,var.height*0.125),
	(var.width*0,var.height*0.25),
	(var.width*0.125,var.height*0.25),
	(var.width*0.25,var.height*0.25),
	(var.width*0.375,var.height*0.25),
	(var.width*0,var.height*0.375),
	(var.width*0.125,var.height*0.375),
	(var.width*0.25,var.height*0.375),
	(var.width*0.375,var.height*0.375),
	]
	
	##################################################################
	#Creates the images composed of black and white squares.
	    var.LeftHalfPos = []
	    for i in range(0,32):
	        tempRand = random.randint(1,2)
	        if tempRand == 1:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125), (var.height*0.125))
	            var.LeftHalfPos.append(tempRand)
	        else:
	            var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            var.LeftHalfPos.append(tempRand)
	
	    var.TempRightHalfPos = []
	    var.RightHalfPos = []
	    i = 31
	    while i >= 0:
	        var.TempRightHalfPos.append(var.LeftHalfPos[i])
	        tempfrac,tempwhole = math.modf(i/4)
	        if tempfrac == 0.0:
	            var.RightHalfPos = var.TempRightHalfPos + var.RightHalfPos
	            var.TempRightHalfPos = []
	        i -= 1
	
	    var.tempRand2 = random.randint(1,2)
	    if var.countSym >= var.maxSym:
	        var.tempRand2 = 2
	    if var.countDys >= var.maxDys:
	        var.tempRand2 = 1
	        
	    if var.tempRand2 == 1:
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1
	        var.countSym += 1
	    else:
	        RndDysSquare = random.randint(0,31)
	        if var.RightHalfPos[RndDysSquare] == 1:
	           var.RightHalfPos[RndDysSquare] = 2
	        else:
	            var.RightHalfPos[RndDysSquare] = 1
	        tempCounter = 0
	        for i in range(32,64):
	            if var.RightHalfPos[tempCounter] == 1:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125))
	            else:
	                var.c.rect(var.xy_coord[i][0],var.xy_coord[i][1],(var.width*0.125),(var.height*0.125),fill=True)
	            tempCounter += 1        
	        var.countDys += 1
	    return var.c,var.tempRand2
	
	canv = create_canvas()
	
	##Sets the label correct or incorrect answer.
	if canv[1] == 1:
	    var.correct_response = '1'
	    var.SymType = 'Symmetric'
	elif canv[1] == 2:
	    var.correct_response = '2'
	    var.SymType = 'Disymmetric'
	else:
	    raise Exception('o tipo de frase deveria ser FC ou FI, e não %s' % var.Tipo_t)
	
	canv1 = canv[0]
	__end__

define inline_script SS_experimental_symmetry_subtask_display3
	set description "Executes Python code"
	___run__
	canv1.show()
	
	##Creation of the keyboard object that will collect information regarding which keys were pressed by the participant.
	start_time = clock.time()
	my_keyboard = Keyboard(keylist=['1','2'],timeout=var.SP_part_process_time)
	var.key, end_time = my_keyboard.get_key()
	var.key = str(var.key)
	var.response_time_processing = end_time - start_time
	var.response_processing = var.key
	my_keyboard.flush()
	
	##Scores the response of the participant.
	if var.response_processing == var.correct_response:
	    var.correct = 1
	    var.total_correct_processing += 1
	else:
	    var.correct = 0
	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_symmetry_subtask_display4
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_symmetry_subtask_display5
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define inline_script SS_experimental_symmetry_subtask_display6
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define sequence SS_experimental_trial_sequence2
	set flush_keyboard yes
	set description "A single trial"
	run SS_experimental_correct_response2 always
	run SS_experimental_fixation_dot2 always
	run SS_experimental_symmetry_subtask_display2 always
	run SS_experimental_script_gen_square2 always
	run logger always

define sequence SS_experimental_trial_sequence3
	set flush_keyboard yes
	set description "A single trial"
	run SS_experimental_correct_response3 always
	run SS_experimental_fixation_dot3 always
	run SS_experimental_symmetry_subtask_display3 always
	run SS_experimental_script_gen_square3 always
	run logger always

define sequence SS_experimental_trial_sequence4
	set flush_keyboard yes
	set description "A single trial"
	run SS_experimental_correct_response4 always
	run SS_experimental_fixation_dot4 always
	run SS_experimental_symmetry_subtask_display4 always
	run SS_experimental_script_gen_square4 always
	run logger always

define sequence SS_experimental_trial_sequence5
	set flush_keyboard yes
	set description "A single trial"
	run SS_experimental_correct_response5 always
	run SS_experimental_fixation_dot5 always
	run SS_experimental_symmetry_subtask_display5 always
	run SS_experimental_script_gen_square5 always
	run logger always

define sequence SS_experimental_trial_sequence6
	set flush_keyboard yes
	set description "A single trial"
	run SS_experimental_correct_response6 always
	run SS_experimental_fixation_dot6 always
	run SS_experimental_symmetry_subtask_display6 always
	run SS_experimental_script_gen_square6 always
	run logger always

define mousetrap_response SS_mousetrap_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;280"
	set skip_item yes
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 1
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 ""
	set button1 ""
	set boundaries "upper=no lower=no left=no right=no"

define loop SS_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 sequence_size 2
	run SS_practice_trial_sequence

define inline_script SS_practice_calculate_score
	set description "Executes Python code"
	___run__
	##Calculates the score and average total_time of the participant in this block.
	score_practice += var.aggregated_score_practice
	if var.count_SS_practice_reset_feedback == 1:
	    var.SS_practice_score = score_practice/4
	
	var.average_total_time_memory = var.response_total_time_memory/var.sequence_size
	
	var.TrialNumber += 1
	__end__
	set _prepare ""

define inline_script SS_practice_correct_response
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	if var.live_row == 0:
	    var.TrialNumberRef = var.TrialNumber
	__end__
	___prepare__
	var.SubTaskName = 'Processing Subtask'
	var.square = ''
	var.List_responses_memory = ''
	var.response_average_time_memory = ''
	var.response_memory = ''
	var.response_memory_pos = ''
	var.response_time_memory = ''
	var.response_total_time_memory = ''
	__end__

define feedback SS_practice_feedback_first_block
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [aggregated_score_practice] of the [sequence_size] red squares that were presented.<br /><br />The next block of practice trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!<br />" x=0 y=0 z_index=0

define feedback SS_practice_feedback_first_block_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [aggregated_score_practice] of the [sequence_size] red squares that were presented.<br /><br />The next block of practice trials will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_practice_feedback_second_block
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trials. You were able to recall the positions of [aggregated_score_practice] of the [sequence_size] red squares that were presented.<br /><br />You completed all practice trials.<br /><br />You will now begin the experimental trials.<br /><br />The next block will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define feedback SS_practice_feedback_second_block_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You correctly determined that the images were symmetrical/dissymmetrical in [total_correct_processing] trial. You were able to recall the positions of [aggregated_score_practice] of the [sequence_size] red squares that were presented.<br /><br />You completed all practice trials.<br /><br />You will now begin the experimental trials.<br /><br />The next block will also comprehend 2 symmetrical/dissymmetrical images and a sequence of 2 red squares. <br /><br />Press any key to start the next block!" x=0 y=0 z_index=0

define sketchpad SS_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define loop SS_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run SS_block_sequence2

define sketchpad SS_practice_request_rep_seq
	set duration 1495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="Recreate the sequence of red squares!" x=0 y=0 z_index=0

define reset_feedback SS_practice_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script SS_practice_script_collect_responses
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial
	var.response_total_time_memory = 0
	responses.clear()
	
	# Displays canvas
	stimulus_display.show()
	
	##Initilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	# Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[0], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[0]
	var.correct_response_pos = var.List_SS_Pos[0]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
		##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	if var.live_row == 0 and var.count_SS_practice_reset_feedback != 0:
		var.response_total_time_memory_full_task = var.temp2
	else:
		var.response_total_time_memory_full_task += var.response_time_memory
	var.response_total_time_memory += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_practice += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_practice_script_collect_responses_1
	set description "Executes Python code"
	___run__
	##Clears the response of the previous trial
	responses.clear()
	
	# Displays canvas
	stimulus_display.show()
	
	##Initilizes the chronometer that will measure RT.
	start = round(time.time() * 1000)
	
	#counter of mouse clicks
	#click_counter = 0
	
	# Tracks mouse
	button_clicked, response_time, initiation_time, timestamps, xpos, ypos = mouse_tracking._exec(reset_mouse=False)
	#	click_counter = click_counter + 1
	
	##variable that stores the mouse clicks (responses) of the participant in ##this trial.
	var.pressed_buttons.append(button_clicked)
		
	##Updates feedback variables
	responses.add(response=button_clicked,response_time=response_time, correct=button_clicked==var.List_SS_button[1], item="Script_Gen_Stimuli")
	var.correct = responses.correct[0]
	var.correct_response = var.List_SS_button[1]
	var.correct_response_pos = var.List_SS_Pos[1]
	#print("Resposta correta 1o clique: ", var.List_SS_button[0])
	#print("Respostas 1o clique: ", responses.response)
	#print("correto/incorreto: ", var.correct)	
			
	# Set mouse-tracking variables for logging
	var.initiation_time_task=initiation_time
	var.timestamps_task=timestamps
	var.xpos_task=xpos
	var.ypos_task=ypos
		
	##Highlights the cell that participant selected (the limits of the grid will turn red).
	selected_stimulus_display = Canvas()
	i2 = (int(button_clicked[1:len(button_clicked)])-1)
	selected_stimulus_display[button_clicked] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='red', fill=True)
	save_selected_x = var.x_coord[i2]
	save_selected_y = var.y_coord[i2]	
	var.unpressed_buttons.remove(button_clicked)
	for i in var.unpressed_buttons:
	    i2 = (int(i[1:len(var.unpressed_buttons)])-1)
	    selected_stimulus_display[i] = Rect(x=(var.x_coord[i2]),y=(var.y_coord[i2]),w=(var.width*0.25),h=(var.height*0.25),color='white', fill=False)
	
	selected_stimulus_display.show()
	var.unpressed_buttons.insert(i2,button_clicked)
	clock.sleep(495)
	
	
		##Displays an empty grid.
	canv.show()
	#	clock.sleep(500)
	
	my_mouse = Mouse()
	my_mouse.show_cursor(show=False)
	
	##Stores the RT of the participant (with variable start set in line 9).
	end = round(time.time() * 1000)
	var.response_time_memory = int(end - start)
	if var.live_row == 0 and var.count_SS_practice_reset_feedback != 0:
		var.response_total_time_memory_full_task = var.temp2
	else:
		var.response_total_time_memory_full_task += var.response_time_memory
	var.response_total_time_memory += var.response_time_memory
	var.response_memory = responses.response[0]
	var.response_memory_pos = (var.x_coord[int(button_clicked[1:])-1],var.y_coord[int(button_clicked[1:])-1])
	if var.correct == 1:
		var.aggregated_score_practice += 1
	__end__
	___prepare__
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	__end__

define inline_script SS_practice_script_gen_square
	set description "Executes Python code"
	___run__
	##Draws the sequence of red squares.
	canv_square.show()
	clock.sleep(995)
	__end__
	___prepare__
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	__end__

define sequence SS_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run SS_practice_correct_response always
	run SS_practice_fixation_dot always
	run SS_symmetry_subtask_display always
	run SS_practice_script_gen_square always
	run logger always

define inline_script SS_symmetry_subtask_display
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define inline_script SelectTasks
	set description "Executes Python code"
	___run__
	##Sets tha python form that enables users to select which tasks they ##want to use.This form also enables the activation/deactivation of the socio-demographic questionnaire.
	TituloForm = Label(text=u'<b>Select the tasks that you intend to use:</b>', center=True)
	
	QuestaoUT = Label(text=u'1 - Updating Task:',center=False)
	Checkbox_UT_Sim = Checkbox(text=u'Yes', group=u'selUT', var=u'selUT',checked=True)
	Checkbox_UT_Nao = Checkbox(text=u'No', group=u'selUT', var=u'selUT')
	
	QuestaoBT = Label(text=u'2 - Binding Task:',center=False)
	Checkbox_BT_Sim = Checkbox(text=u'Yes', group=u'selBT', var=u'selBT',checked=True)
	Checkbox_BT_Nao = Checkbox(text=u'No', group=u'selBT', var=u'selBT')
	
	QuestaoOS = Label(text=u'3 - Operation Span:',center=False)
	Checkbox_OS_Sim = Checkbox(text=u'Yes', group=u'selOS', var=u'selOS',checked=True)
	Checkbox_OS_Nao = Checkbox(text=u'No', group=u'selOS', var=u'selOS')
	
	QuestaoNB = Label(text=u'4 - N-Back Task:',center=False)
	Checkbox_NB_Sim = Checkbox(text=u'Yes', group=u'selNB', var=u'selNB',checked=True)
	Checkbox_NB_Nao = Checkbox(text=u'No', group=u'selNB', var=u'selNB')
	
	QuestaoMS = Label(text=u'5 - Multimodal Span:',center=False)
	Checkbox_MS_Sim = Checkbox(text=u'Yes', group=u'selMS', var=u'selMS',checked=True)
	Checkbox_MS_Nao = Checkbox(text=u'No', group=u'selMS', var=u'selMS')
	
	QuestaoSS = Label(text=u'6 - Symmetry Span:',center=False)
	Checkbox_SS_Sim = Checkbox(text=u'Yes', group=u'selSS', var=u'selSS',checked=True)
	Checkbox_SS_Nao = Checkbox(text=u'No', group=u'selSS', var=u'selSS')
	
	QuestaoSocDem = Label(text=u'7 - Sociodemographic Quest:',center=False)
	Checkbox_SocDem_Sim = Checkbox(text=u'Yes', group=u'selSocDem', var=u'selSocDem',checked=True)
	Checkbox_SocDem_Nao = Checkbox(text=u'No', group=u'selSocDem', var=u'selSocDem')
	
	button_ok = Button(text=u'Press this button when you finish selecting the tasks')
	
	FormSocioDemograficos = Form(rows=[1,1,1,1,1,1,1,1,1], cols=[1,1,1,1,1,1,1,1],margins=(0,0,0,0),spacing=0)
	FormSocioDemograficos.set_widget(TituloForm, (0,0), colspan=8)
	
	FormSocioDemograficos.set_widget(QuestaoUT, (0,1),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_UT_Sim, (3,1),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_UT_Nao, (5,1),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoBT, (0,2),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_BT_Sim, (3,2),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_BT_Nao, (5,2),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoOS, (0,3),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_OS_Sim, (3,3),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_OS_Nao, (5,3),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoNB, (0,4),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_NB_Sim, (3,4),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_NB_Nao, (5,4),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoMS, (0,5),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_MS_Sim, (3,5),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_MS_Nao, (5,5),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoSS, (0,6),colspan=3)
	FormSocioDemograficos.set_widget(Checkbox_SS_Sim, (3,6),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_SS_Nao, (5,6),colspan=2)
	
	FormSocioDemograficos.set_widget(QuestaoSocDem, (0,7),colspan=4)
	FormSocioDemograficos.set_widget(Checkbox_SocDem_Sim, (4,7),colspan=2)
	FormSocioDemograficos.set_widget(Checkbox_SocDem_Nao, (6,7),colspan=2)
	
	FormSocioDemograficos.set_widget(button_ok, (0, 8),colspan=8)
	
	FormSocioDemograficos._exec()
	__end__
	set _prepare ""

define inline_script WMU_Calculate_avg_rt
	set description "Executes Python code"
	___run__
	#Calculates Mean RT.
	var.responseavgRT = (var.TotalRtBlock/(var.live_row + 1))
	__end__
	set _prepare ""

define inline_script WMU_Ini_Task_Name
	set description "Executes Python code"
	___run__
	var.Task_Name = "Working Memory Updating Task"
	__end__
	set _prepare ""

define inline_script WMU_Update_Trial_Number
	set description "Executes Python code"
	___run__
	var.TrialNumber = var.TrialNumber + 1
	__end__
	___prepare__
	##Sets the lists that will determine the order in which the digits will be presented at the begining of the screen.
	var.Index_List = []
	var.Index_List.append(var.forToUpdateList1)
	var.Index_List.append(var.forToUpdateList2)
	var.Index_List.append(var.forToUpdateList3)
	var.Index_List.append(var.forToUpdateList4)
	var.Index_List.append(var.forToUpdateList5)
	var.Index_List.append(var.forToUpdateList6)
	
	var.List_Show_to_Update_Canvas = []
	__end__

define sequence WMU_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run WMU_Ini_Task_Name always
	run WMU_general_instructions always
	run WMU_general_instructions_2 always
	run WMU_practice_loop always
	run WMU_experimental_loop always

define inline_script WMU_experimental_CalculateScoreAndRT
	set description "Executes Python code"
	___run__
	##Saves the RT of the participant in each trial.
	end = round(time.time() * 1000)
	
	var.response_time = end - start
	
	##Converts the variable response_time1 and the variable ##response_time.
	var.response_time1 = var.response_time
	
	##updates the total amount of time the participant took to ##complete the block.
	var.TotalRtBlock = var.TotalRtBlock + var.response_time1
	
	##Converts the variables response1, response2 e response3 e ##response ##nas variáveis response1, response2 e response3. 
	var.response1 = var.response1
	var.response2 = var.response2
	var.response3 = var.response3
	
	###Calculates the score of the participant.
	if var.response1 == var.correct_response1:
	    var.correct = 1
	    var.correct1 = 1
	    var.WMUExperimentalScore += 1
	else:
	    var.correct = 0
	    var.correct1 = 0
	
	if var.response2 == var.correct_response2:
	    var.correct = 1
	    var.correct2 = 1
	    var.WMUExperimentalScore += 1
	else:
	    var.correct = 0
	    var.correct2 = 0
	    
	if var.response3 == var.correct_response3:
	    var.correct = 1
	    var.correct3 = 1
	    var.WMUExperimentalScore += 1
	else:
	    var.correct = 0
	    var.correct3 = 0
	    
	var.total_correct_trial = var.correct1 + var.correct2 + var.correct3
	
	#print("Resonse_time: ", var.response_time)
	#print("correct response: ", var.correct_response1)
	#print("response: ", var.response1)
	#print("correct: ", var.correct)
	#print("Number Series Practice Score: ", var.NumberSeriesPracticeScore)
	__end__
	set _prepare ""

define loop WMU_experimental_block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 digit1 9
	setcycle 0 digit2 6
	setcycle 0 digit3 4
	setcycle 0 toUpdate1_1 -3
	setcycle 0 toUpdate1_2 3
	setcycle 0 toUpdate1_3 4
	setcycle 0 toUpdate2_1 2
	setcycle 0 toUpdate2_2 -2
	setcycle 0 toUpdate2_3 -7
	setcycle 0 correct_response1 8
	setcycle 0 correct_response2 7
	setcycle 0 correct_response3 1
	setcycle 0 forToUpdateList1 3
	setcycle 0 forToUpdateList2 1
	setcycle 0 forToUpdateList3 6
	setcycle 0 forToUpdateList4 2
	setcycle 0 forToUpdateList5 4
	setcycle 0 forToUpdateList6 5
	setcycle 1 digit1 6
	setcycle 1 digit2 5
	setcycle 1 digit3 8
	setcycle 1 toUpdate1_1 3
	setcycle 1 toUpdate1_2 2
	setcycle 1 toUpdate1_3 -4
	setcycle 1 toUpdate2_1 -5
	setcycle 1 toUpdate2_2 2
	setcycle 1 toUpdate2_3 -3
	setcycle 1 correct_response1 4
	setcycle 1 correct_response2 9
	setcycle 1 correct_response3 1
	setcycle 1 forToUpdateList1 2
	setcycle 1 forToUpdateList2 1
	setcycle 1 forToUpdateList3 3
	setcycle 1 forToUpdateList4 4
	setcycle 1 forToUpdateList5 6
	setcycle 1 forToUpdateList6 5
	setcycle 2 digit1 7
	setcycle 2 digit2 5
	setcycle 2 digit3 9
	setcycle 2 toUpdate1_1 -5
	setcycle 2 toUpdate1_2 4
	setcycle 2 toUpdate1_3 -8
	setcycle 2 toUpdate2_1 3
	setcycle 2 toUpdate2_2 -3
	setcycle 2 toUpdate2_3 7
	setcycle 2 correct_response1 5
	setcycle 2 correct_response2 6
	setcycle 2 correct_response3 8
	setcycle 2 forToUpdateList1 3
	setcycle 2 forToUpdateList2 2
	setcycle 2 forToUpdateList3 1
	setcycle 2 forToUpdateList4 5
	setcycle 2 forToUpdateList5 4
	setcycle 2 forToUpdateList6 6
	setcycle 3 digit1 5
	setcycle 3 digit2 9
	setcycle 3 digit3 7
	setcycle 3 toUpdate1_1 1
	setcycle 3 toUpdate1_2 -4
	setcycle 3 toUpdate1_3 -6
	setcycle 3 toUpdate2_1 2
	setcycle 3 toUpdate2_2 -2
	setcycle 3 toUpdate2_3 5
	setcycle 3 correct_response1 8
	setcycle 3 correct_response2 3
	setcycle 3 correct_response3 6
	setcycle 3 forToUpdateList1 1
	setcycle 3 forToUpdateList2 3
	setcycle 3 forToUpdateList3 4
	setcycle 3 forToUpdateList4 2
	setcycle 3 forToUpdateList5 6
	setcycle 3 forToUpdateList6 5
	setcycle 4 digit1 9
	setcycle 4 digit2 4
	setcycle 4 digit3 1
	setcycle 4 toUpdate1_1 -4
	setcycle 4 toUpdate1_2 5
	setcycle 4 toUpdate1_3 3
	setcycle 4 toUpdate2_1 -1
	setcycle 4 toUpdate2_2 -7
	setcycle 4 toUpdate2_3 4
	setcycle 4 correct_response1 4
	setcycle 4 correct_response2 2
	setcycle 4 correct_response3 8
	setcycle 4 forToUpdateList1 2
	setcycle 4 forToUpdateList2 3
	setcycle 4 forToUpdateList3 5
	setcycle 4 forToUpdateList4 1
	setcycle 4 forToUpdateList5 6
	setcycle 4 forToUpdateList6 4
	setcycle 5 digit1 5
	setcycle 5 digit2 8
	setcycle 5 digit3 2
	setcycle 5 toUpdate1_1 3
	setcycle 5 toUpdate1_2 -6
	setcycle 5 toUpdate1_3 -1
	setcycle 5 toUpdate2_1 -4
	setcycle 5 toUpdate2_2 3
	setcycle 5 toUpdate2_3 6
	setcycle 5 correct_response1 4
	setcycle 5 correct_response2 5
	setcycle 5 correct_response3 7
	setcycle 5 forToUpdateList1 2
	setcycle 5 forToUpdateList2 3
	setcycle 5 forToUpdateList3 1
	setcycle 5 forToUpdateList4 6
	setcycle 5 forToUpdateList5 4
	setcycle 5 forToUpdateList6 5
	setcycle 6 digit1 4
	setcycle 6 digit2 2
	setcycle 6 digit3 3
	setcycle 6 toUpdate1_1 2
	setcycle 6 toUpdate1_2 5
	setcycle 6 toUpdate1_3 6
	setcycle 6 toUpdate2_1 -3
	setcycle 6 toUpdate2_2 -5
	setcycle 6 toUpdate2_3 -7
	setcycle 6 correct_response1 3
	setcycle 6 correct_response2 2
	setcycle 6 correct_response3 2
	setcycle 6 forToUpdateList1 1
	setcycle 6 forToUpdateList2 3
	setcycle 6 forToUpdateList3 2
	setcycle 6 forToUpdateList4 6
	setcycle 6 forToUpdateList5 4
	setcycle 6 forToUpdateList6 5
	setcycle 7 digit1 9
	setcycle 7 digit2 4
	setcycle 7 digit3 5
	setcycle 7 toUpdate1_1 -5
	setcycle 7 toUpdate1_2 1
	setcycle 7 toUpdate1_3 4
	setcycle 7 toUpdate2_1 -3
	setcycle 7 toUpdate2_2 1
	setcycle 7 toUpdate2_3 -3
	setcycle 7 correct_response1 1
	setcycle 7 correct_response2 6
	setcycle 7 correct_response3 6
	setcycle 7 forToUpdateList1 3
	setcycle 7 forToUpdateList2 1
	setcycle 7 forToUpdateList3 6
	setcycle 7 forToUpdateList4 2
	setcycle 7 forToUpdateList5 4
	setcycle 7 forToUpdateList6 5
	setcycle 8 digit1 9
	setcycle 8 digit2 6
	setcycle 8 digit3 5
	setcycle 8 toUpdate1_1 -2
	setcycle 8 toUpdate1_2 3
	setcycle 8 toUpdate1_3 2
	setcycle 8 toUpdate2_1 -1
	setcycle 8 toUpdate2_2 -4
	setcycle 8 toUpdate2_3 2
	setcycle 8 correct_response1 6
	setcycle 8 correct_response2 5
	setcycle 8 correct_response3 9
	setcycle 8 forToUpdateList1 2
	setcycle 8 forToUpdateList2 1
	setcycle 8 forToUpdateList3 5
	setcycle 8 forToUpdateList4 3
	setcycle 8 forToUpdateList5 4
	setcycle 8 forToUpdateList6 6
	setcycle 9 digit1 7
	setcycle 9 digit2 4
	setcycle 9 digit3 8
	setcycle 9 toUpdate1_1 -5
	setcycle 9 toUpdate1_2 4
	setcycle 9 toUpdate1_3 -1
	setcycle 9 toUpdate2_1 7
	setcycle 9 toUpdate2_2 -2
	setcycle 9 toUpdate2_3 1
	setcycle 9 correct_response1 9
	setcycle 9 correct_response2 6
	setcycle 9 correct_response3 8
	setcycle 9 forToUpdateList1 1
	setcycle 9 forToUpdateList2 2
	setcycle 9 forToUpdateList3 3
	setcycle 9 forToUpdateList4 4
	setcycle 9 forToUpdateList5 5
	setcycle 9 forToUpdateList6 6
	setcycle 10 digit1 3
	setcycle 10 digit2 2
	setcycle 10 digit3 6
	setcycle 10 toUpdate1_1 5
	setcycle 10 toUpdate1_2 -1
	setcycle 10 toUpdate1_3 3
	setcycle 10 toUpdate2_1 -3
	setcycle 10 toUpdate2_2 4
	setcycle 10 toUpdate2_3 -6
	setcycle 10 correct_response1 5
	setcycle 10 correct_response2 5
	setcycle 10 correct_response3 3
	setcycle 10 forToUpdateList1 1
	setcycle 10 forToUpdateList2 3
	setcycle 10 forToUpdateList3 2
	setcycle 10 forToUpdateList4 6
	setcycle 10 forToUpdateList5 4
	setcycle 10 forToUpdateList6 5
	setcycle 11 digit1 4
	setcycle 11 digit2 7
	setcycle 11 digit3 8
	setcycle 11 toUpdate1_1 2
	setcycle 11 toUpdate1_2 -3
	setcycle 11 toUpdate1_3 -6
	setcycle 11 toUpdate2_1 2
	setcycle 11 toUpdate2_2 1
	setcycle 11 toUpdate2_3 -1
	setcycle 11 correct_response1 8
	setcycle 11 correct_response2 5
	setcycle 11 correct_response3 1
	setcycle 11 forToUpdateList1 2
	setcycle 11 forToUpdateList2 1
	setcycle 11 forToUpdateList3 3
	setcycle 11 forToUpdateList4 4
	setcycle 11 forToUpdateList5 5
	setcycle 11 forToUpdateList6 6
	run WMU_experimental_trial_sequence

define sequence WMU_experimental_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run WMU_experimental_reset_feedback always
	run WMU_experimental_ini_var_calc_n_back always
	run WMU_experimental_block_loop always
	run WMU_Calculate_avg_rt always
	run WMU_experimental_feedback "[WMUExperimentalScore] != 0 and [WMUExperimentalScore] != 36"
	run WMU_experimental_feedback_2 "[WMUExperimentalScore] = 36"
	run WMU_experimental_feedback_3 "[WMUExperimentalScore] = 0"
	run logger always

define feedback WMU_experimental_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You have correctly updated [WMUExperimentalScore] out of 36 numbers.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define feedback WMU_experimental_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You have correctly updated all 36 numbers.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define feedback WMU_experimental_feedback_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all experimental trials!<br /><br />You were not able to update any number.<br /><br />Press any key to finish the task." x=0 y=0 z_index=0

define inline_script WMU_experimental_ini_var_calc_n_back
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the variabele that will store the score of the participant ##in the practice trials of the updating task.
	var.WMUExperimentalScore = 0
	var.responseavgRT = 0
	var.TotalRtBlock = 0
	
	##################################################################
	var.TrialNumber = 0
	__end__

define loop WMU_experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run WMU_experimental_block_sequence

define reset_feedback WMU_experimental_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence WMU_experimental_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run WMU_Update_Trial_Number always
	run WMU_practice_fixation_dot always
	run WMU_general_script_gen_stimuli always
	run WMU_general_cronometro_init always
	run WMU_general_form_base always
	run WMU_experimental_CalculateScoreAndRT always
	run WMU_feedback "[total_correct_trial] != 0 and [total_correct_trial] != 3"
	run WMU_feedback_1 "[total_correct_trial] = 0"
	run WMU_feedback_2 "[total_correct_trial] = 3"
	run logger always

define feedback WMU_feedback
	set reset_variables yes
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="You have correctly updated [total_correct_trial] of the 3 numbers that<br></br>were presented at the beginning of the trial! <br></br>Correct updated numbers:" x=0 y="[MULineOnePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response1]" x="[NSLineTwoPosX]" y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response2]" x=0 y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response3]" x="[NSLineFivePosX]" y="[NSLineTwoPosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineThreePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineFourPosX]" x2="[MULineFourPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineOnePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineTwoPosX]" x2="[MULineTwoPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSixPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSevenPosX]" x2="[NSLineSevenPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="Press any key to continue!" x=0 y="[NSLineFourPosY]" z_index=0

define feedback WMU_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="You were not able to update any of the 3 numbers that<br></br>were presented at the beginning of the trial! <br></br>Correct updated numbers:" x=0 y="[MULineOnePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response1]" x="[NSLineTwoPosX]" y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response2]" x=0 y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response3]" x="[NSLineFivePosX]" y="[NSLineTwoPosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineThreePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineFourPosX]" x2="[MULineFourPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineOnePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineTwoPosX]" x2="[MULineTwoPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSixPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSevenPosX]" x2="[NSLineSevenPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="Press any key to continue!" x=0 y="[NSLineFourPosY]" z_index=0

define feedback WMU_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="You have successfully updated the 3 numbers that<br></br>were presented at the beginning of the trial! <br></br>Correct updated numbers:" x=0 y="[MULineOnePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response1]" x="[NSLineTwoPosX]" y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response2]" x=0 y="[NSLineTwoPosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="[correct_response3]" x="[NSLineFivePosX]" y="[NSLineTwoPosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineFourPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineThreePosX]" x2="[MULineThreePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineFourPosX]" x2="[MULineFourPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineTwoPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineOnePosX]" x2="[MULineOnePosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[MULineTwoPosX]" x2="[MULineTwoPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1=0 y2=0 z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSevenPosX]" y1="[NSLineThreePosY]" y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSixPosX]" x2="[NSLineSixPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw line color=white penwidth=1 show_if=always x1="[NSLineSevenPosX]" x2="[NSLineSevenPosX]" y1=0 y2="[NSLineThreePosY]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize30OpenSes]" html=yes show_if=always text="Press any key to continue!" x=0 y="[NSLineFourPosY]" z_index=0

define inline_script WMU_general_cronometro_init
	set description "Executes Python code"
	___run__
	##Initializes the chronometer that will measure the RT of the ##participants in each trials.
	import time
	
	start = round(time.time() * 1000)
	__end__
	set _prepare ""

define inline_script WMU_general_form_base
	set description "Executes Python code"
	___run__
	##Function that ensures that an answer was typed in each response ##box.
	def my_validator_form():
	
	    return var.response1 != u'' and var.response2 != u'' and var.response3 != u''    
	
	#def filter_digits(ch):
	
	#    """Allows only digit characters as input"""
	
	#    return ch in u'0123456789'
	
	################################################################
	##Creation of the form with the response boxes.
	
	##Sets the number of columns, lines, margins and spacing between the presented sitmuli and the margins of the form.
	form = Form(validator = my_validator_form,
	    cols=[1,1,1,1,1], rows=[1,1,1,1],
	    margins=(50,100,50,100), spacing=0
	)
	#Creation of the widgets/objects that will contain the stimuli that will be presented to the participants.
	labelTitle = Label(text=u'Type the updated digits in the response boxes: \n (Select the response boxes with the mouse, type your answer \n and press the "Enter" key)', center=True)
	
	#Criação das Caixas de Respotas
	PartInput1 = TextInput(frame=True, center=True, stub=u'...', return_accepts=True, var=u'response1')
	PartInput2 = TextInput(frame=True, center=True, stub=u'...', return_accepts=True, var=u'response2')
	PartInput3 = TextInput(frame=True, center=True, stub=u'...', return_accepts=True, var=u'response3')
	
	##Definition of the position of the widgets/objects in the form. ##*(column, row) tuple.
	form.set_widget(labelTitle, (0,1), colspan=5)
	form.set_widget(PartInput1, (0,2))
	form.set_widget(PartInput2, (2,2))
	form.set_widget(PartInput3, (4,2))
	
	#Exceutes of the form.
	form._exec()
	__end__
	set _prepare ""

define sketchpad WMU_general_instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="" x=-4 y=1 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />Two rows of windows will be presented in this task. Each row will contain 3 windows. At the beginning of each trial, 3 numbers will be presented simultaneously in the windows of the first row (as it is exemplified in the first figure of the scheme). You must memorize these 3 numbers. The 3 numbers will be presented for 2 seconds. Then, several sum and subtraction operations (e.g., '+8', '-2') will be presented in the second row of windows (see the second, third, and fourth images of the scheme).<br />Every time a new mathematical operation appears on the screen, you must apply this operation to the number that appeared in the corresponding window of the first row and memorize the updated digit. Each mathematical operation will be presented for 2 seconds. When the sequence of updating operations is completed, you must type the updated numbers on the 3 response boxes that will pop up (as it is exemplified in the last figure of the scheme)." x=0 y="[MUTextPosY1]" z_index=0
	draw image center=1 file="Tela2.png" scale=1 show_if=always x=0 y="[MUTextPosY2]" z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize20OpenSes]" html=yes show_if=always text="Press any key to continue." x=0 y="[MUTextPosY3]" z_index=0

define sketchpad WMU_general_instructions_2
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="<b>Instructions</b><br /><br />First, you will complete some practice trials.<br /><br />Press any key to begin the practice trials.<br />" x=0 y=0 z_index=0

define inline_script WMU_general_script_gen_stimuli
	set description "Executes Python code"
	___run__
	##Displays the empty canvas, the canvas with three numbers, and ##the canvas with mathematical operations.
	canv.show()
	clock.sleep(495)
	canv_digit.show()
	clock.sleep(1995)
	canv.show()
	clock.sleep(495)
	for i in var.List_Show_to_Update_Canvas:
	    i.show()
	    clock.sleep(1995)
	    canv.show()
	    clock.sleep(495)
	__end__
	___prepare__
	import random
	######################################################################################Function to create the canvas
	def create_canvas():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the squares ##that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    return var.c,var.xy_coord
	
	run_fct = create_canvas()
	canv = run_fct[0]
	var.xy_coord = run_fct[1]
	
	########################################################################################Function to create the canvas with digits
	def create_canvas_with_digits():
	    var.c = Canvas()
	    ##Marca as coordenadas (x e y) a partir das quais os nove quadrados que vão compor a tela vão ser desenhados.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	
	    ##Draws the canvas with 3 squares that will be presented at the begining of the trials.
	    var.digit_pos1 = [var.xy_coord[0]]
	    x,y = var.digit_pos1.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    var.c.text(var.digit1, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    
	    var.digit_pos2 = [var.xy_coord[1]]
	    x,y = var.digit_pos2.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    var.c.text(var.digit2, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    
	    var.digit_pos3 = [var.xy_coord[2]]
	    x,y = var.digit_pos3.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    var.c.text(var.digit3, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    
	    return var.c,var.digit1,var.digit2,var.digit3
	
	
	run_function = create_canvas_with_digits()
	canv_digit = run_function[0]
	var.digit1 = run_function[1]
	var.digit2 = run_function[2]
	var.digit3 = run_function[3]
	
	
	
	######################################################################Draws canvas with the first mathematical operation.
	def toUpdate1Digit1():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos1 = [var.xy_coord[3]]
	    x,y = var.update_cond_pos1.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate1_1 > 0:
	        var.c.text('+' + str(var.toUpdate1_1), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate1_1, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate1Digit1 = toUpdate1Digit1()
	
	########################################################################################Draws canvas with the second mathematical ##operation.
	def toUpdate1Digit2():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos2 = [var.xy_coord[4]]
	    x,y = var.update_cond_pos2.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate1_2 > 0:
	        var.c.text('+' + str(var.toUpdate1_2), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate1_2, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate1Digit2 = toUpdate1Digit2()
	
	#################################################################################Draws canvas with the third mathematical operation.
	def toUpdate1Digit3():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos3 = [var.xy_coord[5]]
	    x,y = var.update_cond_pos3.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate1_3 > 0:
	        var.c.text('+' + str(var.toUpdate1_3), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate1_3, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate1Digit3 = toUpdate1Digit3()
	
	########################################################################################Draws canvas with the fourth mathematical ##operation.
	def toUpdate2Digit1():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos1 = [var.xy_coord[3]]
	    x,y = var.update_cond_pos1.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate2_1 > 0:
	        var.c.text('+' + str(var.toUpdate2_1), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate2_1, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate2Digit1 = toUpdate2Digit1()
	
	#######################################################################################Draws canvas with the fifth mathematical operation.
	def toUpdate2Digit2():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos2 = [var.xy_coord[4]]
	    x,y = var.update_cond_pos2.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate2_2 > 0:
	        var.c.text('+' + str(var.toUpdate2_2), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate2_2, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate2Digit2 = toUpdate2Digit2()
	
	#################################################################################Draws canvas with the sixth mathematical operation.
	def toUpdate2Digit3():
	    var.c = Canvas()
	    ##Sets the coordinates (x and y) of the positions of the ##textboxes that will compose the image.
	    var.xy_coord = [(var.width*-0.4375,var.height*-0.3889),(var.width*-0.1250    ,var.height*-0.3889),(var.width*0.1875,var.height*-0.3889),(var.width*-0.4375,var.height*0.0506),(var.width*-0.1250,var.height*0.0506),(var.width*0.1875,var.height*0.0506)]
	    ##Draws the textboxes.
	    for x, y in var.xy_coord:
	        var.c.rect(x, y, (var.height*0.33), (var.height*0.33))
	    
	    var.update_cond_pos3 = [var.xy_coord[5]]
	    x,y = var.update_cond_pos3.pop(0)
	    x = x+var.width*0.1250
	    y = y+var.height*0.1667
	    if var.toUpdate2_3 > 0:
	        var.c.text('+' + str(var.toUpdate2_3), x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')
	    else:
	        var.c.text(var.toUpdate2_3, x=x, y=y, color = 'white', font_size = var.FontSize55Python, font_family = 'arial')        
	    
	    return var.c
	
	toUpdate2Digit3 = toUpdate2Digit3()
	
	##Creation of lists with the mathematical equations in the order in which they will be presented.
	for i in var.Index_List:
	    if i == 1:
	        var.List_Show_to_Update_Canvas.append(toUpdate1Digit1)
	    if i == 2:
	        var.List_Show_to_Update_Canvas.append(toUpdate1Digit2)
	    if i == 3:
	        var.List_Show_to_Update_Canvas.append(toUpdate1Digit3)
	    if i == 4:
	        var.List_Show_to_Update_Canvas.append(toUpdate2Digit1)
	    if i == 5:
	        var.List_Show_to_Update_Canvas.append(toUpdate2Digit2)
	    if i == 6:
	        var.List_Show_to_Update_Canvas.append(toUpdate2Digit3)
	__end__

define loop WMU_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run WMU_experiment

define inline_script WMU_practice_CalculateScoreAndRT
	set description "Executes Python code"
	___run__
	##Saves the RT of the participant in each trial.
	end = round(time.time() * 1000)
	
	var.response_time = end - start
	
	##Converts the variable response_time1 and the variable ##response_time. 
	var.response_time1 = var.response_time
	
	
	##updates the total amount of time the participant took to ##complete the block.
	var.TotalRtBlock = var.TotalRtBlock + var.response_time1
	
	##Converts the variables response1, response2 e response3 e ##response ##nas variáveis response1, response2 e response3. 
	var.response1 = var.response1
	var.response2 = var.response2
	var.response3 = var.response3
	
	###Calculates the score of the participant.
	if var.response1 == var.correct_response1:
	    var.correct = 1
	    var.correct1 = 1
	    var.WMUPracticeScore += 1
	else:
	    var.correct = 0
	    var.correct1 = 0
	
	if var.response2 == var.correct_response2:
	    var.correct = 1
	    var.correct2 = 1
	    var.WMUPracticeScore += 1
	else:
	    var.correct = 0
	    var.correct2 = 0
	    
	if var.response3 == var.correct_response3:
	    var.correct = 1
	    var.correct3 = 1
	    var.WMUPracticeScore += 1
	else:
	    var.correct = 0
	    var.correct3 = 0
	    
	var.total_correct_trial = var.correct1 + var.correct2 + var.correct3
	__end__
	set _prepare ""

define loop WMU_practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 2
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 digit1 4
	setcycle 0 digit2 2
	setcycle 0 digit3 8
	setcycle 0 toUpdate1_1 3
	setcycle 0 toUpdate1_2 -1
	setcycle 0 toUpdate1_3 1
	setcycle 0 toUpdate2_1 -4
	setcycle 0 toUpdate2_2 4
	setcycle 0 toUpdate2_3 -5
	setcycle 0 correct_response1 3
	setcycle 0 correct_response2 5
	setcycle 0 correct_response3 4
	setcycle 0 forToUpdateList1 1
	setcycle 0 forToUpdateList2 2
	setcycle 0 forToUpdateList3 4
	setcycle 0 forToUpdateList4 3
	setcycle 0 forToUpdateList5 5
	setcycle 0 forToUpdateList6 6
	setcycle 1 digit1 5
	setcycle 1 digit2 4
	setcycle 1 digit3 3
	setcycle 1 toUpdate1_1 -3
	setcycle 1 toUpdate1_2 5
	setcycle 1 toUpdate1_3 2
	setcycle 1 toUpdate2_1 4
	setcycle 1 toUpdate2_2 -6
	setcycle 1 toUpdate2_3 -1
	setcycle 1 correct_response1 6
	setcycle 1 correct_response2 3
	setcycle 1 correct_response3 4
	setcycle 1 forToUpdateList1 1
	setcycle 1 forToUpdateList2 2
	setcycle 1 forToUpdateList3 3
	setcycle 1 forToUpdateList4 5
	setcycle 1 forToUpdateList5 6
	setcycle 1 forToUpdateList6 4
	run WMU_practice_trial_sequence

define sequence WMU_practice_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run WMU_practice_reset_feedback always
	run WMU_practice_ini_var_calc_n_back always
	run WMU_practice_block_loop always
	run WMU_Calculate_avg_rt always
	run WMU_practice_feedback "[WMUPracticeScore] != 0 and [WMUPracticeScore] != 6"
	run WMU_practice_feedback_2 "[WMUPracticeScore] = 6"
	run WMU_practice_feedback_3 "[WMUPracticeScore] = 0"
	run logger always

define feedback WMU_practice_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You have correctly updated [WMUPracticeScore] out of 6 numbers.<br /><br />You will know begin the experimental trials.<br /><br />Once again, your goal is to memorize the 3 digits that will be presented at the beginning of each trial. Then, you will have to apply a sequence of mathematical operations and memorize the updated digits. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define feedback WMU_practice_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You have correctly updated all 6 numbers.<br /><br />You will know begin the experimental trials.<br /><br />Once again, your goal is to memorize the 3 digits that will be presented at the beginning of each trial. Then, you will have to apply a sequence of mathematical operations and memorize the updated digits. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define feedback WMU_practice_feedback_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size="[FontSize25OpenSes]" html=yes show_if=always text="You completed all practice trials!<br /><br />You were not able to update any number.<br /><br />You will know begin the experimental trials.<br /><br />Once again, your goal is to memorize the 3 digits that will be presented at the beginning of each trial. Then, you will have to apply a sequence of mathematical operations and memorize the updated digits. <br /><br />Press any key to begin the experimental trials." x=0 y=0 z_index=0

define sketchpad WMU_practice_fixation_dot
	set start_response_interval no
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="[fixDot]" x=0 y=0 z_index=0

define inline_script WMU_practice_ini_var_calc_n_back
	set description "Executes Python code"
	set _run ""
	___prepare__
	##Sets the variabele that will store the score of the participant ##in the practice trials of the updating task.
	var.WMUPracticeScore = 0
	var.responseavgRT = 0
	var.TotalRtBlock = 0
	
	##################################################################
	var.TrialNumber = 0
	__end__

define loop WMU_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run WMU_practice_block_sequence

define reset_feedback WMU_practice_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence WMU_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run WMU_Update_Trial_Number always
	run WMU_practice_fixation_dot always
	run WMU_general_script_gen_stimuli always
	run WMU_general_cronometro_init always
	run WMU_general_form_base always
	run WMU_practice_CalculateScoreAndRT always
	run WMU_feedback "[total_correct_trial] != 0 and [total_correct_trial] != 3"
	run WMU_feedback_1 "[total_correct_trial] = 0"
	run WMU_feedback_2 "[total_correct_trial] = 3"
	run logger always

define sequence binding_experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run BT_Init_Var always
	run BT_instructions always
	run BT_instructions2 always
	run BT_instructions3 always
	run BT_instructions4 always
	run BT_practice_loop always
	run BT_Init_Var always
	run BT_experimental_loop always

define loop binding_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run binding_experiment

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run GenCountIni always
	run FontandImgSizes always
	run SelectTasks always
	run InitialMessage "[selSocDem] == \"Yes\""
	run InitialMessage_SemQuest "[selSocDem] == \"No\""
	run DadosSociodemograficos1 "[selSocDem] == \"Yes\""
	run DadosSociodemograficos2 "[selSocDem] == \"Yes\""
	run processing_tasks_flow_loop always
	run task_flow_loop always
	run GoogbyeMessage always

define sequence experimental_trial_sequence_3
	set flush_keyboard yes
	set description "A single trial"
	run OS_experimental_correct_response_3 always
	run OS_experimental_fixation_dot_3 always
	run OS_experimental_equation_display_3 always
	run OS_experimental_keyboard_response_3 always
	run OS_script_keep_response_processing_subtask always
	run OS_general_script_generate_to_be_remembered_letter always
	run logger always
	run OSUpdateTrialNumber always

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log To_be_remembered_words
	log Sub_bloco
	log Frase

define mousetrap_response mousetrap_response_1
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;280"
	set skip_item yes
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 1
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 ""
	set button1 ""
	set boundaries "upper=no lower=no left=no right=no"

define sequence multimodal_experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run mousetrap_response_1 always
	run MS_Ini_Task_Name always
	run MS_general_instructions always
	run MS_practice_loop always
	run MS_experimental_loop always

define loop multimodal_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run multimodal_experiment

define sequence n_back_experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run NB_Ini_Task_Name always
	run NB_general_instructions_1 always
	run NB_general_instructions_2 always
	run NB_general_instructions_3 always
	run NB_general_instructions_4 always
	run NB_practice_loop always
	run NB_experimental_loop always

define loop n_back_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run n_back_experiment

define sequence operation_processing_task_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run OP_IniLists always
	run OP_instructions always
	run OS_reset_feedback always
	run OP_practice_loop always
	run OP_practice_feedback "[total_correct] != 1"
	run OP_practice_feedback_1 "[total_correct] = 1"
	run OS_reset_feedback_1 always
	run OP_experimental_loop always
	run OP_calculate_avg_dp_processing_time always
	run OP_experimental_feedback "[total_correct] != 1"
	run OP_experimental_feedback_1 "[total_correct] = 1"

define loop operation_processing_tasks_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run operation_processing_task_experiment

define sequence operation_span_experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run OS_General_instructions always
	run OS_Sequential_block_choice always
	run OS_practice_loop always
	run OS_experimental_loop_2 always
	run OS_experimental_loop_3 always
	run OS_experimental_loop_4 always
	run OS_experimental_loop_5 always
	run OS_experimental_loop_6 always
	run logger always

define loop operation_span_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run operation_span_experiment

define inline_script processing_GenCounterBalancing
	set description "Executes Python code"
	___run__
	##Sets the order in which the processing tasks will be presented to ##each participant.
	##The order of the task is determined by the participant's ID.
	##Our algorithm subtracts 2 units to the subjects ID until this number is <= 2. 
	##The resulting number is divided by 2. The decimal part (e.g., 33/2= ##0.5) sets the order of the tasks.
	##Order 1: OP,SS.
	##Order 2: SS,OP.
	
	from datamatrix import DataMatrix
	
	if var.CB_ref_process == 0.5:
	    if GenCounterProcess == 0:
	        if var.selOS == "Yes":
	            items['operation_processing_tasks_loop'].dm.w = '1'
	        else:
	            items['operation_processing_tasks_loop'].dm.w = '0'
	        items['symetry_processing_task_loop'].dm.w = '0'
	    elif GenCounterProcess == 1:
	        items['operation_processing_tasks_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_processing_task_loop'].dm.w = '1'
	        else:
	            items['symetry_processing_task_loop'].dm.w = '0'
	elif var.CB_ref_process == 0.0:
	    if GenCounterProcess == 0:
	        items['operation_processing_tasks_loop'].dm.w = '0'
	        if var.selSS == "Yes":
	            items['symetry_processing_task_loop'].dm.w = '1'
	        else:
	            items['symetry_processing_task_loop'].dm.w = '0'
	    elif GenCounterProcess == 1:
	        if var.selOS == "Yes":
	            items['operation_processing_tasks_loop'].dm.w = '1'
	        else:
	            items['operation_processing_tasks_loop'].dm.w = '0'
	        items['symetry_processing_task_loop'].dm.w = '0'
	
	GenCounterProcess = GenCounterProcess + 1
	__end__
	set _prepare ""

define loop processing_tasks_flow_loop
	set source_file ""
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run processing_tasks_flow_sequence

define sequence processing_tasks_flow_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run processing_GenCounterBalancing always
	run operation_processing_tasks_loop always
	run symetry_processing_task_loop always

define sequence symetry_processing_task_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run SS_General_instructions_2 always
	run SP_IniLists always
	run SP_reset_feedback always
	run SP_prectice_loop always
	run SP_experimental_loop always

define loop symetry_processing_task_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run symetry_processing_task_experiment

define sequence symetry_span_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run SS_mousetrap_response always
	run SS_General_instructions always
	run SS_General_instructions_1 always
	run SS_IniVar always
	run SS_practice_loop always
	run SS_experimental_loop2 always
	run SS_experimental_loop3 always
	run SS_experimental_loop4 always
	run SS_experimental_loop5 always
	run SS_experimental_loop6 always

define loop symetry_span_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	weight w
	run symetry_span_experiment

define loop task_flow_loop
	set source_file ""
	set source table
	set repeat 6
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run task_flow_sequence

define sequence task_flow_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run GenCounterBalancing always
	run WMU_loop always
	run binding_loop always
	run operation_span_loop always
	run n_back_loop always
	run multimodal_loop always
	run symetry_span_loop always

